PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = category_switch
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Routines
  Routine setup
    CodeComponent code_15
      Code Type = Both
      Begin Experiment:
        #import random
        #from random import randint

        heart = "heart.png"
        cross = "cross.png"

        practice_i = 0
        block_i = 1
        i = 0
        block_total = 4

        stim_living = ["shark", "lion", "oak", "alligator", "mushroom", "sparrow", "goldfish", "lizard"]
        stim_nonliving = ["table", "bicycle", "coat", "cloud", "pebble", "knob", "marble", "snowflake"]
        stim_big = ["table", "bicycle", "coat", "cloud", "shark", "lion", "oak", "alligator"]
        stim_small = ["pebble", "knob", "marble", "snowflake", "mushroom", "sparrow", "goldfish", "lizard"]

        for i in range(8):
            # first boolean is congruent/incongruent, second is alive/size
            stim_living[i] = [stim_living[i], True, True]
            stim_nonliving[i] = [stim_nonliving[i], False, True]
            stim_big[i] = [stim_big[i], True, False]
            stim_small[i] = [stim_small[i], False, False]
      Begin JS Experiment:
        new_trial_alive = " ";
        new_trial_stimuli = " ";
        last_trial_alive = " ";


        heart = "heart.png";
        cross = "cross.png";
        practice_i = 0;
        block_i = 1;
        i = 0;
        block_total = 4;

        stim_living = ["shark", "lion", "oak", "alligator", "mushroom", "sparrow", "goldfish", "lizard"];
        stim_nonliving = ["table", "bicycle", "coat", "cloud", "pebble", "knob", "marble", "snowflake"];
        stim_big = ["table", "bicycle", "coat", "cloud", "shark", "lion", "oak", "alligator"];
        stim_small = ["pebble", "knob", "marble", "snowflake", "mushroom", "sparrow", "goldfish", "lizard"];
        practice_i = 0;

        for (i = 0; i < 8; i++) {
            stim_living[i] = [stim_living[i], "congruent", "alive"];
            stim_nonliving[i] = [stim_nonliving[i], "incongruent", "alive"];
            stim_big[i] = [stim_big[i], "congruent", "size"];
            stim_small[i] = [stim_small[i], "incongruent", "size"];
        }

        // create really big stimulus lists to avoid running out of index
        stim_living = stim_living.concat(stim_living)
        stim_living = stim_living.concat(stim_living)
        stim_living = stim_living.concat(stim_living)
        stim_nonliving = stim_living.concat(stim_nonliving)
        stim_nonliving = stim_living.concat(stim_nonliving)
        stim_nonliving = stim_living.concat(stim_nonliving)
        stim_big = stim_big.concat(stim_big)
        stim_big = stim_big.concat(stim_big)
        stim_big = stim_big.concat(stim_big)
        stim_small = stim_small.concat(stim_small)
        stim_small = stim_small.concat(stim_small)
        stim_small = stim_small.concat(stim_small)

        target_stims = stim_living.concat(stim_nonliving, stim_big, stim_small)
  Routine practice_cue_1
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        cat_vis_heart = 0
        cat_vis_cross = 0
      Begin Routine:
        if practice_i == 0:
            practice_cue = heart
            cue_text = "Does the word describe a living thing?"
            cat_vis_heart = 1
            cat_vis_cross = 0
        else:
            practice_cue = cross
            cue_text = "Does the word describe a something bigger than a soccer ball?"
            cat_vis_cross = 1
            cat_vis_heart = 0
    ImageComponent cue_2
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .5
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    TextComponent text_49
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_heart
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = LIVING
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    TextComponent text_50
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_cross
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = BIG
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    TextComponent text_51
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_heart
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = NONLIVING
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    TextComponent text_52
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_cross
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = SMALL
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    ImageComponent heart_instruct_10
      image = heart.png
      opacity [set every repeat] = cat_vis_heart
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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    ImageComponent cross_instruct_10
      image = cross.png
      opacity [set every repeat] = cat_vis_cross
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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  Routine practice_instructions_1
    CodeComponent code_prac_1
      Code Type = Auto->JS
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      Begin Routine:
        k = 0

        if practice_i == 0:
            practice_text = "We are going to begin the practice. \n \nDuring this part, you will first see a HEART in the center of the screen. Next, you will see a word in the center of the screen.\n \nYour job is to judge if the word describes a living or nonliving thing. \n \nPress the LEFT arrow key if living, the RIGHT arrow key if nonliving.\n \nPress SPACE to continue."
        else:
            practice_text = "During this part, you will first see a CROSS in the center of the screen. Next, you will see a word in the center of the screen.\n \nYour job is to judge if the word describes something bigger or smaller than a soccer ball. \n \nPress the LEFT arrow key if bigger, the RIGHT arrow key if smaller.\n \nPress SPACE to continue."
    TextComponent text_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_text
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        i = 0
        k = 0



        alive = first_stims[0][2]
        new_trial_congruent = first_stims[0][1]


        trial_switch_array = []
        trial_congruent_array = []
        trial_alive_array = []
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, if you see a heart: press the LEFT arrow key if living and the RIGHT arrow key if nonliving.

        If you see a cross: press the LEFT arrow key if big and the RIGHT arrow key if small.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_5
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_6
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_7
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine cue_presentation
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trial_alive_array[k] == "alive":
            cue_stim = heart
            cue_text = "Does the word describe a living thing?"
        else:
            cue_stim = cross
            cue_text = "Does the word describe a something bigger than a soccer ball?"
    ImageComponent cue
      image [set every repeat] = $cue_stim
      pos = (0, 0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .5
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    TextComponent text_41
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = LIVING
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    TextComponent text_42
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = BIG
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    TextComponent text_43
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = NONLIVING
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    TextComponent text_44
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = SMALL
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    ImageComponent heart_instruct_8
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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    ImageComponent cross_instruct_8
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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  Routine trial
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if ((trial_congruent_array[k] === "congruent")) {
            corr_ans = "left";
        } else {
            corr_ans = "right";
        }
      Begin Routine:
        if trial_congruent_array[k] == "congruent":
            corr_ans = "left"
        else:
            corr_ans = "right"
      End JS Routine:
        psychoJS.experiment.addData('Presented_Stim', target_stims[k]);
        psychoJS.experiment.addData('Presented_Stim_Quality', trial_alive_array[k]);
        psychoJS.experiment.addData('TrialType_Congruency', trial_congruent_array[k]);
        psychoJS.experiment.addData('TrialType_Switch', trial_switch_array[k]);
        psychoJS.experiment.addData('CorrectAnswer', corr_ans);
        k = (k + 1);
      End Routine:
        k = k+1
    ImageComponent cue_8
      image [set every repeat] = $cue_stim
      pos = (0, 0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $target_stims[k]
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text_25
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_26
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_27
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_28
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct_4
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct_4
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine practice_trial_1
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if congruency_stim == "congruent":
            corr_ans = "left"
        else:
            corr_ans = "right"
    ImageComponent cue_5
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $word
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    KeyboardComponent prac_1_key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text_45
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_heart
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_46
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_cross
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_47
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_heart
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_48
      letterHeight = 0.03
      opacity [set every repeat] = cat_vis_cross
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct_9
      image = heart.png
      opacity [set every repeat] = cat_vis_heart
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct_9
      image = cross.png
      opacity [set every repeat] = cat_vis_cross
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine end_practice_block
    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        practice_i = i + 1

        shuffle(target_stims)
        first_stims = target_stims[0:4]
    TextComponent text_11
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Great job! Press SPACE to continue.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_1
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if practice_i == 0:
            feedback_message = "That was incorrect.\n \nRemember, press the LEFT arrow key if living and the RIGHT arrow key if nonliving."
        else:
            feedback_message = "That was incorrect.\n \nRemember, press the LEFT arrow key if bigger and the RIGHT arrow key if smaller."

        if prac_1_key_resp.corr == 0:
            feedback_time = 2
        else:
            feedback_time = 0
      End Routine:
        k = k+1
    TextComponent text_12
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message
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  Routine practice_cue_2
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if characteristic == "living":
            practice_cue = heart
            cue_text = "Does the word describe a living thing?"
        else:
            practice_cue = cross
            cue_text = "Does the word describe a something bigger than a soccer ball?"
    ImageComponent cue_3
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .5
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    TextComponent text_33
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = LIVING
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    TextComponent text_34
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = BIG
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    TextComponent text_35
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = NONLIVING
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    TextComponent text_36
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = SMALL
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    ImageComponent heart_instruct_6
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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    ImageComponent cross_instruct_6
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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  Routine practice_trial_2
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if congruency_stim == "congruent":
            corr_ans = "left"
        else:
            corr_ans = "right"
    ImageComponent cue_6
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_15
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $word
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    KeyboardComponent prac_3_key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text_29
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_30
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_31
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_32
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct_5
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct_5
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine feedback_2
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if characteristic == "living":
            feedback_message = "That was incorrect.\n \n Remember, press the LEFT arrow key if living and the RIGHT arrow key if nonliving."
        else:
            feedback_message = "That was incorrect.\n \n Remember, press the LEFT arrow key if bigger and the RIGHT arrow key if smaller."

        if prac_3_key_resp.corr == 0:
            feedback_time = 2
        else:
            feedback_time = 0
      End Routine:
        k = k+1
    TextComponent text_16
      letterHeight = .075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message
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  Routine practice_instructions_2
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        k = 0
    TextComponent text_17
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to do both categories.

        Remember, if you see a heart: press the LEFT arrow key if living and the RIGHT arrow key if nonliving.

        If you see a cross: press the LEFT arrow key if big and the RIGHT arrow key if small.

        Press SPACE to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_18
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_19
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_20
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_21
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct_2
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct_2
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine first_trial
    CodeComponent code_16
      Code Type = Both
      Begin JS Routine:
        if ((new_trial_congruent=== "congruent")) {
            corr_ans = "left";
        } else {
            corr_ans = "right";
        }
      Begin Routine:
        if new_trial_congruent == "congruent":
            corr_ans = "left"
        else:
            corr_ans = "right"
      End JS Routine:
        psychoJS.experiment.addData('Presented_Stim', first_stims[k][0]);
        psychoJS.experiment.addData('Presented_Stim_Quality', alive);
        psychoJS.experiment.addData('TrialType_Congruency', new_trial_congruent);
        psychoJS.experiment.addData('TrialType_Switch', "nonswitch");

        target_stims = [];
    ImageComponent cue_7
      image [set every repeat] = $cue_stim
      pos = (0, 0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $first_stims[k][0]
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text_14
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_22
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_23
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_24
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct_3
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct_3
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine first_cue
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if alive == "alive":
            cue_stim = heart
            cue_text = "Does the word describe a living thing?"
        else:
            cue_stim = cross
            cue_text = "Does the word describe a something bigger than a soccer ball?"
    ImageComponent cue_4
      image [set every repeat] = $cue_stim
      pos = (0, 0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .5
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    TextComponent text_37
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = LIVING
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    TextComponent text_38
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = BIG
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    TextComponent text_39
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = NONLIVING
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    TextComponent text_40
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = SMALL
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    ImageComponent heart_instruct_7
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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    ImageComponent cross_instruct_7
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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  Routine trial_setup
    CodeComponent code_18
      Code Type = Both
      Begin JS Routine:
        last_trial_alive = alive;
        trial_switch = trialtype_switch;
        new_trial_congruent = trialtype_congruent;

        if ((trial_switch === "nonswitch")) {
            new_trial_alive = last_trial_alive;
            if (new_trial_alive === "alive") {
                alive = "alive";
                if (new_trial_congruent === "congruent") {
                    new_trial_stimuli = stim_living.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                } else {
                    new_trial_stimuli = stim_nonliving.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                }
            } else {
                alive = "size";
                if (new_trial_congruent === "congruent") {
                    new_trial_stimuli = stim_big.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                } else {
                    new_trial_stimuli = stim_small.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                }
            }
        } else {
            if (last_trial_alive === "size") {
                alive = "alive";
                new_trial_alive = alive;
                if (new_trial_congruent === "congruent") {
                    new_trial_stimuli = stim_living.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                } else {
                    new_trial_stimuli = stim_nonliving.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                }
            } else {
                alive = "size";
                new_trial_alive = alive;
                if (new_trial_congruent === "congruent") {
                    new_trial_stimuli = stim_big.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                } else {
                    new_trial_stimuli = stim_small.pop(0);
                    target_stims.push(new_trial_stimuli[0]);
                    trial_alive_array = trial_alive_array.concat(new_trial_alive);
                    trial_switch_array = trial_switch_array.concat(trial_switch);
                    trial_congruent_array = trial_congruent_array.concat(new_trial_congruent);
                }
            }
        }
      Begin Routine:
        for i in range(32):
            last_trial_alive = alive # true === alive or false === size
            if not trial_switch:
                new_trial_alive = last_trial_alive
                if new_trial_alive:
                    alive = True
                    if new_trial_congruent:
                        new_trial_stimuli = stim_living.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
                    else: # if not congruent but alive
                        new_trial_stimuli = stim_nonliving.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
                else:
                    alive = False
                    if new_trial_congruent:
                        new_trial_stimuli = stim_big.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
                    else: # if not congruent but alive
                        new_trial_stimuli = stim_small.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
            else:
                new_trial_alive = not last_trial_alive
                if new_trial_alive:
                    alive = True
                    if new_trial_congruent:
                        new_trial_stimuli = stim_living.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
                    else: # if not congruent but alive
                        new_trial_stimuli = stim_nonliving.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
                else:
                    alive = False
                    if new_trial_congruent:
                        new_trial_stimuli = stim_big.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
                    else: # if not congruent but alive
                        new_trial_stimuli = stim_small.pop(0)
                        target_stims.append([new_trial_stimuli, new_trial_alive, trial_switch, new_trial_congruent])
        print(target_stims)
  Routine end_block
    CodeComponent code_19
      Code Type = Both
      Begin Experiment:
        end_block_message = "message"
      Begin JS Experiment:
         msg = "no message!";
        block_message = 'no message';
      Begin JS Routine:
        if ((block_i === 0)) {
            end_block_message = "You have reached the end of the practice.";
        } else {
            end_block_message = "You have reached the end of block " + block_i + " of " + block_total + ".";
        }
      Begin Routine:
        if (block_i == 0):
            end_block_message = "You have reached the end of the practice."
        else:
            end_block_message = "You have reached the end of block %i of %i." %(block_i, block_total)
      End JS Routine:
        block_i = (block_i + 1);
      End Routine:
        block_i = block_i + 1
    TextComponent text_13
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_block_message
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_57
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = We’re going to continue doing the same thing. When you are ready to continue, press SPACE to continue.
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  Routine end_exp
    TextComponent text_8
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment.

        Press SPACE to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine quick_instruct
    TextComponent text_53
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please respond as quickly as possible without making errors.

        Press SPACE to begin.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pause_keys
    TextComponent text_54
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Take a moment to put your fingers on the correct keys.

        You may press SPACE after 10 seconds to begin.
    ImageComponent image
      image = arrows.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 15
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    TextComponent text_55
      letterHeight = 0.075
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 15
      text = Please press SPACE now.
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 15
      store = nothing
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  Routine end_practice
    TextComponent text_56
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice. We are now going to begin the main test. Everything will be the same, except we are now going to record your responses and you will no longer receive feedback.

        You will complete 4 parts of about 4 minutes each.

        During the test, please respond as quickly as you can without making mistakes.

        Press SPACE to continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_again
    TextComponent text_58
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Here are the instructions again:
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Flow
  Routine setup
  Routine practice_instructions_1
  Routine quick_instruct
  Routine pause_keys
  LoopInitiator prac_trials_1 loopType="TrialHandler"
    conditionsFile = stimuli_prac_1.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'word': 'table', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'bicycle', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'coat', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'cloud', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'pebble', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'knob', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'marble', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'snowflake', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'shark', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'lion', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'oak', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'alligator', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'mushroom', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'sparrow', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'goldfish', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'lizard', 'characteristic': 'living', 'congruency_stim': 'congruent'}]
    Routine practice_cue_1
    Routine practice_trial_1
    Routine feedback_1
  LoopTerminator prac_trials_1
  Routine end_practice_block
  Routine practice_instructions_1
  Routine quick_instruct
  Routine pause_keys
  LoopInitiator prac_trials_2 loopType="TrialHandler"
    conditionsFile = stimuli_prac_2.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'word': 'table', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'bicycle', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'coat', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'cloud', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'pebble', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'knob', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'marble', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'snowflake', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'shark', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'lion', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'oak', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'alligator', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'mushroom', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'sparrow', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'goldfish', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'lizard', 'characteristic': 'size', 'congruency_stim': 'incongruent'}]
    Routine practice_cue_1
    Routine practice_trial_1
    Routine feedback_1
  LoopTerminator prac_trials_2
  Routine end_practice_block
  Routine practice_instructions_2
  Routine quick_instruct
  Routine pause_keys
  LoopInitiator prac_trials_3 loopType="TrialHandler"
    conditionsFile = stimuli_prac_3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'table', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'bicycle', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'coat', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'cloud', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'mushroom', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'sparrow', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'goldfish', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'lizard', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'shark', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'lion', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'oak', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'alligator', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'mushroom', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'sparrow', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'goldfish', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'lizard', 'characteristic': 'size', 'congruency_stim': 'incongruent'}]
    Routine practice_cue_2
    Routine practice_trial_2
    Routine feedback_2
  LoopTerminator prac_trials_3
  Routine end_practice_block
  Routine end_practice
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    Routine instructions
    Routine quick_instruct
    Routine pause_keys
    Routine first_cue
    Routine first_trial
    LoopInitiator trials_setup_loop loopType="TrialHandler"
      conditionsFile = trialtypes.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'congruent'},
        {'trialtype_switch': 'switch', 'trialtype_congruent': 'incongruent'},
        {'trialtype_switch': 'nonswitch', 'trialtype_congruent': 'congruent'}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
      Routine trial_setup
    LoopTerminator trials_setup_loop
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 32
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      Routine cue_presentation
      Routine trial
    LoopTerminator trials
    Routine end_block
    Routine instructions_again
  LoopTerminator blocks
  Routine end_exp
