PsychoPy2experiment version="2022.1.2"
Settings
  Completed URL = $"https://csi-cuny.sona-systems.com/webstudy_credit.aspx?experiment_id=381&credit_token=76a9f226d05a4070ab552fbc19aa12c1&survey_code="+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Use version = 2020.1.2
  Window size (pixels) = [1440, 900]
  expName = CM1
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_js
      Code Type = Auto->JS
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    CodeComponent code_start
      Code Type = Auto->JS
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      Begin Experiment:
        words = [];
        rat_stim = [];

        key_to_position = {'a':0,'s':1,'z':2,'x':3}

        targetwords = []

        i=0
      Begin Routine:
        words.append([WordsStimuli])
  Routine recognition_test
    CodeComponent code_ltm
      Code Type = Auto->JS
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      Begin Experiment:
        k=0
      Begin Routine:
        positions = [(-.25, 0),(.25, 0)]
        shuffle(positions)
      End Routine:
        distractor_text = distractor.text
        target_text = target_ltm.text
        distractor_pos = distractor.pos
        target_pos = target_ltm.pos
        psychoJS.experiment.addData('PresentationCondition', targetwords[k][1])
        k=k+1
    PolygonComponent fixation_ltm
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent distractor
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 180
      text [set every repeat] = $words.pop()
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    TextComponent target_ltm
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 180
      text [set every repeat] = $targetwords[k][0]
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    SliderComponent slider_right
      forceEndRoutine = True
      granularity = 0
      labels = 'Guess', 'Sure'
      letterHeight = 0.05
      pos = (.35, -0.25)
      saveStartStop = False
      size = (.6, 0.05)
      startVal [time (s)] = .5
      styles = ['rating', 'labels45']
      ticks = (1,100)
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    SliderComponent slider_left
      forceEndRoutine = True
      granularity = 0
      labels = 'Sure','Guess'
      letterHeight = 0.05
      pos = (-.35, -0.25)
      saveStartStop = False
      size = (.6, 0.05)
      startVal [time (s)] = .5
      styles = ['rating', 'labels45']
      ticks = (-100,1)
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  Routine stimulus_identification
    CodeComponent code_si
      Code Type = Auto->JS
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      Begin Routine:
        trialtext = words[i:(i+4)]
        target = trialtext[0]

        positions = [(-.25, .25),
        (.25, .25),
        (-.25, -.25),
        (.25, -.25)]

        position_to_key = {positions[0]: 'a', positions[1]: 's', positions[2]: 'z', positions[3]: 'x'}

        shuffle(positions)

        if presentation == "before":
            start_time = .5
            stop_time = 2
        else:
            start_time = 4
            stop_time = 120
      End Routine:
        i=i+4
        correct_ans = target_si.pos
        targetwords.append([target,presentation])
    PolygonComponent fixation
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent target_cue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $stop_time
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      text [set every repeat]:
        $target
    TextComponent target_si
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $target
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    TextComponent choice1
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[1]
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    TextComponent choice2
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[2]
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    TextComponent choice3
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[3]
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    KeyboardComponent key_resp_si
      allowedKeys = 'a','s','z','x'
      correctAns = $position_to_key[(target_si.pos)]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      storeCorrect = True
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  Routine instructions_ltm
    TextComponent instr_text_ltm
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For this task, we are going to be testing your memory for the words that you saw earlier.
        We will present two words at the top of the screen. One of these words is a “cue” word from the first task.
        Your job is to decide which word you saw before and tell us how confident you are in your choice.

        Use your mouse to indicate which word was previously presented and your level of confidence using the bar.

        Press <space> when you are ready to begin.
    KeyboardComponent instr_resp_ltm
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(targetwords)
  Routine practice_si
    CodeComponent code_practice
      Code Type = Auto->JS
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      Begin Routine:
        trialtext = words[i:(i+4)]
        target = trialtext[0]

        positions = [(-.25, .25),
        (.25, .25),
        (-.25, -.25),
        (.25, -.25)]

        position_to_key = {positions[0]: 'a', positions[1]: 's', positions[2]: 'z', positions[3]: 'x'}

        shuffle(positions)

        if presentation == "before":
            start_time = .5
            stop_time = 2
        else:
            start_time = 4
            stop_time = 120
      End Routine:
        i=i+4
        correct_ans = target_si.pos
    PolygonComponent fixation_practice
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent target_cue_practice
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $stop_time
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      text [set every repeat]:
        $target
    TextComponent target_si_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $target
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    TextComponent choice1_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[1]
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    TextComponent choice2_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[2]
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    TextComponent choice3_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[3]
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    KeyboardComponent key_resp_si_practice
      allowedKeys = 'a','s','z','x'
      correctAns = $position_to_key[tuple(target_si.pos)]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      store = nothing
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  Routine si_key_positions
    TextComponent choice_a
      letterHeight = 0.1
      pos = (-.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = A
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    TextComponent choice_s
      letterHeight = 0.1
      pos = (.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = S
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    TextComponent choice_z
      letterHeight = 0.1
      pos = (-.25, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Z
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    TextComponent choice_x
      letterHeight = 0.1
      pos = (.25, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = X
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    KeyboardComponent key_resp_si_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent text_practice
      letterHeight = .03
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The above keys correspond to the screen positions.
        Press <space> to continue
  Routine instructions_si_practice
    TextComponent instr_text_si
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <space> when you are ready to begin the practice.
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    KeyboardComponent instr_resp_si
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_si
    TextComponent instr_text_si_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, press the key <a,s,z,x> that corresponds to the location of the word that matches the center cue word.

        Press <space> when you are ready to begin.
    KeyboardComponent instr_resp_si_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_block_si
    TextComponent end_block_si_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a break to rest your eyes.
        When you are ready to continue, press <space>.
    KeyboardComponent key_resp_block_si
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent text_end_practice
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of the practice trials.
        The experimental trials are next.
        These trials are the same as the practice trials, except we are now keeping track of your responses.

        There will be several breaks throughout the experiment, please use them as it will keep you rested and allow you to finish faster than if you skip them.

        There will be a screen letting you know when you have finished this task.
    KeyboardComponent key_resp_practice_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(words)
  Routine stimuli_words
  Routine gough_scale
    TextComponent gough_instructions
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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      text:
        Please indicate which of the following adjectives best describe yourself.

        Pres <Y> for 'Yes' and <N> for 'No'.
    TextComponent trait_text
      letterHeight = 0.1
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $Trait
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    KeyboardComponent key_resp_gough
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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  Routine end
    TextComponent end_si_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the task.

        Please press <space> when you are ready to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rat_test
    TextComponent rat_text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $rat_stim[j][0]
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    KeyboardComponent key_resp_rat
      correctAns = $tempText == CorrectAnswer_RAT
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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    CodeComponent code_rat
      Code Type = Auto->JS
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      Begin Experiment:
        j=0
    TextComponent text_resp
      letterHeight = 0.1
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine instructions_rat
    TextComponent instructions_rat_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For the next task, you will be presented with three words.
        You will then find a fourth word that is related to all three.
        You will type your answer, then press <enter> to see three new words.
        You will have 30 seconds to complete each problem.

        Example: What word is related to these three words?

        PAINT DOLL CAT

        The answer is "HOUSE": house paint, dollhouse, and house cat.

        Please press <space> when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
  Routine rat_setup
    CodeComponent code_rat_setup
      Code Type = Auto->JS
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      Begin Routine:
        rat_stim.append([Items,CorrectAnswer])
        shuffle(rat_stim);
  Routine end_exp
    TextComponent end_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press <space> to close the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .25
      store = nothing
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Flow
  LoopInitiator start loopType="TrialHandler"
    conditionsFile = words_text.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordsStimuli': 'STAIN'},
      {'WordsStimuli': 'QUEEN'},
      {'WordsStimuli': 'JUICE'},
      {'WordsStimuli': 'CANDY'},
      {'WordsStimuli': 'BASS'},
      {'WordsStimuli': 'SODA'},
      {'WordsStimuli': 'POSTER'},
      {'WordsStimuli': 'WAIST'},
      {'WordsStimuli': 'SPEAR'},
      {'WordsStimuli': 'CAROL'},
      {'WordsStimuli': 'HEAP'},
      {'WordsStimuli': 'PARK'},
      {'WordsStimuli': 'UNCLE'},
      {'WordsStimuli': 'CAPE'},
      {'WordsStimuli': 'BOSS'},
      {'WordsStimuli': 'SOIL'},
      {'WordsStimuli': 'MIRROR'},
      {'WordsStimuli': 'SLAP'},
      {'WordsStimuli': 'KING'},
      {'WordsStimuli': 'FIRE'},
      {'WordsStimuli': 'BREAD'},
      {'WordsStimuli': 'TUNNEL'},
      {'WordsStimuli': 'HAIR'},
      {'WordsStimuli': 'BIRCH'},
      {'WordsStimuli': 'CAGE'},
      {'WordsStimuli': 'HOTEL'},
      {'WordsStimuli': 'SACK'},
      {'WordsStimuli': 'GRAPE'},
      {'WordsStimuli': 'FLAME'},
      {'WordsStimuli': 'CEREAL'},
      {'WordsStimuli': 'TROUT'},
      {'WordsStimuli': 'DIAL'},
      {'WordsStimuli': 'SCALE'},
      {'WordsStimuli': 'MARKET'},
      {'WordsStimuli': 'BEACH'},
      {'WordsStimuli': 'DRIVER'},
      {'WordsStimuli': 'SLUSH'},
      {'WordsStimuli': 'GLASS'},
      {'WordsStimuli': 'PILE'},
      {'WordsStimuli': 'PEST'},
      {'WordsStimuli': 'FLUTE'},
      {'WordsStimuli': 'MOTOR'},
      {'WordsStimuli': 'CROWN'},
      {'WordsStimuli': 'PRINCE'},
      {'WordsStimuli': 'HORN'},
      {'WordsStimuli': 'STREET'},
      {'WordsStimuli': 'SHOE'},
      {'WordsStimuli': 'HORSE'},
      {'WordsStimuli': 'LEAF'},
      {'WordsStimuli': 'CHART'},
      {'WordsStimuli': 'CABLE'},
      {'WordsStimuli': 'THROAT'},
      {'WordsStimuli': 'KILT'},
      {'WordsStimuli': 'PEOPLE'},
      {'WordsStimuli': 'PUPPY'},
      {'WordsStimuli': 'WIRE'},
      {'WordsStimuli': 'LINEN'},
      {'WordsStimuli': 'HOLE'},
      {'WordsStimuli': 'KNEE'},
      {'WordsStimuli': 'WEED'}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
    Routine setup
  LoopTerminator start
  Routine instructions_si_practice
  Routine si_key_positions
  LoopInitiator practice_si_loop loopType="TrialHandler"
    conditionsFile = presentation.xlsx
    isTrials = False
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{'presentation': 'before'},
      {'presentation': 'during'}]
    Routine practice_si
  LoopTerminator practice_si_loop
  Routine end_practice
  LoopInitiator blocks_si loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine instructions_si
    Routine si_key_positions
    LoopInitiator trial_si loopType="TrialHandler"
      conditionsFile = presentation.xlsx
      loopType = fullRandom
      nReps = 11
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      conditions:
        [{'presentation': 'before'},
        {'presentation': 'during'}]
      Routine stimulus_identification
    LoopTerminator trial_si
    Routine end_block_si
  LoopTerminator blocks_si
  Routine end
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = gough_scale.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'Trait': 'Capable'},
      {'Trait': 'Artificial'},
      {'Trait': 'Clever'},
      {'Trait': 'Cautious'},
      {'Trait': 'Confident'},
      {'Trait': 'Egotistical'},
      {'Trait': 'Commonplace'},
      {'Trait': 'Humorous'},
      {'Trait': 'Conservative'},
      {'Trait': 'Individualistic'},
      {'Trait': 'Conventional'},
      {'Trait': 'Informal'},
      {'Trait': 'Dissatisfied'},
      {'Trait': 'Insightful'},
      {'Trait': 'Suspicious'},
      {'Trait': 'Honest'},
      {'Trait': 'Intelligent'},
      {'Trait': 'Well-mannered'},
      {'Trait': 'Wide interests'},
      {'Trait': 'Inventive'},
      {'Trait': 'Original'},
      {'Trait': 'Narrow interests'},
      {'Trait': 'Reflective'},
      {'Trait': 'Sincere'},
      {'Trait': 'Resourceful'},
      {'Trait': 'Self-confident'},
      {'Trait': 'Sexy'},
      {'Trait': 'Submissive'},
      {'Trait': 'Snobbish'},
      {'Trait': 'Unconventional'},
      {'Trait': "Please select 'Yes'"}]
    Routine gough_scale
  LoopTerminator trials
  Routine end
  LoopInitiator rat_setup_stim loopType="TrialHandler"
    conditionsFile = rat.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'Items': 'DEW     COMB     BEE', 'CorrectAnswer': 'honey', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'NIGHT     WRIST     STOP', 'CorrectAnswer': 'watch', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'CANE     DADDY     PLUM', 'CorrectAnswer': 'sugar', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'DUCK     FOLD     DOLLAR', 'CorrectAnswer': 'bill', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'FOUNTAIN     BAKING     POP', 'CorrectAnswer': 'soda', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'CREAM     SKATE     WATER', 'CorrectAnswer': 'ice', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'POLITICAL     SURPRISE     LINE', 'CorrectAnswer': 'party', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'ROCKING     WHEEL     HIGH', 'CorrectAnswer': 'chair', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'MEASURE     WORM     VIDEO', 'CorrectAnswer': 'tape', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'PRESERVE     RANGER     TROPICAL', 'CorrectAnswer': 'forest', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'CRACKER     FLY     FIGHTER', 'CorrectAnswer': 'fire', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'WORM     SHELF     END', 'CorrectAnswer': 'book', 'Difficulty': 'Easy', 'Difficulty_Rating': 0},
      {'Items': 'DATE     ALLEY     FOLD', 'CorrectAnswer': 'blind', 'Difficulty': 'Easy', 'Difficulty_Rating': 0}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
    Routine rat_setup
  LoopTerminator rat_setup_stim
  Routine instructions_rat
  LoopInitiator trials_rat loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine rat_test
  LoopTerminator trials_rat
  Routine end
  Routine instructions_ltm
  LoopInitiator trial_ltm loopType="TrialHandler"
    loopType = random
    nReps = targetwords.length
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    Routine recognition_test
  LoopTerminator trial_ltm
  Routine end_exp
