PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = $"https://csi-cuny.sona-systems.com/webstudy_credit.aspx?experiment_id=381&credit_token=76a9f226d05a4070ab552fbc19aa12c1&survey_code="+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Use version = 2020.2
  Window size (pixels) = [1440, 900]
  expName = CM2_B
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine setup
    CodeComponent code_js
      Code Type = Both
      Begin JS Experiment:
        Array.prototype.append = [].push;
        shuffle = util.shuffle;

        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Mobile device detected. Goodbye!', false)
        }
    CodeComponent code_start
      Code Type = Both
      Begin Experiment:
        words_practice = [];
        words_target = [];
        words_lure = [];
        words_distractor = [];
        rat_stim = [];

        key_to_position = {'a':0,'s':1,'z':2,'x':3}

        targetwords = []

        i=0
      Begin JS Experiment:
        words_practice = [];
        words_target = [];
        words_lure = [];
        words_distractor = [];
        rat_stim = [];
        key_to_position = {"a": 0, "s": 1, "z": 2, "x": 3};
        targetwords = [];
        document.body.style.cursor='none';
      Begin JS Routine:
        if ((Type === "practice")) {
            words_practice.append([WordsStimuli]);
        } else {
            if ((Type === "target")) {
                words_target.append([WordsStimuli]);
            } else {
                if ((Type === "lure")) {
                    words_lure.append([WordsStimuli]);
                } else {
                    words_distractor.append([WordsStimuli]);
                }
            }
        }
      Begin Routine:
        if (Type == "practice"):
            words_practice.append([WordsStimuli])
        elif (Type == "target"):
            words_target.append([WordsStimuli])
        elif (Type == "lure"):
            words_lure.append([WordsStimuli])
        else:
            words_distractor.append([WordsStimuli])
  Routine recognition_test
    CodeComponent code_ltm
      Code Type = Both
      Begin JS Experiment:
        m = 0;
      Begin JS Routine:
        positions = [[(- 0.25), 0], [0.25, 0]];
        position_to_key = {[positions[0]]: "left", [positions[1]]: "right"};
        shuffle(positions);
      Begin Routine:
        shuffle(targetwords)

        positions = [(-.25, 0),(.25, 0)]
        position_to_key = {positions[0]: 'left', positions[1]: 'right'}
        shuffle(positions)
      End JS Routine:
        distractor_text = distractor.text;
        target_text = target_ltm.text;
        distractor_pos = distractor.pos;
        target_pos = target_ltm.pos;
        psychoJS.experiment.addData("TargetWord", targetwords[m][0]);
        psychoJS.experiment.addData("TargetTextDisplayed", target_text);
        psychoJS.experiment.addData("DistractorWord", distractor_text);
        psychoJS.experiment.addData("PresentationCondition", targetwords[m][1]);
        psychoJS.experiment.addData('TargetPosition', target_pos)
        psychoJS.experiment.addData('DistractorPosition', distractor_pos)
        m = (m+1);
      End Routine:
        distractor_text = distractor.text
        target_text = target_ltm.text
        distractor_pos = distractor.pos
        target_pos = target_ltm.pos
    PolygonComponent fixation_ltm
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent distractor
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 180
      text [set every repeat] = $words_distractor.pop()
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    TextComponent target_ltm
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 180
      text [set every repeat] = $targetwords[m][0]
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    SliderComponent slider_right
      forceEndRoutine = True
      granularity = 0
      labels = 'Guess', 'Sure'
      letterHeight = 0.05
      pos = (.35, -0.25)
      saveStartStop = False
      size = (.6, 0.05)
      startVal [time (s)] = .5
      styles = ['rating', 'labels45']
      ticks = (1,100)
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    SliderComponent slider_left
      forceEndRoutine = True
      granularity = 0
      labels = 'Sure','Guess'
      letterHeight = 0.05
      pos = (-.35, -0.25)
      saveStartStop = False
      size = (.6, 0.05)
      startVal [time (s)] = .5
      styles = ['rating', 'labels45']
      ticks = (-100,1)
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  Routine stimulus_identification
    CodeComponent code_si
      Code Type = Both
      Begin JS Experiment:
        i = 0;
      Begin JS Routine:
        trialtext = [words_target[i], words_lure[v], words_lure[(v+1)], words_lure[(v+2)]];
        target = trialtext[0];
        positions = [[(- 0.25), 0.25], [0.25, 0.25], [(- 0.25), (- 0.25)], [0.25, (- 0.25)]];
        position_to_key = {[positions[0]]: "a", [positions[1]]: "s", [positions[2]]: "z", [positions[3]]: "x"};
        shuffle(positions);
        if ((presentation === "before")) {
            start_time = .5;
            stop_time = 2;
        } else {
            start_time = 4;
            stop_time = 120;
        }
      Begin Routine:
        trialtext = words[i:(i+4)]
        target = trialtext[0]

        positions = [(-.25, .25),
        (.25, .25),
        (-.25, -.25),
        (.25, -.25)]

        position_to_key = {positions[0]: 'a', positions[1]: 's', positions[2]: 'z', positions[3]: 'x'}

        shuffle(positions)

        if presentation == "before":
            start_time = 1
            stop_time = 1
        else:
            start_time = 2.5
            stop_time = 10000
      End JS Routine:
        i = (i + 1);
        v = (v + 3);
        correct_ans = target_si.pos;
        targetwords.append([target, presentation]);
        psychoJS.experiment.addData("TargetWord_SI", trialtext[0]);
        psychoJS.experiment.addData("ResponseWords_SI", trialtext.slice(1, 4));
      End Routine:
        i=i+4
        correct_ans = target_si.pos
        targetwords.append([target,presentation])
    PolygonComponent fixation
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent target_cue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $stop_time
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      text [set every repeat]:
        $target
    TextComponent target_si
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $target
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    TextComponent choice1
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[1]
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    TextComponent choice2
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[2]
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    TextComponent choice3
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[3]
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    KeyboardComponent key_resp_si
      allowedKeys = 'a','s','z','x'
      correctAns = $position_to_key[(target_si.pos)]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      storeCorrect = True
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  Routine instructions_ltm
    TextComponent instr_text_ltm_1
      letterHeight = 0.045
      pos = (0,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will see two words on the screen. One of the words was previously displayed during this task:
    KeyboardComponent instr_resp_ltm
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instr_text_ltm_2
      letterHeight = 0.045
      pos = (0, -.3)
      startVal [time (s)] = 0.0
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      text:
        Below each word there is a confidence bar ranging from ''Guess'' to ''Sure''.
        Use your mouse to indicate which word was previously presented and your level of confidence using the bar.

        Press <space> to continue.
    TextComponent text_example_1
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = TWIG
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    TextComponent text_example_2
      letterHeight = 0.035
      pos = (0.1, .2)
      startVal [time (s)] = 0.0
      text = TWIG
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    TextComponent text_example_3
      letterHeight = 0.035
      pos = (-0.1, .2)
      startVal [time (s)] = 0.0
      text = SHEEP
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    TextComponent text_example_4
      letterHeight = 0.035
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      text = SALT
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    TextComponent text_example_5
      letterHeight = 0.035
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      text = BONE
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        shuffle(targetwords);
        document.body.style.cursor='auto';
      Begin Routine:
        shuffle(targetwords)
  Routine practice_si
    CodeComponent code_practice
      Code Type = Both
      Begin JS Routine:
        trialtext = words_practice.slice(i, (i + 4));
        target = trialtext[0];
        positions = [[(- 0.25), 0.25], [0.25, 0.25], [(- 0.25), (- 0.25)], [0.25, (- 0.25)]];
        position_to_key = {[positions[0]]: "a", [positions[1]]: "s", [positions[2]]: "z", [positions[3]]: "x"};
        shuffle(positions);
        if ((presentation === "before")) {
            start_time = 0.5;
            stop_time = 2;
        } else {
            start_time = 4;
            stop_time = 120;
        }
      End JS Routine:
        i = (i + 4);
        correct_ans = target_si.pos;
        psychoJS.experiment.addData("TargetWord_SI", trialtext[0]);
        psychoJS.experiment.addData("ResponseWords_SI", trialtext.slice(1, 4));
      End Routine:
        i=i+4
        correct_ans = target_si.pos
    PolygonComponent fixation_practice
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent target_cue_practice
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $stop_time
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      text [set every repeat]:
        $target
    TextComponent target_si_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $target
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    TextComponent choice1_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[1]
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    TextComponent choice2_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[2]
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    TextComponent choice3_practice
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      text [set every repeat] = $trialtext[3]
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    KeyboardComponent key_resp_si_practice
      allowedKeys = 'a','s','z','x'
      correctAns = $position_to_key[tuple(target_si.pos)]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 120
      store = nothing
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  Routine si_key_positions
    TextComponent choice_a
      letterHeight = 0.1
      pos = (-.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = A
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    TextComponent choice_s
      letterHeight = 0.1
      pos = (.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = S
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    TextComponent choice_z
      letterHeight = 0.1
      pos = (-.25, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Z
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    TextComponent choice_x
      letterHeight = 0.1
      pos = (.25, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = X
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    KeyboardComponent key_resp_si_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent text_practice
      letterHeight = .03
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The above keys correspond to the screen positions.
        Press <space> to continue
  Routine instructions_si_practice
    TextComponent instr_text_si
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During the next task, you are going to perform a simple identification task involving words.
        First, a small cross will appear in the center of the screen. This is your warning to pay attention as the words are about to appear.
        Next, there are two things that may happen:
        1. You may see a word in the center of the screen which will disappear after a few seconds.
        This is your cue word because on the next screen you will see four words appear in the four corners of the screen, one of which will match the cue word you just saw.
        2. You may see a word in the center of the screen followed by the four words presented in the four corners. This time the center cue word will remain on the screen at the same time.

        Your job for both scenarios is to select the location of the word which matches the center cue word using the <A> (upper left), <S> (upper right), <Z> (bottom left), or <X> (bottom right) key.

        Press <space> to begin the practice.
    KeyboardComponent instr_resp_si
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_si
    TextComponent instr_text_si_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will see a series of words presented on the screen.
        There will be a word in the center that is your cue.

        Press the key <a,s,z,x> that corresponds to the location of the word that matches the cue.

        Press <space> when you are ready to begin.
    KeyboardComponent instr_resp_si_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_block_si
    TextComponent end_block_si_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a break to rest your eyes.
        When you are ready to continue, press <space>.
    KeyboardComponent key_resp_block_si
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent text_end_practice
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice.

        Please press <space> to continue.
    KeyboardComponent key_resp_practice_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(words_target)
        shuffle(words_lure)
        shuffle(words_distractor)
        i = 0
        v = 0
  Routine stimuli_words
  Routine gough_scale
    TextComponent gough_instructions
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please indicate which of the following adjectives best describe yourself.

        Pres <y> for 'Yes' and <n> for 'No'.
    TextComponent trait_text
      letterHeight = 0.1
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Trait
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    KeyboardComponent key_resp_gough
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_si_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the task.

        Please press <space> when you are ready to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rei_scale
    TextComponent rei_instructions
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Using the following scale, please rate the extent that these items refer to you.
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    TextComponent rei_1
      letterHeight = 0.03
      pos = (-.25, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        1
        Definitely true
        of myself
    TextComponent rei_2
      letterHeight = 0.03
      pos = (-.125, 0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = 2
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    TextComponent rei_3
      letterHeight = 0.03
      pos = (0, 0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = 3
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    TextComponent rei_4
      letterHeight = 0.03
      pos = (.125, .085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = 4
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    TextComponent rei_5
      letterHeight = 0.03
      pos = (.25, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        5
        Definitely not
        true of myself
    TextComponent rei_text
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every repeat] = $rei_question
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    KeyboardComponent key_resp_rei
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine rat_setup
    CodeComponent code_rat_setup
      Code Type = Both
      Begin JS Routine:
        rat_stim.append([Items, CorrectAnswer]);
        shuffle(rat_stim);
      Begin Routine:
        rat_stim.append([Items])
        shuffle(rat_stim);
  Routine instructions_rat
    TextComponent instructions_rat_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For the next task, you will be presented with three words.
        You will then find a fourth word that is related to all three.
        You will type your answer, then press <enter> to see three new words.

        Example: What word is related to these three words?

        PAINT DOLL CAT

        The answer is "HOUSE": house paint, dollhouse, and house cat.

        Please press <space> when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rat_test
    TextComponent rat_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $rat_stim[rat_i][0]
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    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        j = 0
      Begin JS Experiment:
        rat_i = 0;
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        // check for quit:
        if (theseKeys.indexOf('escape') > -1) {
            psychoJS.experiment.experimentEnded = true;
        }
        if (theseKeys.indexOf('return') > -1) {
            textAdd = '';  // Add nothing
            tempText = text_resp.text;  // get the text from the text component
            text_resp.setText('');  // empty the onscreen text ready for next input (just be sure to save it)
            continueRoutine = false; // End routine
        }

        if (textAdd) {
            if (theseKeys.indexOf('space') > -1) {
                text_resp.setText(text_resp.text + " ");
                textAdd = undefined;
            } else if (theseKeys.indexOf('backspace') > -1) {
                text_resp.setText(text_resp.text + textAdd[textAdd.length-1]);
                textAdd = '';  // Add nothing
                text_resp.setText('')  // empty the onscreen text ready for next input (just be sure to save it)
            } else if (theseKeys.indexOf('lshift') > -1) {
                text_resp.setText(text_resp.text + " ");
                textAdd = undefined;
            } else if (theseKeys.indexOf('rshift') > -1) {
                text_resp.setText(text_resp.text + " ");
                textAdd = undefined;
            } else {
                text_resp.setText(text_resp.text + textAdd);
                textAdd = undefined;
            }
        }
      End JS Routine:
        psychoJS.experiment.addData('textInput', tempText);
        psychoJS.experiment.addData('PresentedItems', rat_stim[rat_i][0]);
        psychoJS.experiment.addData('CorrectAnswer_RAT', rat_stim[rat_i][1]);

        rat_i = (rat_i+1);
        text_resp.setText('');  // empty the onscreen text ready for next input (just be sure to save it)
    KeyboardComponent key_resp_rat
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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    TextComponent text_resp
      letterHeight = 0.1
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine setup_2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        words_delayed.append([WordsStimuli_2])
  Routine problem_solving
    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        k = 0
        numbers = [0,1,2,3,4,5,6,7,8,9]
        symbols = ["add", "subtract"]
        items_au = ["brick", "paperclip", "plank of wood", "newspaper", "ping pong ball"]
        shuffle(items_au)
        problem_conditions = ["math", "creative"]
        shuffle(problem_conditions)

        if (problem_conditions[0] == "math"):
            problem_opacity = 1
            item_opacity = 0
            problem_reps = 30
            continue_routine = false
        else:
            problem_opacity = 0
            item_opacity = 1
            problem_reps = 5
            continue_routine = true
      Begin JS Experiment:
        k = 0;
        numbers = [0, 1, 2, 3, 4, 5, 6, 7, 8, 9];
        symbols = ["add", "subtract"];
        items_au = ["brick", "paperclip", "plank of wood", "newspaper", "ping pong ball"];
        shuffle(items_au);
        //problem_conditions = ["math", "creative"];
        problem_conditions = ["math"]; // only want math pts now
        shuffle(problem_conditions);

        if ((problem_conditions[0] === "math")) {
            problem_opacity = 1;
            item_opacity = 0;
            problem_reps = 60;
            continue_routine = false;
        } else {
            problem_opacity = 0;
            item_opacity = 1;
            problem_reps = 5;
            continue_routine = true;
        }
      Begin JS Routine:
        shuffle(numbers);
        shuffle(symbols);
        if ((symbols[0] === "subtract")) {
            symbol = "-";
            correct_answer_math = (numbers[0] - numbers[1]);
        } else {
            symbol = "+";
            correct_answer_math = (numbers[0] + numbers[1]);
        }

        text_resp_problem.setText('');  // empty the onscreen text ready for next input (just be sure to save it)
      Begin Routine:
        shuffle(numbers)
        shuffle(symbols)

        if (symbols[0] == "subtract"):
            symbol = '-'
            while numbers[0] < numbers[1]:
                numbers[0] += 1
            correct_answer_math = numbers[0] - numbers[1]
        else:
            symbols = '+'
            correct_answer_math = numbers[0] + numbers[1]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        // check for quit:
        if (theseKeys.indexOf('escape') > -1) {
            psychoJS.experiment.experimentEnded = true;
        }
        if (theseKeys.indexOf('return') > -1) {
            textAdd = '';  // Add nothing
            tempText = text_resp_problem.text;  // get the text from the text component
            if ((problem_conditions[0] === "math")) {
                text_resp_problem.setText('');  // empty the onscreen text ready for next input (just be sure to save it)
            }
            continueRoutine = continue_routine; // End routine
        }

        if (textAdd) {
            if (theseKeys.indexOf('space') > -1) {
                text_resp_problem.setText(text_resp_problem.text + " ");
                textAdd = undefined;
            } else if (theseKeys.indexOf('backspace') > -1) {
                //text_resp_problem.setText(text_resp_problem.text + textAdd[textAdd.length-1]);
                //textAdd = '';  // Add nothing
                //text_resp_problem.setText('')  // empty the onscreen text ready for next input (just be sure to save it)
                text_resp_problem.setText(text_resp_problem.text.slice(0, -1));
                textAdd = undefined;
            } else if (theseKeys.indexOf('lshift') > -1) {
                text_resp_problem.setText(text_resp_problem.text + " ");
                textAdd = undefined;
            } else if (theseKeys.indexOf('rshift') > -1) {
                text_resp_problem.setText(text_resp_problem.text + " ");
                textAdd = undefined;
            } else if (theseKeys.indexOf('minus') > -1) {
                text_resp_problem.setText(text_resp_problem.text + " ");
                textAdd = '-';
            } else if (theseKeys.indexOf('comma') > -1) {
                text_resp_problem.setText(text_resp_problem.text + " ");
                textAdd = ',';
            } else if (theseKeys.indexOf('period') > -1) {
                text_resp_problem.setText(text_resp_problem.text + " ");
                textAdd = '.';
            } else if (theseKeys.indexOf('apostrophe') > -1) {
                text_resp_problem.setText(text_resp_problem.text + " ");
                textAdd = '\'';
            } else {
                text_resp_problem.setText(text_resp_problem.text + textAdd);
                textAdd = undefined;
            }
        }
      End JS Routine:
        psychoJS.experiment.addData('Problem_Condition', problem_conditions[0]);
        psychoJS.experiment.addData('textInput_problem', tempText);
        psychoJS.experiment.addData('PresentedItems_au', items_au[k]);
        psychoJS.experiment.addData('CorrectAnswer_math', correct_answer_math);
        k = (k + 1);
      End Routine:
        correct_answer_math = numbers
        k = k+1
    TextComponent number_1
      letterHeight = 0.1
      opacity [set every repeat] = problem_opacity
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $numbers[0]
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    TextComponent symbol_sign
      letterHeight = 0.1
      opacity [set every repeat] = problem_opacity
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $symbol
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    TextComponent number_2
      letterHeight = 0.1
      opacity = problem_opacity
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $numbers[1]
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    KeyboardComponent key_resp_problem
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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    TextComponent text_item
      letterHeight = 0.1
      opacity [set every repeat] = item_opacity
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $items_au[k]
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    TextComponent text_resp_problem
      letterHeight = 0.05
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent text_end_au
      letterHeight = 0.1
      startVal [time (s)] = 120
      stopVal [duration (s)] = 120
      text = Press <enter> to continue.
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    KeyboardComponent key_resp_3
      allowedKeys = 'return',
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 120
      stopVal [duration (s)] = 120
      store = nothing
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  Routine problem_instructions
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        if ((problem_conditions[0] === "math")) {
            instruct_text_problems = "On the next screen, you will see a series of math problems.\nFor each problem, please type the correct answer and press <enter> to submit."
        } else {
            instruct_text_problems = "On the next screen you will be presented with a common item. Please list as many possible uses for this item.\nYou will have 3 minutes to type as many possible uses.\nIn between your answers, please type a comma.\nFor example, if the word is COFFEE CUP, your answers might look like this:\n\nsoup bowl, plant pot, template to draw a circle"
        }
    TextComponent text_au_instruct
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text_problems
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    TextComponent text_instruct_end
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Press <space> to continue.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_experiment
    TextComponent text_end_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Congratulations, you have reached the end of the experiment!

        Thank you for your time and participation.

        Please press <space> to close.
    KeyboardComponent key_resp_5
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator start loopType="TrialHandler"
    conditionsFile = words_text_B.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'WordsStimuli': 'STAIN', 'Type': 'lure'},
      {'WordsStimuli': 'QUEEN', 'Type': 'lure'},
      {'WordsStimuli': 'JUICE', 'Type': 'lure'},
      {'WordsStimuli': 'CANDY', 'Type': 'lure'},
      {'WordsStimuli': 'BASS', 'Type': 'lure'},
      {'WordsStimuli': 'SODA', 'Type': 'lure'},
      {'WordsStimuli': 'POSTER', 'Type': 'lure'},
      {'WordsStimuli': 'WAIST', 'Type': 'lure'},
      {'WordsStimuli': 'SPEAR', 'Type': 'lure'},
      {'WordsStimuli': 'CAROL', 'Type': 'lure'},
      {'WordsStimuli': 'HEAP', 'Type': 'lure'},
      {'WordsStimuli': 'PARK', 'Type': 'lure'},
      {'WordsStimuli': 'UNCLE', 'Type': 'lure'},
      {'WordsStimuli': 'CAPE', 'Type': 'lure'},
      {'WordsStimuli': 'BOSS', 'Type': 'lure'},
      {'WordsStimuli': 'SOIL', 'Type': 'lure'},
      {'WordsStimuli': 'MIRROR', 'Type': 'lure'},
      {'WordsStimuli': 'SLAP', 'Type': 'lure'},
      {'WordsStimuli': 'KING', 'Type': 'lure'},
      {'WordsStimuli': 'FIRE', 'Type': 'lure'},
      {'WordsStimuli': 'BREAD', 'Type': 'lure'},
      {'WordsStimuli': 'TUNNEL', 'Type': 'lure'},
      {'WordsStimuli': 'HAIR', 'Type': 'lure'},
      {'WordsStimuli': 'BIRCH', 'Type': 'lure'},
      {'WordsStimuli': 'CAGE', 'Type': 'lure'},
      {'WordsStimuli': 'HOTEL', 'Type': 'lure'},
      {'WordsStimuli': 'SACK', 'Type': 'lure'},
      {'WordsStimuli': 'GRAPE', 'Type': 'lure'},
      {'WordsStimuli': 'FLAME', 'Type': 'lure'},
      {'WordsStimuli': 'CEREAL', 'Type': 'lure'},
      {'WordsStimuli': 'TROUT', 'Type': 'lure'},
      {'WordsStimuli': 'DIAL', 'Type': 'lure'},
      {'WordsStimuli': 'SCALE', 'Type': 'lure'},
      {'WordsStimuli': 'MARKET', 'Type': 'lure'},
      {'WordsStimuli': 'BEACH', 'Type': 'lure'},
      {'WordsStimuli': 'DRIVER', 'Type': 'lure'}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
    Routine setup
  LoopTerminator start
  LoopInitiator trials_rei loopType="TrialHandler"
    conditionsFile = REI_scale.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'rei_question': 'I’m not that good at figuring out complicated problems'},
      {'rei_question': 'I am not very good at solving problems that require careful logical analysis'},
      {'rei_question': 'I am not a very analytical thinker'},
      {'rei_question': 'Reasoning things out carefully is not one of my strong points'},
      {'rei_question': 'I don’t reason well under pressure'},
      {'rei_question': 'I am much better at figuring things out logically than most people'},
      {'rei_question': 'I have a logical mind'},
      {'rei_question': 'I have no problem thinking things through carefully'},
      {'rei_question': 'Using logic usually works well for me in figuring out problems in my life'},
      {'rei_question': 'I usually have clear, explainable reasons for my decisions'},
      {'rei_question': 'I try to avoid situations that require thinking in depth about something'},
      {'rei_question': 'I enjoy intellectual challenges'},
      {'rei_question': 'I don’t like to have to do a lot of thinking'},
      {'rei_question': 'I enjoy solving problems that require hard thinking'},
      {'rei_question': 'Thinking is not my idea of an enjoyable activity'},
      {'rei_question': 'I prefer complex problems to simple problems'},
      {'rei_question': 'Thinking hard and for a long time about something gives me little satisfaction'},
      {'rei_question': 'I enjoy thinking in abstract terms'},
      {'rei_question': 'Knowing the answer without having to understand the reasoning behind it is good enough for me'},
      {'rei_question': 'Learning new ways to think would be very appealing to me'}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
    Routine rei_scale
  LoopTerminator trials_rei
  Routine problem_instructions
  LoopInitiator trials_problem loopType="TrialHandler"
    loopType = random
    nReps = problem_reps
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    Routine problem_solving
  LoopTerminator trials_problem
  Routine end
  Routine instructions_si_practice
  Routine si_key_positions
  LoopInitiator practice_si_loop loopType="TrialHandler"
    conditionsFile = presentation.xlsx
    isTrials = False
    loopType = random
    nReps = 5
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    conditions:
      [{'presentation': 'before'},
      {'presentation': 'during'}]
    Routine practice_si
  LoopTerminator practice_si_loop
  Routine end_practice
  LoopInitiator blocks_si loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine instructions_si
    Routine si_key_positions
    LoopInitiator trial_si loopType="TrialHandler"
      conditionsFile = presentation.xlsx
      loopType = fullRandom
      nReps = 11
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      conditions:
        [{'presentation': 'before'},
        {'presentation': 'during'}]
      Routine stimulus_identification
    LoopTerminator trial_si
    Routine end_block_si
  LoopTerminator blocks_si
  Routine end
  LoopInitiator rat_setup_stim loopType="TrialHandler"
    conditionsFile = rat.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'Items': 'DEW     COMB     BEE', 'CorrectAnswer': 'honey', 'Difficulty': 'Easy'},
      {'Items': 'NIGHT     WRIST     STOP', 'CorrectAnswer': 'watch', 'Difficulty': 'Easy'},
      {'Items': 'CANE     DADDY     PLUM', 'CorrectAnswer': 'sugar', 'Difficulty': 'Easy'},
      {'Items': 'DUCK     FOLD     DOLLAR', 'CorrectAnswer': 'bill', 'Difficulty': 'Easy'},
      {'Items': 'FOUNTAIN     BAKING     POP', 'CorrectAnswer': 'soda', 'Difficulty': 'Easy'},
      {'Items': 'CREAM     SKATE     WATER', 'CorrectAnswer': 'ice', 'Difficulty': 'Easy'},
      {'Items': 'POLITICAL     SURPRISE     LINE', 'CorrectAnswer': 'party', 'Difficulty': 'Easy'},
      {'Items': 'ROCKING     WHEEL     HIGH', 'CorrectAnswer': 'chair', 'Difficulty': 'Easy'},
      {'Items': 'MEASURE     WORM     VIDEO', 'CorrectAnswer': 'tape', 'Difficulty': 'Easy'},
      {'Items': 'PRESERVE     RANGER     TROPICAL', 'CorrectAnswer': 'forest', 'Difficulty': 'Easy'},
      {'Items': 'CRACKER     FLY     FIGHTER', 'CorrectAnswer': 'fire', 'Difficulty': 'Easy'},
      {'Items': 'WORM     SHELF     END', 'CorrectAnswer': 'book', 'Difficulty': 'Easy'},
      {'Items': 'DATE     ALLEY     FOLD', 'CorrectAnswer': 'blind', 'Difficulty': 'Easy'},
      {'Items': 'WATER     MINE     SHAKER', 'CorrectAnswer': 'salt', 'Difficulty': 'Easy'},
      {'Items': 'NUCLEAR     FEUD     ALBUM', 'CorrectAnswer': 'family', 'Difficulty': 'Easy'},
      {'Items': 'LOSER     THROAT     SPOT', 'CorrectAnswer': 'sore', 'Difficulty': 'Easy'},
      {'Items': 'SLEEPING     BEAN     TRASH', 'CorrectAnswer': 'bag', 'Difficulty': 'Easy'}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
    Routine rat_setup
  LoopTerminator rat_setup_stim
  Routine instructions_rat
  LoopInitiator trials_rat loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine rat_test
  LoopTerminator trials_rat
  Routine end
  Routine instructions_ltm
  LoopInitiator trial_ltm loopType="TrialHandler"
    loopType = random
    nReps = targetwords.length
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    Routine recognition_test
  LoopTerminator trial_ltm
  Routine end_experiment
