PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = CM2_B_2
  logging level = debug
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Routines
  Routine setup
    CodeComponent code_js
      Code Type = Both
      Begin JS Experiment:
        Array.prototype.append = [].push;
        shuffle = util.shuffle;

        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Mobile device detected. Goodbye!', false)
        }
    CodeComponent code_start
      Code Type = Both
      Begin Experiment:
        words_practice = [];
        words_target = [];
        words_lure = [];
        words_distractor = [];
        rat_stim = [];

        key_to_position = {'a':0,'s':1,'z':2,'x':3}

        targetwords = []

        i=0
      Begin JS Experiment:
        words_practice = [];
        words_target = [];
        words_lure = [];
        words_distractor = [];
        document.body.style.cursor='none';
      Begin JS Routine:
        if ((Type === "practice")) {
            words_practice.append([WordsStimuli]);
        } else {
            if ((Type === "target")) {
                words_target.append([WordsStimuli]);
            } else {
                if ((Type === "lure")) {
                    words_lure.append([WordsStimuli]);
                } else {
                    words_distractor.append([WordsStimuli]);
                }
            }
        }
      Begin Routine:
        if (Type == "practice"):
            words_practice.append([WordsStimuli])
        elif (Type == "target"):
            words_target.append([WordsStimuli])
        elif (Type == "lure"):
            words_lure.append([WordsStimuli])
        else:
            words_distractor.append([WordsStimuli])
  Routine recognition_test
    CodeComponent code_ltm
      Code Type = Both
      Begin JS Experiment:
        m = 0;
      Begin JS Routine:
        positions = [[(- 0.25), 0], [0.25, 0]];
        position_to_key = {[positions[0]]: "left", [positions[1]]: "right"};
        shuffle(positions);
      Begin Routine:
        shuffle(targetwords)

        positions = [(-.25, 0),(.25, 0)]
        position_to_key = {positions[0]: 'left', positions[1]: 'right'}
        shuffle(positions)
      End JS Routine:
        distractor_text = distractor.text;
        target_text = target_ltm.text;
        distractor_pos = distractor.pos;
        target_pos = target_ltm.pos;
        psychoJS.experiment.addData("TargetWord", words_target[m][0]);
        psychoJS.experiment.addData("TargetTextDisplayed", target_text);
        psychoJS.experiment.addData("DistractorWord", distractor_text);
        psychoJS.experiment.addData('TargetPosition', target_pos)
        psychoJS.experiment.addData('DistractorPosition', distractor_pos)
        m = m+1;
      End Routine:
        distractor_text = distractor.text
        target_text = target_ltm.text
        distractor_pos = distractor.pos
        target_pos = target_ltm.pos
    PolygonComponent fixation_ltm
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent distractor
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 180
      text [set every repeat] = $words_distractor.pop()
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    TextComponent target_ltm
      letterHeight = 0.1
      pos [set every repeat] = positions.pop()
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 180
      text [set every repeat] = $words_target[m]
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    SliderComponent slider_right
      forceEndRoutine = True
      granularity = 0
      labels = 'Guess', 'Sure'
      letterHeight = 0.05
      pos = (.35, -0.25)
      saveStartStop = False
      size = (.6, 0.05)
      startVal [time (s)] = .5
      styles = ['rating', 'labels45']
      ticks = (1,100)
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    SliderComponent slider_left
      forceEndRoutine = True
      granularity = 0
      labels = 'Sure','Guess'
      letterHeight = 0.05
      pos = (-.35, -0.25)
      saveStartStop = False
      size = (.6, 0.05)
      startVal [time (s)] = .5
      styles = ['rating', 'labels45']
      ticks = (-100,1)
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  Routine instructions_ltm
    TextComponent instr_text_ltm_1
      letterHeight = 0.045
      pos = (0,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will see two words on the screen. One of the words was previously displayed yesterday during this task:
    KeyboardComponent instr_resp_ltm
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instr_text_ltm_2
      letterHeight = 0.045
      pos = (0, -.3)
      startVal [time (s)] = 0.0
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      text:
        Below each word there is a confidence bar ranging from ''Guess'' to ''Sure''.
        Use your mouse to indicate which word was previously presented and your level of confidence using the bar.

        Press <space> to continue.
    TextComponent text_example_1
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = TWIG
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    TextComponent text_example_2
      letterHeight = 0.035
      pos = (0.1, .2)
      startVal [time (s)] = 0.0
      text = TWIG
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    TextComponent text_example_3
      letterHeight = 0.035
      pos = (-0.1, .2)
      startVal [time (s)] = 0.0
      text = SHEEP
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    TextComponent text_example_4
      letterHeight = 0.035
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      text = SALT
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    TextComponent text_example_5
      letterHeight = 0.035
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      text = BONE
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        shuffle(words_target);
        shuffle(words_distractor);
        document.body.style.cursor='auto';
        m = 0;
      Begin Routine:
        shuffle(targetwords)
  Routine stimuli_words
  Routine end
    TextComponent end_si_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the task.

        Please press <space> when you are ready to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rei_scale
    TextComponent rei_instructions
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Using the following scale, please rate the extent that these items refer to you.
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    TextComponent rei_1
      letterHeight = 0.03
      pos = (-.25, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        1
        Definitely true
        of myself
    TextComponent rei_2
      letterHeight = 0.03
      pos = (-.125, 0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = 2
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    TextComponent rei_3
      letterHeight = 0.03
      pos = (0, 0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = 3
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    TextComponent rei_4
      letterHeight = 0.03
      pos = (.125, .085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = 4
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    TextComponent rei_5
      letterHeight = 0.03
      pos = (.25, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        5
        Definitely not
        true of myself
    TextComponent rei_text
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every repeat] = $rei_question
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    KeyboardComponent key_resp_rei
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine setup_2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        words_delayed.append([WordsStimuli_2])
  Routine end_experiment
    TextComponent text_end_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Congratulations, you have reached the end of the experiment!

        Thank you for your time and participation.

        Please press <space> to close.
    KeyboardComponent key_resp_5
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator start loopType="TrialHandler"
    conditionsFile = stimuli/words_text_B.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'WordsStimuli': 'STAIN', 'Type': 'lure'},
      {'WordsStimuli': 'QUEEN', 'Type': 'lure'},
      {'WordsStimuli': 'JUICE', 'Type': 'lure'},
      {'WordsStimuli': 'CANDY', 'Type': 'lure'},
      {'WordsStimuli': 'BASS', 'Type': 'lure'},
      {'WordsStimuli': 'SODA', 'Type': 'lure'},
      {'WordsStimuli': 'POSTER', 'Type': 'lure'},
      {'WordsStimuli': 'WAIST', 'Type': 'lure'},
      {'WordsStimuli': 'SPEAR', 'Type': 'lure'},
      {'WordsStimuli': 'CAROL', 'Type': 'lure'},
      {'WordsStimuli': 'HEAP', 'Type': 'lure'},
      {'WordsStimuli': 'PARK', 'Type': 'lure'},
      {'WordsStimuli': 'UNCLE', 'Type': 'lure'},
      {'WordsStimuli': 'CAPE', 'Type': 'lure'},
      {'WordsStimuli': 'BOSS', 'Type': 'lure'},
      {'WordsStimuli': 'SOIL', 'Type': 'lure'},
      {'WordsStimuli': 'MIRROR', 'Type': 'lure'},
      {'WordsStimuli': 'SLAP', 'Type': 'lure'},
      {'WordsStimuli': 'KING', 'Type': 'lure'},
      {'WordsStimuli': 'FIRE', 'Type': 'lure'},
      {'WordsStimuli': 'BREAD', 'Type': 'lure'},
      {'WordsStimuli': 'TUNNEL', 'Type': 'lure'},
      {'WordsStimuli': 'HAIR', 'Type': 'lure'},
      {'WordsStimuli': 'BIRCH', 'Type': 'lure'},
      {'WordsStimuli': 'CAGE', 'Type': 'lure'},
      {'WordsStimuli': 'HOTEL', 'Type': 'lure'},
      {'WordsStimuli': 'SACK', 'Type': 'lure'},
      {'WordsStimuli': 'GRAPE', 'Type': 'lure'},
      {'WordsStimuli': 'FLAME', 'Type': 'lure'},
      {'WordsStimuli': 'CEREAL', 'Type': 'lure'},
      {'WordsStimuli': 'TROUT', 'Type': 'lure'},
      {'WordsStimuli': 'DIAL', 'Type': 'lure'},
      {'WordsStimuli': 'SCALE', 'Type': 'lure'},
      {'WordsStimuli': 'MARKET', 'Type': 'lure'},
      {'WordsStimuli': 'BEACH', 'Type': 'lure'},
      {'WordsStimuli': 'DRIVER', 'Type': 'lure'}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
    Routine setup
  LoopTerminator start
  LoopInitiator trials_rei loopType="TrialHandler"
    conditionsFile = stimuli/REI_scale.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('rei_question', 'I’m not that good at figuring out complicated problems')]),
      OrderedDict([('rei_question', 'I am not very good at solving problems that require careful logical analysis')]),
      OrderedDict([('rei_question', 'I am not a very analytical thinker')]),
      OrderedDict([('rei_question', 'Reasoning things out carefully is not one of my strong points')]),
      OrderedDict([('rei_question', 'I don’t reason well under pressure')]),
      OrderedDict([('rei_question', 'I am much better at figuring things out logically than most people')]),
      OrderedDict([('rei_question', 'I have a logical mind')]),
      OrderedDict([('rei_question', 'I have no problem thinking things through carefully')]),
      OrderedDict([('rei_question', 'Using logic usually works well for me in figuring out problems in my life')]),
      OrderedDict([('rei_question', 'I usually have clear, explainable reasons for my decisions')]),
      OrderedDict([('rei_question', 'I try to avoid situations that require thinking in depth about something')]),
      OrderedDict([('rei_question', 'I enjoy intellectual challenges')]),
      OrderedDict([('rei_question', 'I don’t like to have to do a lot of thinking')]),
      OrderedDict([('rei_question', 'I enjoy solving problems that require hard thinking')]),
      OrderedDict([('rei_question', 'Thinking is not my idea of an enjoyable activity')]),
      OrderedDict([('rei_question', 'I prefer complex problems to simple problems')]),
      OrderedDict([('rei_question', 'Thinking hard and for a long time about something gives me little satisfaction')])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
    Routine rei_scale
  LoopTerminator trials_rei
  Routine instructions_ltm
  LoopInitiator trial_ltm loopType="TrialHandler"
    loopType = random
    nReps = words_target.length
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    Routine recognition_test
  LoopTerminator trial_ltm
  Routine end_experiment
