PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'site': '', 'version': '3.1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = mdmw3-1
  keyboardBackend = ioHub
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Routines
  Routine parity
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(nums)
        parity_stim = nums[0]

        if parity_stim % 2 == 0:
            corr_ans_parity = "e"
        elif parity_stim % 2 == 1:
            corr_ans_parity = "o"
      End Routine:
        thisExp.addData("trial_n", trial_n)
        thisExp.addData("block_n", block_n)
        thisExp.addData("parity_n", parity_n)
        thisExp.addData("parity_stim", parity_stim)
        thisExp.addData("block_type", block_type)


        parity_n += 1
    TextComponent text_parity
      letterHeight = 0.05
      opacity [set every repeat] = parity_disp
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $parity_dur
      text [set every repeat] = $parity_stim
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    KeyboardComponent key_resp_parity
      allowedKeys = 'e','o'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_dur
      store = first key
      storeCorrect = True
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  Routine stim_present
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        word_present = trial_words[stim_n]

        words_presented.append([word_present, stim_n, trial_n, block_type])
      End Routine:
        thisExp.addData("word_presented", word_present)
        thisExp.addData("serial_position", stim_n)
        thisExp.addData("trial_n", trial_n)
        thisExp.addData("block_n", block_n)
        thisExp.addData("block_type", block_type)


        stim_n += 1
    TextComponent stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .9
      text [set every repeat] = $word_present
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  Routine exp_setup
    CodeComponent code_setup
      Code Type = Both
      Begin Experiment:
        words = []
        words_presented = []

        nums = [1,2,3,4,5,6,7,8]
        block_total = 6
        block_n = 1
        trial_n = 0
        trial_n_ltm = 0

        trial_length = 4
        i = 0

        win.mouseVisible = False
      Begin JS Experiment:
        words = [];
        words_presented = [];
        nums = [1, 2, 3, 4, 5, 6, 7, 8];
        block_total = 6;
        block_n = 1;
        trial_n = 0;
        trial_n_ltm = 0;
        trial_length = 4;
        i = 0;

        document.body.style.cursor='none';
      Begin JS Routine:
        words.push([WordsStimuli]);
      Begin Routine:
        words.append([WordsStimuli])
  Routine fixation
    PolygonComponent fix_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine end_block
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = f"You have reached the end of block {block_n} of {block_total}.\n\nPress SPACE when you are ready to continue."
      End Routine:
        block_n += 1
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine test_immediate
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("serial_position_resp", resp_i)
        thisExp.addData("trial_n", trial_n)
        thisExp.addData("block_n", block_n)
        thisExp.addData("block_type", block_type)

        resp_i += 1
    TextboxComponent immediate_test_resp
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please type all the words that you remember in the order that they were presented. Press ENTER to submit each word. If you don't remember a word, press ENTER to continue.
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  Routine mw_probe
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        What were you thinking about during this trial?

        1) The word task
        2) The number task
        3) Both tasks
        4) Task experience/performance
        5) Something else

        Select an option to continue.
    KeyboardComponent key_resp_mw_probe
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        i += trial_length
      End Routine:
        thisExp.addData("trial_n", trial_n)
        thisExp.addData("block_n", block_n)
        thisExp.addData("block_type", block_type)

        trial_n += 1
  Routine stim_present_delay
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        stim_pos = ["left", "right"]
        shuffle(stim_pos)

        target_pos = stim_pos[0]
        lure_pos = stim_pos[1]

        corr_ans_ltm = target_pos

        lure_word = words.pop()[0]

        if target_pos == "left":
            target_coord = (-.2, 0)
        elif target_pos == "right":
            target_coord = (.2, 0)

        if lure_pos == "left":
            lure_coord = (-.2, 0)
        elif lure_pos == "right":
            lure_coord = (.2, 0)
      End Routine:
        thisExp.addData("trial_n_ltm", trial_n_ltm)
        thisExp.addData("presented_word", words_presented[trial_n_ltm][0])
        thisExp.addData("presented_serial_position", words_presented[trial_n_ltm][1])
        thisExp.addData("presented_trial_n", words_presented[trial_n_ltm][2])
        thisExp.addData("presented_block_type", words_presented[trial_n_ltm][3])
        thisExp.addData("target_position", target_pos)
        thisExp.addData("lure_word", lure_word)


        trial_n_ltm += 1
    TextComponent target_text
      letterHeight = 0.05
      pos [set every repeat] = target_coord
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $words_presented[trial_n_ltm][0]
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    TextComponent lure_text
      letterHeight = 0.05
      pos [set every repeat] = lure_coord
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $lure_word
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    KeyboardComponent key_resp_ltm
      allowedKeys = 'left','right'
      correctAns = $corr_ans_ltm
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine distract_instruct
    TextComponent text_4
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the first test!

        Now you will begin the second test. During this test, you will first see a cross in the center of the screen. Again, this is your cue to get ready. You will then see a circle in the center of the screen. If the circle is green, press SPACE. If this circle is blue, do NOT press any key. A new circle will appear and you will repeat this process.


        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        block_n = 1
        block_total = 3
  Routine delay
    TextComponent text_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine trial_setup
    CodeComponent code_trial_setup
      Code Type = Auto->JS
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      Begin Routine:
        trial_words = words[i:(i+trial_length)]
        stim_n = 0
        resp_i = 0
        parity_n = 0
  Routine exp_instruct
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this experiment, you will be completing several tasks. During the first task, your job will be to remember a list of words. Sometimes, we will ask you to do a second task while you are learning the list of words.

        Before you get started, you will practice each of the tasks individually.

        Press SPACE to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_instructions_1
    TextComponent text_instructions_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let’s practice the first task.

        In this task, you will first see a cross in the center of the screen. This is your warning that the words are about to appear and you should get ready. After the cross, you will then see a single word in the center of the screen. It will then disappear and then you will see another word appear. This will repeat for four words total.

        After all the words have been presented, you will be asked to recall as many words as possible in the order they were presented. Please type one word at a time and hit ENTER to submit.

        During the practice, you will receive feedback about your performance.

        Press SPACE to start the practice.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_instructions_2
    TextComponent text_instructions_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we’ll practice the second task.

        In this task, you may see a number in the center of the screen. Your job is to decide if the number is even or odd.

        Please try to respond as quickly and accurately as possible.

        Press E if the number is even and O if the number is odd.

        During the practice, you will receive feedback about your performance.

        Press SPACE to start the practice.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_instructions_3
    TextComponent text_instructions_4
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to combine the tasks.

        On each trial, you will see a word, followed by two numbers. Again, you will decide if each number is even or odd. This will repeat four times. After you have seen all of the words, you will be asked to recall as many words as you can remember in the order they were originally presented in.

        Remember, for the number task, press E if the number is even and O if the number is odd.

        Press SPACE to start the practice.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine instructions
    TextComponent text_instructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we are going to begin the real experiment.

        Everything will be the same as in the practice. On some trials, you will just see the words and on other trials you will see the words and the numbers.

        Remember, both tasks are important! Please try to respond as quickly and accurately as possible.

        After each trial, you will be asked to indicate what you were just thinking about. It is perfectly normal to think about things that are not related to the task.

        We will give you several categories of things that people might think about during tasks like these. Please try your best to honestly assess your thoughts and choose a category that best describes your thoughts at the time when we ask.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        words_presented = []
        trial_n = 0
  Routine instructions_mw
    TextComponent text_instructions_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        When we ask you what you were just thinking about, you will press a number on your keyboard that corresponds to different options.

        Don’t worry, you don’t have to remember the options! We’ll show you the numbers and corresponding options when we ask.

        On the next screen, we’ll show you an explanation of what we mean by each option.

        Press SPACE to continue
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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  Routine mw_meaning
    TextComponent text_11
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Below are the different options and corresponding number that you will press:

        1) The word task: for thoughts about the list of words, required responses, or word task goals
        2) The number task: for thoughts about the numbers, required responses, or number task goals
        3) Both tasks: for thoughts about the words and numbers, required responses, or both task goals
        4) Task experience/performance: for thoughts
        about your performance or task difficulty
        5) Something else: for thoughts about normal events in the recent or distant past or future, your physical or emotional state, your life concerns, fantasies or thoughts disconnected from reality, thoughts about objects or task unrelated events in the room, or any thoughts not captured by the other choices

        When you are ready to begin the experiment, press SPACE.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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  Routine ltm_instruct
    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the second task!

        For the last task, you will see two words presented on the screen. One of the words will be from the first memory task and one will be a completely new word. Your job is to decide which word you saw earlier.

        If you think the left word was presented earlier, press the LEFT arrow key. If you think the right word was presented earlier, press the RIGHT arrow key.

        Press SPACE to begin.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        ltm_length = len(words_presented)
        shuffle(words_presented)
  Routine feedback_1
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        feedback_msg = f"The correct words were: {trial_words[0]}, {trial_words[1]}, {trial_words[2]}, and {trial_words[3]}\n\n\nPress SPACE to continue."
      End Routine:
        i += trial_length
    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_2
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        feedback_msg = ''

        if key_resp_parity_2.corr == 1:
            feedback_msg = "Correct!"
        elif key_resp_parity_2.corr == 0:
            feedback_msg = f"Incorrect. The correct response was {corr_ans_parity}."

        feedback_msg += "\n\n\nPress SPACE to continue."
    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_12
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment.

        Thank you again for your participation!

        Press SPACE to exit.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine go_nogo_trial
    PolygonComponent distract_stim
      fillColor [set every repeat] = $stim_color
      lineColor [set every repeat] = $stim_color
      saveStartStop = False
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_distract
      allowedKeys = 'space'
      correctAns = $distract_corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine distract_mw
    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
      End JS Routine:
        document.body.style.cursor='none';
      End Routine:
        win.mouseVisible = False
    TextComponent text_13
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During the previous trials, how much of the time were you thinking about something other than the task?

        Press SPACE to submit your answer.
    SliderComponent resp_distract_mw
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("1\nNone of the time", "10\nAll of the time")
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine continue_trial
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_immediate_practice
    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        resp_i += 1
    TextboxComponent immediate_test_resp_2
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_17
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_14
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please type all the words that you remember in the order that they were presented. Press ENTER to submit each word. If you don't remember a word, press ENTER to continue.
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  Routine stim_present_practice
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        word_present = trial_words[stim_n]

        words_presented.append([word_present, stim_n, trial_n])
      End Routine:
        stim_n += 1
    TextComponent stim_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .9
      text [set every repeat] = $word_present
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  Routine parity_practice
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(nums)
        parity_stim = nums[0]

        if parity_stim % 2 == 0:
            corr_ans_parity = "e"
        elif parity_stim % 2 == 1:
            corr_ans_parity = "o"
      End Routine:
        parity_n += 1
    TextComponent text_parity_2
      letterHeight = 0.05
      opacity [set every repeat] = parity_disp
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $parity_dur
      text [set every repeat] = $parity_stim
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    KeyboardComponent key_resp_parity_2
      allowedKeys = 'e','o'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_dur
      store = first key
      storeCorrect = True
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  Routine mw_q_instruct
    TextComponent text_15
      letterHeight = 0.03
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        Congratulations, you have finished the last test!

        We have a few final questions and then you are finished.

        Now we will present a collection of statements about your everyday experience. Using the 1-6 scale below, please indicate how frequently or infrequently you currently have each experience. Please answer according to what really reflects your experience rather than what you think your experience should be. Please treat each item separately from every other item.
    TextComponent text_number_2
      letterHeight = .06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1       2        3        4          5       6
      wrapWidth = 500
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    TextComponent text_text_2
      letterHeight = 0.03
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 500
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      text:
          Almost         Very        Somewhat     Somewhat           Very          Almost
         always     frequently    frequently     infrequently    infrequently    never
    TextComponent mw_q_continue_2
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine mw_questions
    TextComponent mw_q_text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_number
      letterHeight = .06
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1       2        3        4          5      6
      wrapWidth = 500
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    TextComponent text_text
      letterHeight = 0.03
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 500
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      text:
          Almost         Very        Somewhat     Somewhat           Very          Almost
         always     frequently    frequently     infrequently    infrequently    never
    SliderComponent slider_maas
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1,2,3,4,5,6)
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent text_16
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press SPACE to submit.
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    CodeComponent code_16
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
  Routine distract_remind
    TextComponent text_17
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember:
        GREEN circle = Press SPACE
        BLUE circle = Do NOT press

        Press SPACE to continue.
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator setup_loop loopType="TrialHandler"
    conditionsFile = words_text.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordsStimuli', 'STAIN')]),
      OrderedDict([('WordsStimuli', 'QUEEN')]),
      OrderedDict([('WordsStimuli', 'JUICE')]),
      OrderedDict([('WordsStimuli', 'CANDY')]),
      OrderedDict([('WordsStimuli', 'BASS')]),
      OrderedDict([('WordsStimuli', 'SODA')]),
      OrderedDict([('WordsStimuli', 'POSTER')]),
      OrderedDict([('WordsStimuli', 'WAIST')]),
      OrderedDict([('WordsStimuli', 'SPEAR')]),
      OrderedDict([('WordsStimuli', 'CAROL')]),
      OrderedDict([('WordsStimuli', 'HEAP')]),
      OrderedDict([('WordsStimuli', 'PARK')]),
      OrderedDict([('WordsStimuli', 'UNCLE')]),
      OrderedDict([('WordsStimuli', 'CAPE')]),
      OrderedDict([('WordsStimuli', 'BOSS')]),
      OrderedDict([('WordsStimuli', 'SOIL')]),
      OrderedDict([('WordsStimuli', 'MIRROR')]),
      OrderedDict([('WordsStimuli', 'SLAP')]),
      OrderedDict([('WordsStimuli', 'KING')]),
      OrderedDict([('WordsStimuli', 'FIRE')]),
      OrderedDict([('WordsStimuli', 'BREAD')]),
      OrderedDict([('WordsStimuli', 'TUNNEL')]),
      OrderedDict([('WordsStimuli', 'HAIR')]),
      OrderedDict([('WordsStimuli', 'BIRCH')]),
      OrderedDict([('WordsStimuli', 'CAGE')]),
      OrderedDict([('WordsStimuli', 'HOTEL')]),
      OrderedDict([('WordsStimuli', 'SACK')]),
      OrderedDict([('WordsStimuli', 'GRAPE')]),
      OrderedDict([('WordsStimuli', 'FLAME')]),
      OrderedDict([('WordsStimuli', 'CEREAL')]),
      OrderedDict([('WordsStimuli', 'TROUT')]),
      OrderedDict([('WordsStimuli', 'DIAL')]),
      OrderedDict([('WordsStimuli', 'SCALE')]),
      OrderedDict([('WordsStimuli', 'MARKET')]),
      OrderedDict([('WordsStimuli', 'BEACH')]),
      OrderedDict([('WordsStimuli', 'DRIVER')]),
      OrderedDict([('WordsStimuli', 'SLUSH')])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
    Routine exp_setup
  LoopTerminator setup_loop
  Routine exp_instruct
  Routine practice_instructions_1
  LoopInitiator practice_1 loopType="TrialHandler"
    conditionsFile = practice_1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block_type', 'simple'), ('parity_dur', 0.0), ('parity_disp', 0), ('mw_dur', False)]),
      OrderedDict([('block_type', 'slow'), ('parity_dur', 1.65), ('parity_disp', 0), ('mw_dur', False)])]
    Routine trial_setup
    Routine fixation
    LoopInitiator practice_1_present loopType="TrialHandler"
      loopType = random
      nReps = trial_length
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      Routine stim_present_practice
    LoopTerminator practice_1_present
    LoopInitiator practice_test_1 loopType="TrialHandler"
      loopType = random
      nReps = trial_length
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      Routine test_immediate_practice
    LoopTerminator practice_test_1
    Routine feedback_1
  LoopTerminator practice_1
  Routine practice_instructions_2
  LoopInitiator practice_2 loopType="TrialHandler"
    conditions = [OrderedDict([('parity_dur', 1.65), ('parity_disp', 1)])]
    conditionsFile = practice_2.csv
    loopType = random
    nReps = 4
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    Routine parity_practice
    Routine feedback_2
  LoopTerminator practice_2
  Routine practice_instructions_3
  LoopInitiator practice_3 loopType="TrialHandler"
    conditions = [OrderedDict([('block_type', 'complex'), ('parity_dur', 1.65), ('parity_disp', 1), ('mw_dur', True)])]
    conditionsFile = practice_3.csv
    loopType = random
    nReps = 2
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    Routine trial_setup
    Routine fixation
    LoopInitiator stim_presentation_practice loopType="TrialHandler"
      loopType = random
      nReps = trial_length
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      Routine stim_present_practice
      LoopInitiator practice_parity loopType="TrialHandler"
        loopType = random
        nReps = 2
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        Routine parity_practice
      LoopTerminator practice_parity
    LoopTerminator stim_presentation_practice
    LoopInitiator practice_test_2 loopType="TrialHandler"
      loopType = random
      nReps = trial_length
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      Routine test_immediate_practice
    LoopTerminator practice_test_2
    Routine feedback_1
  LoopTerminator practice_3
  Routine instructions
  Routine instructions_mw
  Routine mw_meaning
  LoopInitiator block_immediate loopType="TrialHandler"
    conditionsFile = block_conds.csv
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('block_type', 'simple'), ('parity_dur', 0.0), ('parity_disp', 0)]),
      OrderedDict([('block_type', 'complex'), ('parity_dur', 1.65), ('parity_disp', 1)]),
      OrderedDict([('block_type', 'slow'), ('parity_dur', 1.65), ('parity_disp', 0)])]
    LoopInitiator trials_immediate loopType="TrialHandler"
      loopType = random
      nReps = 7
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      Routine trial_setup
      Routine fixation
      LoopInitiator stim_presentation_loop loopType="TrialHandler"
        loopType = random
        nReps = trial_length
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        Routine stim_present
        LoopInitiator parity_loop loopType="TrialHandler"
          loopType = random
          nReps = 2
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          Routine parity
        LoopTerminator parity_loop
      LoopTerminator stim_presentation_loop
      LoopInitiator test_immediate_loop loopType="TrialHandler"
        loopType = random
        nReps = trial_length
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        Routine test_immediate
      LoopTerminator test_immediate_loop
      Routine mw_probe
    LoopTerminator trials_immediate
    Routine end_block
  LoopTerminator block_immediate
  Routine distract_instruct
  LoopInitiator block_distract loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine distract_remind
    Routine fixation
    LoopInitiator trials_nogo loopType="TrialHandler"
      conditionsFile = distract_conds.csv
      loopType = random
      nReps = 15
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      conditions:
        [OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'go'), ('stim_color', 'green'), ('distract_corr_ans', 'space')]),
        OrderedDict([('trial_type', 'nogo'), ('stim_color', 'blue'), ('distract_corr_ans', 'None')])]
      Routine go_nogo_trial
    LoopTerminator trials_nogo
    Routine distract_mw
    Routine end_block
  LoopTerminator block_distract
  Routine ltm_instruct
  LoopInitiator trials_delay loopType="TrialHandler"
    loopType = random
    nReps = ltm_length
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    Routine fixation
    Routine stim_present_delay
    Routine continue_trial
  LoopTerminator trials_delay
  Routine mw_q_instruct
  LoopInitiator maas_trials loopType="TrialHandler"
    conditionsFile = maas.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('question', 'I\xa0could be experiencing some emotion and not be conscious of it until some time later.')]),
      OrderedDict([('question', 'I break or spill things because of carelessness or not paying attention or thinking of something else')]),
      OrderedDict([('question', 'I find it difficult to stay focused on what’s happening in the present.')]),
      OrderedDict([('question', 'I tend to walk quickly to get where I’m going without paying attention to what I experience along the way.')]),
      OrderedDict([('question', 'I\xa0tend not to notice feelings of physical tension or discomfort until they really grab my attention.')]),
      OrderedDict([('question', 'I forget a person’s name almost as soon as I’ve been told it for the first time.')]),
      OrderedDict([('question', 'It seems I am "running on automatic" without much awareness of what I’m doing.')]),
      OrderedDict([('question', 'I rush through activities without being really attentive to them.')]),
      OrderedDict([('question', 'I get so focused on the goal I want to achieve that I lose touch with what I’m doing right now to get there.')]),
      OrderedDict([('question', "I do jobs or tasks automatically without being aware of what I'm doing.")]),
      OrderedDict([('question', 'I find myself listening to someone with one ear doing something else at the same time.')]),
      OrderedDict([('question', 'I drive places on "automatic pilot" and then wonder why I went there.')]),
      OrderedDict([('question', 'I find myself preoccupied with the future or the past.')])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
    Routine mw_questions
  LoopTerminator maas_trials
  Routine end
