PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = $"https://montclair.sona-systems.com/webstudy_credit.aspx?experiment_id=435&credit_token=7a1ae312df874e648c55ee6db96189c5&survey_code="+expInfo['participant']
  Experiment info = {'participant': '', 'version': '2.4'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['exp_cond.xlsx', 'maas.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = #A9A9A9
  colorSpace = hex
  expName = MDMW2-4_MSU
  logging level = debug
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Routines
  Routine start_code
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        stim_positions = [(0,.125), (0,-.125),
        (.125,0), (-.125, 0),
        (.125,.125), (.125,-.125),
        (-.125,.125), (-.125,-.125)]

        cog_load_stim = [1,2,3,4,5,6,7,8,9]

        position_selection = [0,1,2,3]

        mask_size = [(0.025), (0.025)]

        colors = ["Crimson", "Chartreuse", "Blue",
        "Yellow", "MediumOrchid", "DarkOrange",
        "DodgerBlue", "Turquoise", "MediumVioletRed"]
        fix_time = .5
        stim_time = .5
        mask_onset = 1 # should equal (fix_time + stim_time)
        mask_time = .1
        delay_onset = 1.1 # should equal (fix_time + stim_time + mask_time)
        delay_time = .8
        block_n = 0
        corr_count = 0
        block_total = 4
    CodeComponent code_js
      Code Type = Both
      Begin Experiment:
        import random
      Begin JS Experiment:
        shuffle = util.shuffle
        asarray = function(something) {
        return something;
        }
  Routine cog_load
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        shuffle(cog_load_stim);
        if ((cognitive_load === 1)) {
            correct_ans_cogload = "NA";
        } else if (((cog_load_stim[0] % 2) === 0)) {
            correct_ans_cogload = "i";
        } else {
            correct_ans_cogload = "o";
        }

        if ((cognitive_load === 2)) {
            total_duration = 3;
            cl_stim = cog_load_stim[0];
        } else if ((cognitive_load === 4)) {
            total_duration = 1.5;
            cl_stim = cog_load_stim[0];
        } else {
            total_duration = 6;
            cl_stim = " ";
        }
      Begin Routine:
        shuffle(cog_load_stim)

        shuffle(cog_load_stim)
        if (cognitive_load == 1):
            correct_ans_cogload = "NA"
        elif (cog_load_stim[0] % 2 == 0):
            correct_ans_cogload = "i"
        else:
            correct_ans_cogload = "o"

        if (cognitive_load == 2):
            total_duration = 3
            cl_stim = cog_load_stim[0]
        elif (cognitive_load == 4):
            total_duration = 1.5
            cl_stim = cog_load_stim[0]
        else:
            total_duration = 6
            cl_stim = " "
      End JS Routine:
        psychoJS.experiment.addData("cogload_presented", cog_load_stim[0]);
        psychoJS.experiment.addData("cogload_condition", cognitive_load);
      End Routine:
        thisExp.addData('cogload_presented', cog_load_stim[0])
        thisExp.addData('cogload_condition', cognitive_load)
    TextComponent text_cogload
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .9
      text [set every repeat] = $cl_stim
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    KeyboardComponent key_resp_load
      allowedKeys = 'i','o'
      correctAns = $correct_ans_cogload
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = total_duration
      storeCorrect = True
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  Routine stimulus_presentation
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(stim_positions)
        shuffle(colors)
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix_time
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    PolygonComponent stim1
      fillColor [set every repeat] = $colors[0]
      lineColor [set every repeat] = $colors[0]
      pos [set every repeat] = stim_positions[0]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent stim2
      fillColor [set every repeat] = $colors[1]
      lineColor [set every repeat] = $colors[1]
      pos [set every repeat] = stim_positions[1]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent stim3
      fillColor [set every repeat] = $colors[2]
      lineColor [set every repeat] = $colors[2]
      pos [set every repeat] = stim_positions[2]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent stim4
      fillColor [set every repeat] = $colors[3]
      lineColor [set every repeat] = $colors[3]
      pos [set every repeat] = stim_positions[3]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent mask1_1
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[0][0]-.0125, stim_positions[0][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask1_2
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[0][0]+.0125, stim_positions[0][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask1_3
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[0][0]+.0125, stim_positions[0][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask1_4
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[0][0]-.0125, stim_positions[0][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2_1
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[1][0]-.0125, stim_positions[1][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2_2
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[1][0]+.0125, stim_positions[1][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2_3
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[1][0]+.0125, stim_positions[1][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2_4
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[1][0]-.0125, stim_positions[1][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3_1
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[2][0]-.0125, stim_positions[2][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3_2
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[2][0]+.0125, stim_positions[2][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3_3
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[2][0]+.0125, stim_positions[2][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3_4
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[2][0]-.0125, stim_positions[2][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4_1
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[3][0]-.0125, stim_positions[3][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4_2
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[3][0]+.0125, stim_positions[3][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4_3
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[3][0]+.0125, stim_positions[3][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4_4
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[3][0]-.0125, stim_positions[3][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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  Routine stimulus_response
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        shuffle(position_selection);
        if ((change_cond === "same")) {
            resp_position = stim_positions[position_selection[0]];
            resp_color = colors[position_selection[0]];
            correct_ans_wm = "s";
        } else {
            resp_position = stim_positions[position_selection[0]];
            resp_color = colors[5];
            correct_ans_wm = "d";
        }
      Begin Routine:
        shuffle(position_selection)

        if (change_cond == "same"):
            resp_position = stim_positions[position_selection[0]]
            resp_color = colors[position_selection[0]]
            correct_ans_wm = "s"
        else:
            resp_position = stim_positions[position_selection[0]]
            resp_color = colors[5]
            correct_ans_wm = "d"
    PolygonComponent resp1
      fillColor [set every repeat] = $resp_color
      lineColor [set every repeat] = $resp_color
      pos [set every repeat] = resp_position
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 180
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    KeyboardComponent key_resp_stimulus
      allowedKeys = 's','d'
      correctAns = $correct_ans_wm
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      storeCorrect = True
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  Routine mw_probe
    TextComponent mw_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        What were you just thinking about?

        1) The task
        2) Task experience/performance
        3) Everyday things
        4) Current state of being
        5) Personal worries
        6) Daydreams
        7) External environment
        8) Other

        Select an option to continue.
    KeyboardComponent key_resp_mw
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine instructions
    TextComponent text_instructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we are going to begin the real experiment.

        Everything will be the same as in the practice.

        After each trial you will be asked to indicate what you were just thinking about. It is perfectly normal to think about things that are not related to the task.

        We will give you several categories of things that people might think about during tasks like these. Please try your best to honestly assess your thoughts and choose a category that best describes your thoughts at the time when we ask.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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  Routine end
    TextComponent text_end
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment.

        Thank you for participating!

        Press SPACE to end.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_block
    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        msg='no message'
        block_message = 'no message'
      Begin JS Experiment:
        msg = "no message!";
        block_message = 'no message';
      Begin JS Routine:
        msg = "You got " + corr_count + " trials correct!";

        if ((block_n === 0)) {
            block_message = "You have reached the end of the practice.";
        } else {
            block_message = "You have reached the end of block " + block_n + " of " + block_total;
        }
      Begin Routine:
        msg = "You got %i trials correct!" %(corr_count)

        if (block_n == 0):
            block_message = "You have reached the end of the practice."
        else:
            block_message = "You have reached the end of block %i of %i." %(block_n, block_total)
      End JS Routine:
        block_n = (block_n + 1);
      End Routine:
        block_n = block_n + 1
    TextComponent text_block_end
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -.25)
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to begin again.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_presentation
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(stim_positions)
        shuffle(colors)
    PolygonComponent fixation_2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix_time
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    PolygonComponent stim1_2
      fillColor [set every repeat] = $colors[0]
      lineColor [set every repeat] = $colors[0]
      pos [set every repeat] = stim_positions[0]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent stim2_2
      fillColor [set every repeat] = $colors[1]
      lineColor [set every repeat] = $colors[1]
      pos [set every repeat] = stim_positions[1]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent stim3_2
      fillColor [set every repeat] = $colors[2]
      lineColor [set every repeat] = $colors[2]
      pos [set every repeat] = stim_positions[2]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent stim4_2
      fillColor [set every repeat] = $colors[3]
      lineColor [set every repeat] = $colors[3]
      pos [set every repeat] = stim_positions[3]
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = fix_time
      stopVal [duration (s)] = stim_time
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    PolygonComponent mask1
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[0][0]-.0125, stim_positions[0][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask1_5
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[0][0]+.0125, stim_positions[0][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask1_6
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[0][0]+.0125, stim_positions[0][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask1_7
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[0][0]-.0125, stim_positions[0][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[1][0]-.0125, stim_positions[1][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2_5
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[1][0]+.0125, stim_positions[1][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2_6
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[1][0]+.0125, stim_positions[1][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask2_7
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[1][0]-.0125, stim_positions[1][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[2][0]-.0125, stim_positions[2][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3_5
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[2][0]+.0125, stim_positions[2][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3_6
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[2][0]+.0125, stim_positions[2][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask3_7
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[2][0]-.0125, stim_positions[2][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4
      fillColor [set every repeat] = $colors[5]
      lineColor [set every repeat] = $colors[5]
      pos [set every repeat] = (stim_positions[3][0]-.0125, stim_positions[3][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4_5
      fillColor [set every repeat] = $colors[6]
      lineColor [set every repeat] = $colors[6]
      pos [set every repeat] = (stim_positions[3][0]+.0125, stim_positions[3][1]-.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4_6
      fillColor [set every repeat] = $colors[7]
      lineColor [set every repeat] = $colors[7]
      pos [set every repeat] = (stim_positions[3][0]+.0125, stim_positions[3][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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    PolygonComponent mask4_7
      fillColor [set every repeat] = $colors[8]
      lineColor [set every repeat] = $colors[8]
      pos [set every repeat] = (stim_positions[3][0]-.0125, stim_positions[3][1]+.0125)
      saveStartStop = False
      shape = rectangle
      size = (mask_size[0], mask_size[1])
      startVal [time (s)] = mask_onset
      stopVal [duration (s)] = mask_time
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  Routine practice_instructions1
    TextComponent text_instructions_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let’s practice the first task.
        In this task, you will first see a group colored squares, followed by a group of jumbled squares that will replace the original colored squares.

        After a brief delay, you will see one square in the same location as one of the previously presented squares. Your job is to determine if this square is the same color as the original square.

        Press S if it is the same color and D if it is a different color.

        During the practice, you will receive feedback about your performance.

        Press SPACE to start the practice.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine feedback_presentation
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'no message'
      Begin Routine:
        if not key_resp_prac.keys :
            msg="Failed to respond"
        elif correct_ans_wm == key_resp_prac.keys:#stored on last run routine
            msg="Correct! Press SPACE to continue."
            corr_count = corr_count + 1
        else:
            msg="Oops! That was wrong. Press SPACE to continue."
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_response_presentation
    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        shuffle(position_selection);
        if ((change_cond === "same")) {
            resp_position = stim_positions[position_selection[0]];
            resp_color = colors[position_selection[0]];
            correct_ans_wm = "s";
        } else {
            resp_position = stim_positions[position_selection[0]];
            resp_color = colors[5];
            correct_ans_wm = "d";
        }
      Begin Routine:
        shuffle(position_selection)

        if (change_cond == "same"):
            resp_position = stim_positions[position_selection[0]]
            resp_color = colors[position_selection[0]]
            correct_ans_wm = "s"
        else:
            resp_position = stim_positions[position_selection[0]]
            resp_color = colors[5]
            correct_ans_wm = "d"
    PolygonComponent resp1_2
      fillColor [set every repeat] = $resp_color
      lineColor [set every repeat] = $resp_color
      pos [set every repeat] = resp_position
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_prac
      allowedKeys = 's','d'
      correctAns = $correct_ans_wm
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine practice_instructions2
    TextComponent text_instructions_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we’ll practice the second task.
        In this task, you may see a number in the center of the screen.

        Your job is to decide if it is even or odd.

        Please try to respond as quickly and accurately as possible.

        Press I if the number is even and O if the number is odd.

        On some trials, you will not see a number. Do not press any keys.

        During the practice, you will receive feedback about your performance.

        Press SPACE to start the practice.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_cog_load
    CodeComponent code_10
      Code Type = Both
      Begin JS Routine:
        shuffle(cog_load_stim);
        if ((cognitive_load === 1)) {
            correct_ans_cogload = "NA";
        } else if (((cog_load_stim[0] % 2) === 0)) {
            correct_ans_cogload = "i";
        } else {
            correct_ans_cogload = "o";
        }

        if ((cognitive_load === 2)) {
            total_duration = 3;
            cl_stim = cog_load_stim[0];
        } else if ((cognitive_load === 4)) {
            total_duration = 1.5;
            cl_stim = cog_load_stim[0];
        } else {
            total_duration = 6;
            cl_stim = " ";
        }
      Begin Routine:
        shuffle(cog_load_stim)
        if (cognitive_load == 1):
            correct_ans_cogload = "NA"
        elif (cog_load_stim[0] % 2 == 0):
            correct_ans_cogload = "i"
        else:
            correct_ans_cogload = "o"

        if (cognitive_load == 2):
            total_duration = 3
            cl_stim = cog_load_stim[0]
        elif (cognitive_load == 4):
            total_duration = 1.5
            cl_stim = cog_load_stim[0]
        else:
            total_duration = 6
            cl_stim = " "
    TextComponent text_cogload_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .9
      text [set every repeat] = $cl_stim
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    KeyboardComponent key_resp_load_prac
      allowedKeys = 'i','o'
      correctAns = $correct_ans_cogload
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = total_duration
      storeCorrect = True
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  Routine feedback_cogload
    CodeComponent code_11
      Code Type = Both
      Begin JS Routine:
        if ((key_resp_load_prac.corr === 1)) {
            msg = "Correct! Press SPACE to continue.";
        } else if ((cognitive_load === 1)) {
            msg = "No number presented. Press SPACE to continue.";
        } else {
            msg = "Oops! That was wrong or you didn't respond. Press SPACE to continue.";
        }
      Begin Routine:
        if key_resp_load_prac.corr == 1:
            msg="Correct! Press SPACE to continue."
        elif cognitive_load == 1:
            msg = "No number presented. Press SPACE to continue."
        else:
            msg = "Oops! That was wrong or you didn't respond. Press SPACE to continue."
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        block_n = 1
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you are going to begin the real experiment. You will no longer receive feedback, but please try to respond as quickly and accurately as you can. If you make a mistake, please keep going.

        After each trial, you will also be asked how much you were just thinking about the task. Please use your keyboard to respond.

        Press SPACE to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_instructions3
    TextComponent text_instructions_4
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to combine the colored square task and the number task.

        First, you will see a group colored squares, followed by a group of jumbled squares.

        You may then see a series of numbers in the center of the screen. Again, you will decide if each number is even or odd. You might see 0, 2, or 4 numbers.

        Finally, after you have seen all of the numbers, you will see a single colored square. Just like before, you have to decide if that colored square is the same color as the original square in that location.

        Remember, for the colored square task, press S if the color is the same and D if the color is different.

        For the number task, press I if the number is even and O if the number is odd.

        Press SPACE to start the practice.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        corr_count = 0
  Routine end_practice_block
    CodeComponent code_12
      Code Type = Both
      Begin Experiment:
        msg='doh!'
      Begin JS Experiment:
        msg = "doh!";
      Begin JS Routine:
        nCorr = 0
        for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++)
        {
          if ('key_resp_stimulus.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorr += psychoJS.experiment._trialsData[eachResp]['key_resp_stimulus.corr'];
          }
        }
        msg = "You got" + nCorr + "trials correct!";
      Begin Routine:
        nCorr = trials.data['key_resp_stimulus.corr'].sum() #.std(), .mean() also available
        msg = "You got %i trials correct!" %(nCorr,meanRt)
      End JS Routine:
        block_n = (block_n + 1);
      End Routine:
        block_n = block_n + 1
    TextComponent text_block_end_2
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have reached the end of block
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_n
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to begin again.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine key_reminder
    TextComponent text_remind
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember

        For the colored square task:
        S = same
        D = different

        For the even/odd task:
        I = even
        O = odd

        Press SPACE to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        corr_count = 0
  Routine mw_questions
    CodeComponent code_15
      Code Type = Both
      Each Frame:
        if (key_resp_mw_q.keys == []):
            text_mw_q_op = 0
            mw_q_text_disp = "Please select a number."
        else:
            text_mw_q_op = 1
            mw_q_text_disp = key_resp_mw_q.keys
      Each JS Frame:
        if ((key_resp_mw_q.keys === undefined)) {
            text_mw_q_op = 0;
            mw_q_text_disp = "Please select a number.";
        } else {
            text_mw_q_op = 1;
            mw_q_text_disp = key_resp_mw_q.keys;
        }
    TextComponent mw_q_text_2
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_number
      letterHeight = .06
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1       2        3        4          5      6
      wrapWidth = 500
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    TextComponent text_text
      letterHeight = 0.03
      pos = (0, .03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 500
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      text:
          Almost         Very        Somewhat     Somewhat           Very          Almost
         always     frequently    frequently     infrequently    infrequently    never
    TextComponent mw_q_text
      letterHeight = 0.06
      opacity [set every frame] = text_mw_q_op
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.2
      text [set every frame] = $mw_q_text_disp
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    KeyboardComponent key_resp_mw_q
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent mw_q_continue
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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  Routine instructions_mw
    TextComponent text_instructions_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        When we ask you what you were just thinking about, you will press a number on your keyboard that corresponds to different options.

        Don’t worry, you don’t have to remember the options! We’ll show you the numbers and corresponding options when we ask.

        On the next screen, we’ll show you an explanation of what we mean by each option.

        Press SPACE to continue
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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  Routine mw_q_instruct
    TextComponent text
      letterHeight = 0.03
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Now we will present a collection of statements about your everyday experience. Using the 1-6 scale below, please indicate how frequently or infrequently you currently have each experience. Please answer according to what really reflects your experience rather than what you think your experience should be. Please treat each item separately from every other item.  
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    TextComponent text_number_2
      letterHeight = .06
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1       2        3        4          5      6
      wrapWidth = 500
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    TextComponent text_text_2
      letterHeight = 0.03
      pos = (0, .03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 500
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      text:
          Almost         Very        Somewhat     Somewhat           Very          Almost
         always     frequently    frequently     infrequently    infrequently    never
    TextComponent mw_q_continue_2
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .25
      store = nothing
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  Routine exp_instructions
    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this experiment, you will be completing a series of memory problems where you remember colored squares while judging whether numbers are even or odd.

        You will also tell us what you were thinking about during each trial.

        Before you get started, you will practice each of the tasks individually.

        Press SPACE to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine mw_meaning
    TextComponent text_11
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Below are the different options and corresponding number that you will press:

        1) The task: for thoughts about task stimuli, required responses, or task goals
        2) Task experience/performance: for thoughts
        about your performance or task difficulty
        3) Everyday things: for thoughts about normal events in the recent or distant past or future
        4) Current state of being: for thoughts about your physical or emotional state
        5) Personal worries: for thoughts about your life concerns
        6) Daydreams: for fantasies or thoughts disconnected from reality
        7) External environment: for thoughts about objects or task unrelated events in the room
        8) Other: for any thoughts not captured by the other choices

        When you are ready to begin the experiment, press SPACE.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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  Routine delay
    TextComponent text_12
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = delay_time
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  Routine feedback_trials
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'no message'
      Begin Routine:
        if not key_resp_stimulus.keys :
            msg="Failed to respond"
        elif correct_ans_wm == key_resp_stimulus.keys:#stored on last run routine
            msg="That trial was correct! Press SPACE to continue."
        else:
            msg="Oops! That trial was incorrect. Press SPACE to continue."

        if key_resp_stimulus.corr == 1:
            corr_count = corr_count + 1
        else:
            corr_count = corr_count
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine start_code
  Routine exp_instructions
  Routine practice_instructions1
  LoopInitiator trials_practice_presentation loopType="TrialHandler"
    conditionsFile = exp_cond.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'cognitive_load': 1, 'change_cond': 'same'},
      {'cognitive_load': 2, 'change_cond': 'same'},
      {'cognitive_load': 4, 'change_cond': 'same'},
      {'cognitive_load': 1, 'change_cond': 'different'},
      {'cognitive_load': 2, 'change_cond': 'different'},
      {'cognitive_load': 4, 'change_cond': 'different'}]
    Routine practice_presentation
    Routine practice_response_presentation
    Routine feedback_presentation
  LoopTerminator trials_practice_presentation
  Routine practice_instructions2
  LoopInitiator trials_cogload_practice1 loopType="TrialHandler"
    conditionsFile = exp_cond.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'cognitive_load': 1, 'change_cond': 'same'},
      {'cognitive_load': 2, 'change_cond': 'same'},
      {'cognitive_load': 4, 'change_cond': 'same'},
      {'cognitive_load': 1, 'change_cond': 'different'},
      {'cognitive_load': 2, 'change_cond': 'different'},
      {'cognitive_load': 4, 'change_cond': 'different'}]
    Routine practice_cog_load
    Routine feedback_cogload
  LoopTerminator trials_cogload_practice1
  Routine practice_instructions3
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = exp_cond.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'cognitive_load': 1, 'change_cond': 'same'},
      {'cognitive_load': 2, 'change_cond': 'same'},
      {'cognitive_load': 4, 'change_cond': 'same'},
      {'cognitive_load': 1, 'change_cond': 'different'},
      {'cognitive_load': 2, 'change_cond': 'different'},
      {'cognitive_load': 4, 'change_cond': 'different'}]
    Routine practice_presentation
    Routine delay
    LoopInitiator trials_cogload_practice2 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = cognitive_load
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      Routine practice_cog_load
    LoopTerminator trials_cogload_practice2
    Routine practice_response_presentation
    Routine feedback_presentation
  LoopTerminator trials_practice
  Routine end_block
  Routine instructions
  Routine instructions_mw
  Routine mw_meaning
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = block_total
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    Routine key_reminder
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = exp_cond.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [{'cognitive_load': 1, 'change_cond': 'same'},
        {'cognitive_load': 2, 'change_cond': 'same'},
        {'cognitive_load': 4, 'change_cond': 'same'},
        {'cognitive_load': 1, 'change_cond': 'different'},
        {'cognitive_load': 2, 'change_cond': 'different'},
        {'cognitive_load': 4, 'change_cond': 'different'}]
      Routine stimulus_presentation
      Routine delay
      LoopInitiator trials_cogload loopType="TrialHandler"
        loopType = random
        nReps = cognitive_load
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        Routine cog_load
      LoopTerminator trials_cogload
      Routine stimulus_response
      Routine mw_probe
      Routine feedback_trials
    LoopTerminator trials
    Routine end_block
  LoopTerminator block
  Routine mw_q_instruct
  LoopInitiator trials_maas loopType="TrialHandler"
    conditionsFile = maas.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'question': 'I\xa0could be experiencing some emotion and not be conscious of it until some time later.'},
      {'question': 'I break or spill things because of carelessness, not paying attention, or thinking of something else'},
      {'question': 'I find it difficult to stay focused on what’s happening in the present.'},
      {'question': 'I tend to walk quickly to get where I’m going without paying attention to what I experience along the way.'},
      {'question': 'I\xa0tend not to notice feelings of physical tension or discomfort until they really grab my attention.'},
      {'question': 'I forget a person’s name almost as soon as I’ve been told it for the first time.'},
      {'question': 'It seems I am "running on automatic," without much awareness of what I’m doing.'},
      {'question': 'I rush through activities without being really attentive to them.'},
      {'question': 'I get so focused on the goal I want to achieve that I lose touch with what I’m doing right now to get there.'},
      {'question': "I do jobs or tasks automatically, without being aware of what I'm doing."},
      {'question': 'I find myself listening to someone with one ear, doing something else at the same time.'},
      {'question': 'I drive places on "automatic pilot" and then wonder why I went there.'},
      {'question': 'I find myself preoccupied with the future or the past.'},
      {'question': 'I\xa0find myself doing things without paying attention.'},
      {'question': 'I\xa0snack without being aware that I’m eating.'}]
    Routine mw_questions
  LoopTerminator trials_maas
  Routine end
