PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'condition': 'inperson', 'site': 'usd'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['object_stim/obj200.jpg', 'object_stim/obj199.jpg', 'object_stim/obj198.jpg', 'object_stim/obj197.jpg', 'object_stim/obj196.jpg', 'object_stim/obj195.jpg', 'object_stim/obj194.jpg', 'object_stim/obj193.jpg', 'object_stim/obj192.jpg', 'object_stim/obj191.jpg', 'object_stim/obj190.jpg', 'object_stim/obj189.jpg', 'object_stim/obj188.jpg', 'object_stim/obj187.jpg', 'object_stim/obj186.jpg', 'object_stim/obj185.jpg', 'object_stim/obj184.jpg', 'object_stim/obj183.jpg', 'object_stim/obj182.jpg', 'object_stim/obj181.jpg', 'object_stim/obj180.jpg', 'object_stim/obj179.jpg', 'object_stim/obj178.jpg', 'object_stim/obj177.jpg', 'object_stim/obj176.jpg', 'object_stim/obj175.jpg', 'object_stim/obj101.jpg', 'object_stim/obj174.jpg', 'object_stim/obj173.jpg', 'object_stim/obj172.jpg', 'object_stim/obj171.jpg', 'object_stim/obj170.jpg', 'object_stim/obj169.jpg', 'object_stim/obj168.jpg', 'object_stim/obj167.jpg', 'object_stim/obj166.jpg', 'object_stim/obj165.jpg', 'object_stim/obj164.jpg', 'object_stim/obj163.jpg', 'object_stim/obj162.jpg', 'object_stim/obj161.jpg', 'object_stim/obj160.jpg', 'object_stim/obj159.jpg', 'object_stim/obj158.jpg', 'object_stim/obj157.jpg', 'object_stim/obj156.jpg', 'object_stim/obj155.jpg', 'object_stim/obj154.jpg', 'object_stim/obj153.jpg', 'object_stim/obj152.jpg', 'object_stim/obj151.jpg', 'object_stim/obj150.jpg', 'object_stim/obj149.jpg', 'object_stim/obj148.jpg', 'object_stim/obj147.jpg', 'object_stim/obj146.jpg', 'object_stim/obj145.jpg', 'object_stim/obj144.jpg', 'object_stim/obj143.jpg', 'object_stim/obj142.jpg', 'object_stim/obj141.jpg', 'object_stim/obj140.jpg', 'object_stim/obj139.jpg', 'object_stim/obj138.jpg', 'object_stim/obj137.jpg', 'object_stim/obj136.jpg', 'object_stim/obj135.jpg', 'object_stim/obj134.jpg', 'object_stim/obj133.jpg', 'object_stim/obj132.jpg', 'object_stim/obj131.jpg', 'object_stim/obj130.jpg', 'object_stim/obj129.jpg', 'object_stim/obj128.jpg', 'object_stim/obj127.jpg', 'object_stim/obj126.jpg', 'object_stim/obj125.jpg', 'object_stim/obj124.jpg', 'object_stim/obj123.jpg', 'object_stim/obj122.jpg', 'object_stim/obj121.jpg', 'object_stim/obj120.jpg', 'object_stim/obj119.jpg', 'object_stim/obj118.jpg', 'object_stim/obj117.jpg', 'object_stim/obj116.jpg', 'object_stim/obj115.jpg', 'object_stim/obj114.jpg', 'object_stim/obj113.jpg', 'object_stim/obj112.jpg', 'object_stim/obj111.jpg', 'object_stim/obj110.jpg', 'object_stim/obj109.jpg', 'object_stim/obj108.jpg', 'object_stim/obj107.jpg', 'object_stim/obj106.jpg', 'object_stim/obj105.jpg', 'object_stim/obj104.jpg', 'object_stim/obj103.jpg', 'object_stim/obj102.jpg', 'object_stim/obj5.jpg', 'object_stim/obj6.jpg', 'object_stim/obj7.jpg', 'object_stim/obj8.jpg', 'object_stim/obj9.jpg', 'object_stim/obj10.jpg', 'object_stim/obj11.jpg', 'object_stim/obj12.jpg', 'object_stim/obj13.jpg', 'object_stim/obj14.jpg', 'object_stim/obj15.jpg', 'object_stim/obj16.jpg', 'object_stim/obj17.jpg', 'object_stim/obj18.jpg', 'object_stim/obj19.jpg', 'object_stim/obj20.jpg', 'object_stim/obj21.jpg', 'object_stim/obj22.jpg', 'object_stim/obj23.jpg', 'object_stim/obj24.jpg', 'object_stim/obj25.jpg', 'object_stim/obj26.jpg', 'object_stim/obj27.jpg', 'object_stim/obj28.jpg', 'object_stim/obj29.jpg', 'object_stim/obj30.jpg', 'object_stim/obj31.jpg', 'object_stim/obj32.jpg', 'object_stim/obj33.jpg', 'object_stim/obj34.jpg', 'object_stim/obj35.jpg', 'object_stim/obj36.jpg', 'object_stim/obj37.jpg', 'object_stim/obj38.jpg', 'object_stim/obj39.jpg', 'object_stim/obj40.jpg', 'object_stim/obj41.jpg', 'object_stim/obj42.jpg', 'object_stim/obj43.jpg', 'object_stim/obj44.jpg', 'object_stim/obj45.jpg', 'object_stim/obj46.jpg', 'object_stim/obj47.jpg', 'object_stim/obj48.jpg', 'object_stim/obj49.jpg', 'object_stim/obj50.jpg', 'object_stim/obj51.jpg', 'object_stim/obj52.jpg', 'object_stim/obj53.jpg', 'object_stim/obj54.jpg', 'object_stim/obj55.jpg', 'object_stim/obj56.jpg', 'object_stim/obj57.jpg', 'object_stim/obj58.jpg', 'object_stim/obj59.jpg', 'object_stim/obj60.jpg', 'object_stim/obj61.jpg', 'object_stim/obj62.jpg', 'object_stim/obj63.jpg', 'object_stim/obj64.jpg', 'object_stim/obj65.jpg', 'object_stim/obj66.jpg', 'object_stim/obj67.jpg', 'object_stim/obj68.jpg', 'object_stim/obj69.jpg', 'object_stim/obj70.jpg', 'object_stim/obj71.jpg', 'object_stim/obj72.jpg', 'object_stim/obj73.jpg', 'object_stim/obj74.jpg', 'object_stim/obj75.jpg', 'object_stim/obj76.jpg', 'object_stim/obj77.jpg', 'object_stim/obj78.jpg', 'object_stim/obj79.jpg', 'object_stim/obj80.jpg', 'object_stim/obj81.jpg', 'object_stim/obj82.jpg', 'object_stim/obj83.jpg', 'object_stim/obj84.jpg', 'object_stim/obj85.jpg', 'object_stim/obj86.jpg', 'object_stim/obj87.jpg', 'object_stim/obj88.jpg', 'object_stim/obj89.jpg', 'object_stim/obj90.jpg', 'object_stim/obj91.jpg', 'object_stim/obj92.jpg', 'object_stim/obj93.jpg', 'object_stim/obj94.jpg', 'object_stim/obj95.jpg', 'object_stim/obj96.jpg', 'object_stim/obj97.jpg', 'object_stim/obj98.jpg', 'object_stim/obj99.jpg', 'object_stim/obj100.jpg', 'object_stim/obj2.jpg', 'object_stim/obj3.jpg', 'object_stim/obj4.jpg', 'object_stim/obj1.jpg', 'object_stim/obj0.jpg']
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = omg2
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Both
      Before Experiment:
        import math

        def HSVtoRGB(h):
            s = 1
            v = 1
            i = math.floor(h * 6)
            f = h * 6 - i
            p = v * (1 - s)
            q = v * (1 - f * s)
            t = v * (1 - (1 - f) * s)
            if (i % 6 == 0):
                r = v
                g = t
                b = p
            elif (i % 6 == 1):
                r = q
                g = v
                b = p
            elif (i % 6 == 2):
                r = p
                g = v
                b = t
            elif (i % 6 == 3):
                r = p
                g = q
                b = v
            elif (i % 6 == 4):
                r = t
                g = p
                b = v
            elif (i % 6 == 5):
                r = v
                g = p
                b = q
            return [r, g, b]
      Before JS Experiment:
        function HSVtoRGB(h) {
            var r, g, b, i, f, p, q, t;
            s = 1;
            v = 1;
            i = Math.floor(h * 6);
            f = h * 6 - i;
            p = v * (1 - s);
            q = v * (1 - f * s);
            t = v * (1 - (1 - f) * s);
            switch (i % 6) {
                case 0: r = v, g = t, b = p; break;
                case 1: r = q, g = v, b = p; break;
                case 2: r = p, g = v, b = t; break;
                case 3: r = p, g = q, b = v; break;
                case 4: r = t, g = p, b = v; break;
                case 5: r = v, g = p, b = q; break;
            }
            return [r, g, b]
           // return {
                //r: Math.round(r * 255),
                //g: Math.round(g * 255),
                //b: Math.round(b * 255)
               // };
        }
      Begin Experiment:
        print("starting")
        from PIL import Image, ImageOps
        import math
        import colorsys
        import re


        positions = [(-.25,0),(-.25,.25),(0,.25),(.25,.25),(.25,0),(.25,-.25),(0,-.25),(-.25,-.25)]
        circle_size = (0.2, 0.2)
        dot_size = (0.05, 0.05)
        angles = list(range(1,360))
        dot_pos_resp = [0,0]
        original_imgs = [""]*540
        fix_time = .5
        stim_array_time = .75
        parity_time = 1.2
        image_size = (0.1, 0.1)
        block_n = 1
        trial_n = 1
        block_total = 1
        trial_total = 1
        memory_items = []
        points_total = 0

        i = 1
        k = 1
        for k in range(540):
            original_imgs[k] = "object_stim/obj" + str(k) + ".jpg"

        shuffle(original_imgs)

        def scalar_to_rgb(scalar):
            color_list = colorsys.hsv_to_rgb(scalar, 1, 1)
            color_list = [element * 255 for element in color_list]
            return color_list
      Begin JS Routine:
                // add-on: list(s: string): string[]
                function list(s) {
                    // if s is a string, we return a list of its characters
                    if (typeof s === 'string')
                        return s.split('');
                    else
                        // otherwise we return s:
                        return s;
                }
        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        //import * as re from 're';
        //var angles, block_n, block_total, circle_size, dot_pos_resp, dot_size, fix_time, i, image_size, k, memory_items, original_imgs, parity_time, points_total, positions, stim_array_time, trial_n, trial_total;
        positions = [[(- 0.25), 0], [(- 0.25), 0.25], [0, 0.25], [0.25, 0.25], [0.25, 0], [0.25, (- 0.25)], [0, (- 0.25)], [(- 0.25), (- 0.25)]];
        circle_size = [0.2, 0.2];
        dot_size = [0.05, 0.05];
        angles = Array.from({length: 360}, (_, i) => i + 1)
        dot_pos_resp = [0, 0];
        //original_imgs = Array(540).fill("");
        original_imgs = Array(200).fill("");
        fix_time = 0.5;
        stim_array_time = 0.75;
        parity_time = 1.2;
        image_size = [0.05, 0.05];
        block_n = 1;
        trial_n = 1;
        block_total = 4;
        wm_trial_total = 4;
        memory_items = [];
        points_total = 0;
        i = 1;
        k = 1;
        for (var k, _pj_c = 0, _pj_a = range(200), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            k = _pj_a[_pj_c];
            original_imgs[k] = ('object_stim/obj' + k.toString() + '.jpg');
        }

        function scalar_to_rgb(scalar) {
            var color_list;
            color_list = colorsys.hsv_to_rgb(scalar, 1, 1);
            color_list = function () {
            var _pj_a = [], _pj_b = color_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var element = _pj_b[_pj_c];
                _pj_a.push((element * 255));
            }
            return _pj_a;
        }
        .call(this);
            return color_list;
        }

        util.shuffle(original_imgs);
        document.body.style.cursor='none';
      Begin Routine:
        positions = [[(- 0.25), 0], [(- 0.25), 0.25], [0, 0.25], [0.25, 0.25], [0.25, 0], [0.25, (- 0.25)], [0, (- 0.25)], [(- 0.25), (- 0.25)]]
        circle_size = [0.2, 0.2]
        dot_size = [0.05, 0.05]
        angles = list(range(1,361))
        dot_pos_resp = [0, 0]
        original_imgs = [[]]*200
        fix_time = 0.5
        stim_array_time = 0.75
        parity_time = 1.2
        image_size = [0.05, 0.05]
        block_n = 1
        trial_n = 1
        block_total = 4
        wm_trial_total = 4
        memory_items = []
        points_total = 0
        i = 1
        k = 1
        for k in range(200):
            original_imgs[k] = "object_stim/obj{}.jpg".format(k)

        shuffle(original_imgs)
        win.mouseVisible = False
      End JS Routine:
        console.log("ending")
  Routine memory_array
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        util.shuffle(angles);
        util.shuffle(positions);
        trial_angles = [angles[0], angles[1], angles[2]];
        trial_positions = [positions[0], positions[1], positions[2]];
        err_total = 0;
        parity_points = 0;
        memory_points = 0;
        stim_files = [original_imgs[i], original_imgs[(i + 1)], original_imgs[(i + 2)]];
        //stim_files = ["object_stim/obj0.jpg", "object_stim/obj1.jpg", "object_stim/obj2.jpg"]

        stim_presented_wm_1 = stim_files[0].split("object_stim/")[1].split(".jpg")[0];
        stim_presented_wm_2 = stim_files[1].split("object_stim/")[1].split(".jpg")[0];
        stim_presented_wm_3 = stim_files[2].split("object_stim/")[1].split(".jpg")[0];


        color_presented_wm_1 = HSVtoRGB(trial_angles[0] / 360);
        color_presented_wm_2 = HSVtoRGB(trial_angles[1] / 360);
        color_presented_wm_3 = HSVtoRGB(trial_angles[2] / 360);

        focus_item = util.randint(0, 3);
        psychoJS.window.mouseVisible = false;
      Begin Routine:
        shuffle(angles)
        shuffle(positions)

        trial_angles = [angles[0], angles[1], angles[2]]
        trial_positions = [positions[0], positions[1], positions[2]]
        err_total = 0
        parity_points = 0
        memory_points = 0
        stim_files = [original_imgs[i], original_imgs[(i + 1)], original_imgs[(i + 2)]]

        stim_presented_wm_1 = stim_files[0].split("object_stim/")[1].split(".jpg")[0]
        stim_presented_wm_2 = stim_files[1].split("object_stim/")[1].split(".jpg")[0]
        stim_presented_wm_3 = stim_files[2].split("object_stim/")[1].split(".jpg")[0]


        color_presented_wm_1 = HSVtoRGB(trial_angles[0] / 360)
        color_presented_wm_2 = HSVtoRGB(trial_angles[1] / 360)
        color_presented_wm_3 = HSVtoRGB(trial_angles[2] / 360)

        focus_item = randint(0,3)
        win.mouseVisible = False
      End JS Routine:
        j = 0;
        parity_i = 0;
        util.shuffle(parity_nums);
      End Routine:
        j = 0
        parity_i = 0
        shuffle(parity_nums)
    PolygonComponent circle_focus_item
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[focus_item]
      saveStartStop = False
      shape = regular polygon...
      size = (.2, .2)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim1
      image [set every repeat] = $stim_files[0]
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent wm_color_1
      fillColor [set every repeat] = $color_presented_wm_1
      lineColor [set every repeat] = $color_presented_wm_1
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim2
      image [set every repeat] = $stim_files[1]
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent wm_color_2
      fillColor [set every repeat] = $color_presented_wm_2
      lineColor [set every repeat] = $color_presented_wm_2
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim3
      image [set every repeat] = $stim_files[2]
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent wm_color_3
      fillColor [set every repeat] = $color_presented_wm_3
      lineColor [set every repeat] = $color_presented_wm_3
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(fix_time+stim_array_time)
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  Routine response_2
    MouseComponent mouse_resp_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        current_pos = mouse_resp_2.setPos(positions[1])
        mouse_resp_2.getPos()

        img_gray = Image.open(original_imgs[i]).convert('L')
      Each Frame:
        mouse_x = mouse_resp_2.getPos()[0]
        mouse_y = mouse_resp_2.getPos()[1]
        adj_x = positions[1][0]
        adj_y = positions[1][1]

        mouse_x = mouse_x-(adj_x*2)
        mouse_y = mouse_y-(adj_y*2)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(positions[1][0] + ((circle_size[0] / 2) * sin(theta))),
            (positions[1][1] + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = scalar_to_rgb(curr_angle/360)
        img_color_response2 = ImageOps.colorize(stim_2, black = "black", mid = color_rgb, white = "white")
      End Routine:
        thisExp.addData('disp_angle_2', angles[1])
        thisExp.addData('resp_angle_2', curr_angle)


        err_angle_2 = (angles[1] - curr_angle + 360) % 360
        if (err_angle_2 > 180):
            err_angle_2 = 360 - err_angle_2

        thisExp.addData('err_angle_2', err_angle_2)
    PolygonComponent circle_resp_2
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[1]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every frame] = $img_color_response2
      pos [set every repeat] = positions[1]
      size = image_size
      startVal [time (s)] = 0
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    ImageComponent img_gray
      image [set every frame] = $img_gray
      pos [set every repeat] = positions[1]
      size = image_size
      startVal [time (s)] = 0
      stopVal [condition] = all(mouse_resp_2.getPos()) != all(positions[1])
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    PolygonComponent dot_resp1_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [condition] = all(err_angle_2.getPos()) != all(positions[1])
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  Routine response_memory
    MouseComponent mouse_resp
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        score = [0,0,0]
        points_total = 0
      Begin JS Experiment:
        score = [0,0,0]
        points_total = 0
      Begin JS Routine:
        mouse_resp.getPos();
        stim_presented = stim_files[j].split("object_stim/")[1].split(".jpg")[0];
        item_n = j;
        document.body.style.cursor='auto';
      Begin Routine:
        mouse_resp.getPos()

        stim_presented = stim_files[j].split('object_stim/')[1].split('.jpg')[0]

        item_n = j

        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp.getPos()[0]
        mouse_y = mouse_resp.getPos()[1]
        adj_x = trial_positions[j][0]
        adj_y = trial_positions[j][1]

        #mouse_x = mouse_x-(adj_x*2)
        #mouse_y = mouse_y-(adj_y*2)
        mouse_x = (mouse_x - adj_x)
        mouse_y = (mouse_y - adj_y)

        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(trial_positions[j][0] + ((circle_size[0] / 2) * sin(theta))),
            (trial_positions[j][1] + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = HSVtoRGB((curr_angle / 360))
      Each JS Frame:
        mouse_x = mouse_resp.getPos()[0];
        mouse_y = mouse_resp.getPos()[1];
        adj_x = trial_positions[j][0];
        adj_y = trial_positions[j][1];
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(trial_positions[j][0] + ((circle_size[0] / 2) * Math.sin(theta))), (trial_positions[j][1] + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        psychoJS.experiment.addData("disp_angle", trial_angles[j]);
        psychoJS.experiment.addData("resp_angle", curr_angle);
        psychoJS.experiment.addData("block_n", block_n);
        psychoJS.experiment.addData("trial_n", trial_n);
        psychoJS.experiment.addData("item_n", item_n);
        psychoJS.experiment.addData("focus_item", focus_item);
        psychoJS.experiment.addData("stim_presented", stim_presented);
        psychoJS.experiment.addData("stim_file", stim_files[j]);
        err_angle = (((trial_angles[j] - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }
        psychoJS.experiment.addData("err_angle", err_angle);
        if ((curr_angle === 0)) {
            memory_points = 0;
        } else {
            if ((err_angle <= 90)) {
                memory_points = (20 - Math.round((err_angle / 10)));
            } else {
                memory_points = 0;
            }
        }
        if ((focus_item === j)) {
            memory_points = (memory_points * 2);
            central_item = 1;
        } else {
            central_item = 0;
        }
        points_total = (points_total + memory_points);
        score[j] = memory_points;
        psychoJS.experiment.addData("points", memory_points);
        psychoJS.experiment.addData("central_item", central_item);
        psychoJS.window.mouseVisible = false;
        memory_items.push([stim_files[j], trial_angles[j], central_item, delay_1]);

        j = (j + 1);
      End Routine:
        thisExp.addData('disp_angle', trial_angles[j])
        thisExp.addData('resp_angle', curr_angle)
        thisExp.addData('block_n', block_n)
        thisExp.addData('trial_n', trial_n)
        thisExp.addData('item_n', item_n)
        thisExp.addData('focus_item', focus_item)
        thisExp.addData('stim_presented', stim_presented)
        thisExp.addData('stim_file', stim_files[j])


        err_angle = (trial_angles[j] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        thisExp.addData('err_angle', err_angle)

        if (curr_angle == 0):
            memory_points = 0
        elif (err_angle <= 90):
            memory_points = (20 - round((err_angle / 10)))
        else:
            memory_points = 0

        if focus_item == j:
            points = points * 2
            central_item = 1
        else:
            central_item = 0

        points_total = points_total + memory_points
        score[j] = memory_points

        thisExp.addData('points', memory_points)
        thisExp.addData('central_item', central_item)

        win.mouseVisible = False

        memory_items.append([stim_files[j], trial_angles[j], central_item, delay_1])
        j = j+1
    PolygonComponent circle_resp
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image_1
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      size = (.1,.1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.25)
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    PolygonComponent dot_resp1
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.25)
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  Routine delay1
    PolygonComponent fixation_delay1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_1
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  Routine delay2
    PolygonComponent fixation_delay2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_2
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  Routine feedback
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        points_total = (points_total + parity_points);
        new_position_y = (trial_positions[focus_item][1] - 0.05);
        new_position = [trial_positions[focus_item][0], new_position_y];
        document.body.style.cursor='none';
      Begin Routine:
        points_total = points_total + parity_points
        new_position_y = trial_positions[focus_item][1] - .05
        new_position = [trial_positions[focus_item][0], new_position_y]
        win.mouseVisible = False
      End JS Routine:
        i = (i + 3);
        trial_n = (trial_n + 1);
        parity_points = 0;
      End Routine:
        i = i+3
        trial_n = trial_n+1
        parity_points = 0
    PolygonComponent circle_focus_item_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = trial_positions[focus_item]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $points_total
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, -.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Current score:
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    TextComponent text_16
      color = black
      letterHeight = 0.03
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 1:\n" + str(score[0])
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    TextComponent text_17
      color = black
      letterHeight = 0.03
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 2:\n" + str(score[1])
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    TextComponent text_113
      color = black
      letterHeight = 0.03
      pos = (0, .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Even/odd score: " + str(parity_points)
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    TextComponent text_103
      color = red
      letterHeight = 0.03
      pos [set every repeat] = new_position
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Bonus!
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    TextComponent text_15
      color = black
      letterHeight = 0.03
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 3:\n" + str(score[2])
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  Routine parity
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        parity_nums = [1,2,3,4,5,6,7,8]

        parity_points = 0
        parity_points_total = 0
      Begin Routine:
        num_presented = parity_nums[parity_i]

        if num_presented%2 == 0:
            corr_ans_parity = "a"
        else:
            corr_ans_parity = "s"
      End Routine:
        parity_i = parity_i+1
        thisExp.addData('parity_i', parity_i)
        thisExp.addData('num_presented', num_presented)
        thisExp.addData('trial_n', trial_n)

        if corr_ans_parity == parity_resp.keys:
            parity_points_trial = 1
        else:
            parity_points_trial = 0


        parity_points = parity_points + parity_points_trial
        parity_points_total = parity_points_total + parity_points
    TextComponent text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      text [set every repeat] = $num_presented
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    KeyboardComponent parity_resp
      allowedKeys = 'a','s'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      storeCorrect = True
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  Routine practice_parity1
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        parity_nums = [1,2,3,4,5,6,7,8]
      Begin Routine:
        num_presented = parity_nums[parity_i]

        if num_presented%2 == 0:
            corr_ans_parity = "a"
        else:
            corr_ans_parity = "s"
      End Routine:
        parity_i = parity_i+1

        if corr_ans_parity == parity_resp_2.keys:
            msg = "Correct!"
        elif parity_resp_2.keys == []:
            msg = "No key pressed.\n\nRemember press 'A' if even and 'S' if odd."
        else:
            msg = "Incorrect\n\nRemember press 'A' if even and 'S' if odd."
    TextComponent text_5
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      text [set every repeat] = $num_presented
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    KeyboardComponent parity_resp_2
      allowedKeys = 'a','s'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      store = nothing
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  Routine practice_parity_feedback
    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_1
    TextComponent text_11
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's practice the first task. For this task, you will see several colored objects. Your job is to remember to color of these objects.

        First, a small cross will appear in the center of the screen. This is your warning that the objects are coming and that you should pay attention. If you direct your eyes to the center of the screen you will see the objects better as they flash on the screen very quickly.

        After you have seen the objects, you will be asked to report the color of each object you saw previously. Like before, you will use the mouse to adjust the color of the object until it is the same color as you remember seeing earlier.

        Please only click the mouse when you are ready to submit your response. You will repeat this procedure for all three objects.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent code_12
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
  Routine instructions_2
    TextComponent text_12
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great, let's do some more practice!

        During this task, you will see a number in the center of the screen. Your job is to decide if the number is even or odd.

        Press 'A' if the number is even and 'S' if the number is odd.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine instructions_3
    TextComponent text_13
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to combine tasks.

        During the next part of the practice, you will do both tasks that you just practiced. First, you will see the colored objects. Then you will see the numbers and indicate if they are even or odd. Finally, you will report the color of each object using the mouse.

        Remember, press 'A' if the number is even and 'S' if the number is odd.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine practice_end
    TextComponent text_14
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great, you have finished the practice trials!

        Press SPACE to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        points_total = 0
        memory_items = []
  Routine end_block
    CodeComponent code_13
      Code Type = Both
      Begin Experiment:
        msg='no message'
        block_message = 'no message'
      Begin JS Experiment:
        msg = "no message!";
        block_message = 'no message';
      Begin JS Routine:
        block_message = "You have reached the end of block " + block_n + " of " + block_total;
      Begin Routine:
        block_message = "You have reached the end of block %i of %i." %(block_n, block_total)
      End JS Routine:
        block_n = (block_n + 1);
      End Routine:
        block_n = block_n + 1
    TextComponent text_block_end
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to begin again.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine remind
    TextComponent text_18
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, press 'A' if even, 'S' if odd.

        Press SPACE to begin.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine end_task
    TextComponent text_20
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished this part of the experiment.

        Press SPACE when you're ready to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_ltm
    CodeComponent code_14
      Code Type = Both
      Begin JS Routine:
        util.shuffle(memory_items);
        i = 0;
        ltm_trials_nreps = memory_items.length;
      Begin Routine:
        shuffle(memory_items)

        i = 0

        ltm_trials_nreps = len(memory_items)
    TextComponent text_21
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to do another memory test. During this part of the experiment, you will first be presented with a single object in the center of the screen. You previously saw this object during an earlier part of the experiment. Like before, your job is to use the mouse to adjust the color of the object until it matches what you saw earlier. You will do this for all of the earlier objects.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine instructions_experiment
    TextComponent text_22
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will complete several different tasks. You will first practice the tasks before starting the experimental trials.

        Please read all instructions carefully throughout the experiment.

        Press SPACE to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine resource_setup
    CodeComponent load_resources
      Code Type = JS
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      Begin JS Experiment:
        var loadJS = function(url, implementationCode, location){
            //url is URL of external file, implementationCode is the code
            //to be called from the file, location is the location to
            //insert the <script> element
            var scriptTag = document.createElement('script');
            scriptTag.src = url;
            scriptTag.onload = implementationCode;
            scriptTag.onreadystatechange = implementationCode;
            location.appendChild(scriptTag);
        };
        var finishedFn = function(){
            console.log('External JS resource loaded');
        }
        loadJS('https://unpkg.com/mathjs/dist/math.min.js', finishedFn, document.body);
  Routine practice_memory_array_1
    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        util.shuffle(angles);
        util.shuffle(positions);
        trial_angles = [angles[0], angles[1], angles[2]];
        trial_positions = [positions[0], positions[1], positions[2]];

        err_total = 0;

        stim_files = [original_imgs[i], original_imgs[(i + 1)], original_imgs[(i + 2)]];
        //stim_files = ["object_stim/obj0.jpg", "object_stim/obj1.jpg", "object_stim/obj2.jpg"]

        stim_presented_wm_1 = stim_files[0].split("object_stim/")[1].split(".jpg")[0];
        stim_presented_wm_2 = stim_files[1].split("object_stim/")[1].split(".jpg")[0];
        stim_presented_wm_3 = stim_files[2].split("object_stim/")[1].split(".jpg")[0];


        color_presented_wm = [HSVtoRGB(trial_angles[0] / 360), HSVtoRGB(trial_angles[1] / 360), HSVtoRGB(trial_angles[2] / 360)];
      Begin Routine:
        shuffle(angles)
        shuffle(positions)

        trial_angles = [angles[0], angles[1], angles[2]]
        trial_positions = [positions[0], positions[1], positions[2]]

        err_total = 0

        stim_files = [original_imgs[i], original_imgs[(i + 1)], original_imgs[(i + 2)]]

        stim_presented_wm_1 = stim_files[0].split("object_stim/")[1].split(".jpg")[0]
        stim_presented_wm_2 = stim_files[1].split("object_stim/")[1].split(".jpg")[0]
        stim_presented_wm_3 = stim_files[2].split("object_stim/")[1].split(".jpg")[0]


        color_presented_wm = [HSVtoRGB(trial_angles[0] / 360), HSVtoRGB(trial_angles[1] / 360), HSVtoRGB(trial_angles[2] / 360)];
      End JS Routine:
        j = 0;
        parity_i = 0;
        util.shuffle(parity_nums);
      End Routine:
        j = 0
        parity_i = 0
        shuffle(parity_nums)
    ImageComponent stim1_2
      image [set every repeat] = $stim_files[0]
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent wm_color_4
      fillColor [set every repeat] = $color_presented_wm[0]
      lineColor [set every repeat] = $color_presented_wm[0]
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    ImageComponent stim2_2
      image [set every repeat] = $stim_files[1]
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent wm_color_5
      fillColor [set every repeat] = $color_presented_wm[1]
      lineColor [set every repeat] = $color_presented_wm[1]
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    ImageComponent stim3_2
      image [set every repeat] = $stim_files[2]
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent wm_color_6
      fillColor [set every repeat] = $color_presented_wm[2]
      lineColor [set every repeat] = $color_presented_wm[2]
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent fixation_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(fix_time+1.5)
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  Routine instructions_4
    TextComponent text_25
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you will practice a few trials that will be exactly like the real trials. Everything will be the same as what you just practiced, except these trials will be faster and you will no longer receive feedback showing the original color compared to your response color.

        Additionally, you can now earn points! For each object color that you remember correctly, you will receive points. You will receive more points the closer your response is to the original color.  You will see a gray circle around one of the objects when they are first presented. If you remember this item correctly, you will receive bonus points!

        You will also receive points for the even/odd task. The more that you answer correctly, the more points you will receive.

        Remember, press 'A' if the number is even and 'S' if the number is odd. Keep your fingers on these keys so you are ready when the numbers appear.

        Both tasks are important. Please try to respond as quickly and accurately as possible.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine practice_response_memory
    MouseComponent mouse_resp_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Both
      Begin Experiment:
        score = [0,0,0]
      Begin JS Experiment:
        score = [0, 0, 0];
      Begin JS Routine:
        mouse_resp_4.getPos();
        stim_presented = stim_files[j].split("object_stim/")[1].split(".jpg")[0];
        item_n = j;
        document.body.style.cursor='auto';
      Begin Routine:
        mouse_resp_4.getPos()

        stim_presented = stim_files[j].split('object_stim/')[1].split('.jpg')[0]

        item_n = j

        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp_4.getPos()[0]
        mouse_y = mouse_resp_4.getPos()[1]
        adj_x = trial_positions[j][0]
        adj_y = trial_positions[j][1]

        #mouse_x = mouse_x-(adj_x*2)
        #mouse_y = mouse_y-(adj_y*2)
        mouse_x = (mouse_x - adj_x)
        mouse_y = (mouse_y - adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(trial_positions[j][0] + ((circle_size[0] / 2) * sin(theta))),
            (trial_positions[j][1] + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = HSVtoRGB((curr_angle / 360))
      Each JS Frame:
        mouse_x = mouse_resp_4.getPos()[0];
        mouse_y = mouse_resp_4.getPos()[1];
        adj_x = trial_positions[j][0];
        adj_y = trial_positions[j][1];
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(trial_positions[j][0] + ((circle_size[0] / 2) * Math.sin(theta))), (trial_positions[j][1] + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        err_angle = (((trial_angles[j] - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }
        if ((err_angle === 0)) {
            points = 15;
        } else {
            if ((err_angle <= 5)) {
                points = 10;
            } else {
                if ((err_angle <= 10)) {
                    points = 5;
                } else {
                    if ((err_angle <= 30)) {
                        points = 2;
                    } else {
                        points = 0;
                    }
                }
            }
        }


        points_total = (points_total + points);
        score[j] = points;

        psychoJS.window.mouseVisible = false;
      End Routine:
        err_angle = (trial_angles[j] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        if (err_angle == 0):
            points = 15
        elif (err_angle <= 5):
            points = 10
        elif (err_angle <= 10):
            points = 5
        elif (err_angle <= 30):
            points = 2
        else:
            points = 0

        points_total = points_total + points
        score[j] = points

        win.mouseVisible = False
    PolygonComponent circle_resp_8
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      size = (.1,.1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color_10
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity [set every frame] = .5
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.25)
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    PolygonComponent dot_resp1_8
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.25)
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  Routine practice_feedback
    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        original_dot_pos = [(-.25 + ((circle_size[0] / 2) * Math.sin(trial_angles[j]*(pi/180)))),
            (0 + ((circle_size[0] / 2) * Math.cos(trial_angles[j]*(pi/180))))]

        response_dot_pos = [(.25 + ((circle_size[0] / 2) * Math.sin(curr_angle*(pi/180)))),
            (0 + ((circle_size[0] / 2) * Math.cos(curr_angle*(pi/180))))]
        document.body.style.cursor='none';
      Begin Routine:
        original_dot_pos = [(-.25 + ((circle_size[0] / 2) * sin(trial_angles[j]*(pi/180)))),
            (0 + ((circle_size[0] / 2) * cos(trial_angles[j]*(pi/180))))]

        response_dot_pos = [(.25 + ((circle_size[0] / 2) * sin(curr_angle*(pi/180)))),
            (0 + ((circle_size[0] / 2) * cos(curr_angle*(pi/180))))]

        win.mouseVisible = False
      End JS Routine:
        i = i+3
        j = j+1
      End Routine:
        i = i+3
        j = j+1
    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent circle_resp_9
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent stim1_4
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color_11
      fillColor [set every repeat] = $color_presented_wm[j]
      lineColor [set every repeat] = $color_presented_wm[j]
      opacity [set every frame] = .5
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = 0
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    PolygonComponent dot_resp1_9
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every repeat] = original_dot_pos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = 0
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    PolygonComponent circle_resp_10
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = (.25, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent stim1_5
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = (.25, 0)
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color_12
      fillColor [set every repeat] = $color_rgb
      lineColor [set every repeat] = $color_rgb
      opacity [set every frame] = .5
      pos [set every repeat] = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = 0
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    PolygonComponent dot_resp1_10
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every repeat] = response_dot_pos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = 0
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    TextComponent text_27
      color = black
      letterHeight = 0.05
      pos = (-.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Original Color:
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    TextComponent text_28
      color = black
      letterHeight = 0.05
      pos = (.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your Response:
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  Routine ltm_response_memory
    MouseComponent mouse_resp_ltm
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Both
      Begin JS Routine:
        mouse_resp_ltm.getPos();

        err_total = 0;
        document.body.style.cursor='auto';


        //stim_presented = "object_stim/obj0.jpg"
        trial_n = i;
        console.log(memory_items)
        //stim_presented = memory_items[i][0].split('object_stim/')[1].split('.jpg')[0]
        stim_presented_ltm = memory_items[i][0]


        original_color = HSVtoRGB(memory_items[i][1]/360)
      Begin Routine:
        mouse_resp_ltm.getPos();
        err_total = 0
        trial_n = i

        #stim_presented = memory_items[i][0].split('object_stim/')[1].split('.jpg')[0]
        stim_presented_ltm = memory_items[i][0]


        original_color = HSVtoRGB(memory_items[i][1]/360)


        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp_ltm.getPos()[0]
        mouse_y = mouse_resp_ltm.getPos()[1]
        adj_x = 0
        adj_y = 0

        mouse_x = mouse_x-(adj_x*2)
        mouse_y = mouse_y-(adj_y*2)
        mouse_x = (mouse_x - adj_x)
        mouse_y = (mouse_y - adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(0 + ((circle_size[0] / 2) * sin(theta))),
            (0 + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = HSVtoRGB((curr_angle / 360))
      Each JS Frame:
        mouse_x = mouse_resp_ltm.getPos()[0];
        mouse_y = mouse_resp_ltm.getPos()[1];
        adj_x = 0;
        adj_y = 0;
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        //r = sqrt(mouse_x**2 + mouse_y**2)
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(0 + ((circle_size[0] / 2) * Math.sin(theta))), (0 + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        psychoJS.experiment.addData("disp_angle_ltm", memory_items[i][1]);
        psychoJS.experiment.addData("resp_angle_ltm", curr_angle);
        psychoJS.experiment.addData("trial_n", trial_n);
        psychoJS.experiment.addData("focus_item", memory_items[i][2]);
        psychoJS.experiment.addData("stim_presented_ltm", stim_presented_ltm);
        psychoJS.experiment.addData("stim_file", memory_items[i][0]);
        psychoJS.experiment.addData("delay_1", memory_items[i][3]);
        err_angle = (((memory_items[i][1] - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }
        psychoJS.experiment.addData("err_angle_ltm", err_angle);
        if ((err_angle === 0)) {
            points = 15;
        } else {
            if ((err_angle <= 5)) {
                points = 10;
            } else {
                if ((err_angle <= 10)) {
                    points = 5;
                } else {
                    if ((err_angle <= 30)) {
                        points = 2;
                    } else {
                        points = 0;
                    }
                }
            }
        }
        points_total = (points_total + points);
        psychoJS.experiment.addData("points", points);
        psychoJS.experiment.addData("central_item", memory_items[i][2]);
        psychoJS.window.mouseVisible = false;
        i = (i + 1);
      End Routine:
        thisExp.addData('disp_angle_ltm', memory_items[i][1])
        thisExp.addData('resp_angle_ltm', curr_angle)
        thisExp.addData('trial_n', trial_n)
        thisExp.addData('focus_item', memory_items[i][2])
        thisExp.addData('stim_presented_ltm', stim_presented_ltm)
        thisExp.addData('stim_file', memory_items[i][0])
        thisExp.addData('delay_1', memory_items[i][3])


        err_angle = (trial_angles[0] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        thisExp.addData('err_angle_ltm', err_angle)

        if (err_angle == 0):
            points = 15
        elif (err_angle <= 5):
            points = 10
        elif (err_angle <= 10):
            points = 5
        elif (err_angle <= 30):
            points = 2
        else:
            points = 0


        points_total = points_total + points

        thisExp.addData('points', points)
        thisExp.addData('central_item', memory_items[i][2])

        win.mouseVisible = False

        i = i+1
    PolygonComponent circle_resp_11
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = $fix_time
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    ImageComponent ltm_stim_response
      image [set every repeat] = $stim_presented_ltm
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
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    PolygonComponent ltm_color_response
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity [set every frame] = .5
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.25)
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    PolygonComponent dot_resp1_11
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.25)
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    PolygonComponent fixation_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Current score: " + str(points)
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  Routine end
    TextComponent text_33
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment!

        Thank you so much for your participation.

        After this screen, you will exit the experiment.

        Press SPACE to finish.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wm_instruct
    TextComponent text_63
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you are going to do the real task. Remember, your job is to remember the color of these objects.

        Like before, you will do the even/odd task after seeing the objects. Remember, press A if the number is even and S if the number is odd.

        Both tasks are important. Please try to respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        block_n = 1
        trial_n = 1
  Routine distractor_trial
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = $distract_onset
      stopVal [duration (s)] = 1.25
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    KeyboardComponent key_resp_distract
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = $distract_onset
      stopVal [duration (s)] = 1.25
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  Routine distractor_feedback
    CodeComponent code_10
      Code Type = Both
      Begin JS Routine:
        distractor_feedback = "You didn't respond in time.";
        if ((typeof(key_resp_distract.rt) === "number")) {
            distractor_feedback = (Math.round((key_resp_distract.rt * 1000)).toString() + " milliseconds!");
        }
      Begin Routine:
        distractor_feedback = "You didn't respond in time."

        if not isinstance(key_resp_distract.rt, list):
            distractor_feedback = str(round(key_resp_distract.rt*1000)) + " milliseconds!"
    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = You responded in:
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $distractor_feedback
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  Routine instructions_distract
    TextComponent text_23
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now it's time for another task.

        During this task, you will see black square appear in the center of the screen. As soon as you see the black square appear, press SPACE as quickly as possible.

        After each trial, we'll tell you how quickly you responded.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine instructions_experiment
  Routine instructions_1
  LoopInitiator practice_1 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine practice_memory_array_1
    LoopInitiator practice_response_memory1 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_response_memory
      Routine practice_feedback
    LoopTerminator practice_response_memory1
  LoopTerminator practice_1
  Routine instructions_2
  LoopInitiator practice_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine practice_parity1
    Routine practice_parity_feedback
  LoopTerminator practice_2
  Routine instructions_3
  LoopInitiator practice_3 loopType="TrialHandler"
    conditionsFile = delay_conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delay_1': 0, 'delay_2': 1.2},
      {'delay_1': 0.4, 'delay_2': 0.8},
      {'delay_1': 0.8, 'delay_2': 0.4},
      {'delay_1': 1.2, 'delay_2': 0}]
    Routine practice_memory_array_1
    Routine delay1
    LoopInitiator practice_parity_2 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_parity1
    LoopTerminator practice_parity_2
    Routine delay2
    LoopInitiator practice_response_memory2 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_response_memory
      Routine practice_feedback
    LoopTerminator practice_response_memory2
  LoopTerminator practice_3
  Routine instructions_4
  LoopInitiator practice_4 loopType="TrialHandler"
    conditionsFile = delay_conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delay_1': 0, 'delay_2': 1.2},
      {'delay_1': 0.4, 'delay_2': 0.8},
      {'delay_1': 0.8, 'delay_2': 0.4},
      {'delay_1': 1.2, 'delay_2': 0}]
    Routine memory_array
    Routine delay1
    LoopInitiator practice_parity_3 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine parity
    LoopTerminator practice_parity_3
    Routine delay2
    LoopInitiator practice_response_memory_3 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine response_memory
    LoopTerminator practice_response_memory_3
    Routine feedback
  LoopTerminator practice_4
  Routine practice_end
  Routine wm_instruct
  LoopInitiator wm_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = block_total
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    Routine remind
    LoopInitiator wm_trials loopType="TrialHandler"
      conditionsFile = delay_conds.xlsx
      loopType = random
      nReps = wm_trial_total
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      conditions:
        [{'delay_1': 0, 'delay_2': 1.2},
        {'delay_1': 0.4, 'delay_2': 0.8},
        {'delay_1': 0.8, 'delay_2': 0.4},
        {'delay_1': 1.2, 'delay_2': 0}]
      Routine memory_array
      Routine delay1
      LoopInitiator parity_trials loopType="TrialHandler"
        loopType = random
        nReps = 3
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        Routine parity
      LoopTerminator parity_trials
      Routine delay2
      LoopInitiator memory_trials loopType="TrialHandler"
        loopType = random
        nReps = 3
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        Routine response_memory
      LoopTerminator memory_trials
      Routine feedback
    LoopTerminator wm_trials
    Routine end_block
  LoopTerminator wm_block
  Routine end_task
  Routine instructions_distract
  LoopInitiator trials_distract loopType="TrialHandler"
    conditionsFile = distract_conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'distract_onset': 500},
      {'distract_onset': 1000},
      {'distract_onset': 1500},
      {'distract_onset': 2000},
      {'distract_onset': 2500},
      {'distract_onset': 3000}]
    Routine distractor_trial
    Routine distractor_feedback
  LoopTerminator trials_distract
  Routine end_task
  Routine instructions_ltm
  LoopInitiator trials_ltm loopType="TrialHandler"
    loopType = random
    nReps = ltm_trials_nreps
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    Routine ltm_response_memory
  LoopTerminator trials_ltm
  Routine end_task
  Routine end
