PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = $"https://montclair.sona-systems.com/webstudy_credit.aspx?experiment_id=435&credit_token=7a1ae312df874e648c55ee6db96189c5&survey_code="+expInfo['participant']
  Experiment info = {'participant': '', 'condition': 'online', 'site': 'msu'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.3254, 0.3254, 0.3254
  expName = omg3
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        stim_time = .5
        fix_time = .5
        mask_time = .5

        stim_size = 0.1

        block_n = 0
        block_total = 6
        trial_n = 1
        trial_total = 1

        win.mouseVisible = False
    CodeComponent code_js
      Code Type = JS
      Begin JS Experiment:
        document.body.style.cursor='none';
  Routine practice_instruct_1
    TextComponent text_9
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you are going to see a series of letters. Your job is to remember these letters.

        First, you will see a cross in the center of the screen. This is your warning that the letters are about to appear and you should pay attention. Next, you will see three letters appear in the center of the screen, followed by a #.

        You will then see two letters on the screen at the same time. One of these letters was in the series of letters you just saw and one is a new letter. Your job is to decide which letter you saw before. If you think you saw the letter on the LEFT, press the LEFT arrow key. If you think you saw the letter on the RIGHT, press the RIGHT arrow key.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine trial_setup
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        stim_letters = []
        letters = ["B","F","G","H","J","L","M","Q","R","T","Y"]
        stim_letter = ''

        for i in range(4):
            shuffle(letters)
            stim_letter = letters[0]
            while stim_letter in stim_letters[-3:]:
                shuffle(letters)
                stim_letter = letters[0]
            stim_letters.append(stim_letter)

        i = 0
        stim_1_color = "black"
        stim_2_color = "black"
        stim_3_color = "black"
        stim_1_point = 3
        stim_2_point = 3
        stim_3_point = 3


        if trial_type == "sp_1_red":
            stim_1_color = "red"
            stim_1_point = 25
        elif trial_type == "sp_2_red":
            stim_2_color = "red"
            stim_2_point = 25
        elif trial_type == "sp_3_red":
            stim_3_color = "red"
            stim_3_point = 25
  Routine fixation
    PolygonComponent fixation_stim
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.07, 0.07)
      startVal [time (s)] = .25
      stopVal [duration (s)] = .5
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  Routine stim_1
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        stim_1 = stim_letters[0].lower()
    TextComponent stim_1_text
      color [set every repeat] = $stim_1_color
      letterHeight [set every repeat] = .07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $stim_1
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  Routine stim_2
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        stim_2 = stim_letters[1].lower()
        i += 1
    TextComponent stim_2_text
      color [set every repeat] = $stim_2_color
      letterHeight [set every repeat] = .07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $stim_2
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  Routine stim_3
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        stim_3 = stim_letters[2].lower()
        i += 1
    TextComponent stim_3_text
      color [set every repeat] = $stim_3_color
      letterHeight [set every repeat] = .07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $stim_3
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  Routine mask
    TextComponent text_2
      color = black
      letterHeight [set every repeat] = .07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = # # # #
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  Routine test
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if test_position == "left":
            target_position = [-.1, 0]
            lure_position = [.1, 0]
        elif test_position == "right":
            target_position = [.1, 0]
            lure_position = [-.1, 0]

        corr_ans = test_position

        if serial_position_test == 0:
            trial_points = stim_1_point
        elif serial_position_test == 1:
            trial_points = stim_2_point
        elif serial_position_test == 2:
            trial_points = stim_3_point
      End Routine:
        thisExp.addData("trial_n", trial_n)
        thisExp.addData("block_n", block_n)

        trial_n += 1
    TextComponent stim_target_text
      color = black
      letterHeight [set every repeat] = .07
      pos [set every repeat] = target_position
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_letters[serial_position_test]
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    TextComponent stim_lure_text
      color = black
      letterHeight [set every repeat] = .07
      pos [set every repeat] = lure_position
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_letters[3]
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    KeyboardComponent key_resp_test
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback_practice
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_test.corr == 1:
            feedback_msg = "That was correct!"
        elif key_resp_test.corr == 0:
            feedback_msg = "That was incorrect. You should have pressed the " + str(test_position).upper() + " arrow key."
    TextComponent current_text_2
      color = black
      letterHeight = 0.05
      pos = (0, -0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_msg
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  Routine practice_end
    TextComponent text_11
      color = black
      letterHeight = .03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice! Let's begin the real trials.

        During the real trials, you can earn points! On every trial, you can earn 3 points if you are correct. You can also lose 3 points if you are incorrect.

        Somtimes you will see a RED letter. If you remember this letter correctly, you will earn 25 points. If you answer incorrectly, you will lose 25 points.

        Again, if you remember seeing the letter on the LEFT, press the LEFT arrow key. If you remember seeing the letter on the RIGHT, press the RIGHT arrow key.

        Please try to respond as fast and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        current_score = 0
        accuracy = 0
        trial_counter = 0
        accuracy_block_total = 0
        accuracy_block = 0
        accuracy_total = 0
        trial_counter_block = 0
        trial_n = 1
        block_n += 1
  Routine point_reminder
    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this block, RED letters are worth:
    TextComponent text_3
      color = red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $red_point_value
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        points.

        Press SPACE to begin.
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        current_score = 0
        current_score_text = ''
        trial_points_text = ''
        accuracy = 0
        trial_counter = 0
        accuracy_block_total = 0
        accuracy_block = 0
        accuracy_total = 0
        trial_counter_block = 0
      Begin Routine:
        if key_resp_test.corr == 1:
            current_score += trial_points
            trial_points_text = "+ " + str(trial_points)
        elif key_resp_test.corr == 0:
            current_score -= trial_points
            trial_points_text = "- " + str(trial_points)


        current_score_text = "Current score: " + str(current_score)

        accuracy += key_resp_test.corr
        accuracy_block += key_resp_test.corr
        trial_counter += 1
        trial_counter_block += 1

        accuracy_total = round((accuracy/trial_counter*100))

        total_accuracy_msg = "Total Accuracy:\n" + str(accuracy_total) + "%"
    TextComponent current_text
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $current_score_text
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    TextComponent point_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $trial_points_text
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    TextComponent text_12
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $total_accuracy_msg
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  Routine end_block
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        block_msg = ''
        block_accuracy_msg = ''
        total_accuracy_msg = ''
      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_n) + " of " + str(block_total) + ".\nYour current score is " + str(current_score) + "\nPlease take a 30 second break."

        accuracy_total = round((accuracy/trial_counter*100))
        accuracy_block_total = round((accuracy_block/trial_counter_block*100))

        block_accuracy_msg = "Block Accuracy:\n" + str(accuracy_block_total) + "%"
        total_accuracy_msg = "Total Accuracy:\n" + str(accuracy_total) + "%"
      End Routine:
        accuracy_block = 0
        trial_counter_block = 0
        block_n += 1
    TextComponent text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $block_msg
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    KeyboardComponent skip_break
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = nothing
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (-.25, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $block_accuracy_msg
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (.25, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $total_accuracy_msg
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  Routine end
    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment!

        Thank you for your participation!

        Please press SPACE to end.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine get_ready
    TextComponent text_10
      color = black
      letterHeight = .03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Get ready!
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Flow
  Routine setup
  Routine practice_instruct_1
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = conditions_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_type': 'all_black', 'serial_position_test': 0, 'test_position': 'left'},
      {'trial_type': 'all_black', 'serial_position_test': 1, 'test_position': 'left'},
      {'trial_type': 'all_black', 'serial_position_test': 2, 'test_position': 'left'},
      {'trial_type': 'all_black', 'serial_position_test': 0, 'test_position': 'right'},
      {'trial_type': 'all_black', 'serial_position_test': 1, 'test_position': 'right'},
      {'trial_type': 'all_black', 'serial_position_test': 2, 'test_position': 'right'},
      {'trial_type': 'all_black', 'serial_position_test': 0, 'test_position': 'left'},
      {'trial_type': 'all_black', 'serial_position_test': 1, 'test_position': 'left'},
      {'trial_type': 'all_black', 'serial_position_test': 2, 'test_position': 'left'},
      {'trial_type': 'all_black', 'serial_position_test': 0, 'test_position': 'right'},
      {'trial_type': 'all_black', 'serial_position_test': 1, 'test_position': 'right'},
      {'trial_type': 'all_black', 'serial_position_test': 2, 'test_position': 'right'}]
    Routine trial_setup
    Routine fixation
    Routine stim_1
    Routine stim_2
    Routine stim_3
    Routine mask
    Routine test
    Routine feedback_practice
  LoopTerminator trials_practice
  Routine practice_end
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = block_total
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    Routine get_ready
    LoopInitiator trials_experimental loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = trial_total
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      conditions:
        [{'trial_type': 'sp_1_red', 'serial_position_test': 0, 'test_position': 'left'},
        {'trial_type': 'sp_2_red', 'serial_position_test': 0, 'test_position': 'left'},
        {'trial_type': 'sp_3_red', 'serial_position_test': 0, 'test_position': 'left'},
        {'trial_type': 'all_black', 'serial_position_test': 0, 'test_position': 'left'},
        {'trial_type': 'sp_1_red', 'serial_position_test': 1, 'test_position': 'left'},
        {'trial_type': 'sp_2_red', 'serial_position_test': 1, 'test_position': 'left'},
        {'trial_type': 'sp_3_red', 'serial_position_test': 1, 'test_position': 'left'},
        {'trial_type': 'all_black', 'serial_position_test': 1, 'test_position': 'left'},
        {'trial_type': 'sp_1_red', 'serial_position_test': 2, 'test_position': 'left'},
        {'trial_type': 'sp_2_red', 'serial_position_test': 2, 'test_position': 'left'},
        {'trial_type': 'sp_3_red', 'serial_position_test': 2, 'test_position': 'left'},
        {'trial_type': 'all_black', 'serial_position_test': 2, 'test_position': 'left'},
        {'trial_type': 'sp_1_red', 'serial_position_test': 0, 'test_position': 'right'},
        {'trial_type': 'sp_2_red', 'serial_position_test': 0, 'test_position': 'right'},
        {'trial_type': 'sp_3_red', 'serial_position_test': 0, 'test_position': 'right'},
        {'trial_type': 'all_black', 'serial_position_test': 0, 'test_position': 'right'},
        {'trial_type': 'sp_1_red', 'serial_position_test': 1, 'test_position': 'right'},
        {'trial_type': 'sp_2_red', 'serial_position_test': 1, 'test_position': 'right'},
        {'trial_type': 'sp_3_red', 'serial_position_test': 1, 'test_position': 'right'}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
      Routine trial_setup
      Routine fixation
      Routine stim_1
      Routine stim_2
      Routine stim_3
      Routine mask
      Routine test
      Routine feedback
    LoopTerminator trials_experimental
    Routine end_block
  LoopTerminator blocks
  Routine end
