PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'group': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [700, 700]
  color = 1.0000, 1.0000, 1.0000
  expName = SM1
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        from PIL import Image, ImageOps
        import math
        import colorsys
        import re


        positions = [(-.25,0),(-.25,.25),(0,.25),(.25,.25),(.25,0),(.25,-.25),(0,-.25),(-.25,-.25)]
        circle_size = (0.2, 0.2)
        dot_size = (0.05, 0.05)
        angles = list(range(1,361))
        dot_pos_resp = [0,0]
        original_imgs = [""]*540
        fix_time = .5
        stim_array_time = .75
        stim_array_time_slow = 2
        parity_time = 1.2
        image_size = (0.1, 0.1)
        block_n = 1
        trial_n = 1
        block_total = 4
        trial_total = 6

        i = 1

        for k in range(540):
            original_imgs[k] = "object_stim/obj{}.jpg".format(k)

        shuffle(original_imgs)

        def scalar_to_rgb(scalar):
            color_list = colorsys.hsv_to_rgb(scalar, 1, 1)
            color_list = [element * 255 for element in color_list]
            return color_list
      Begin Routine:
        win.mouseVisible = False
  Routine memory_array
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(angles)
        shuffle(positions)

        trial_angles = [angles[0], angles[1], angles[2]]
        err_total = 0
        parity_points = 0
        memory_points = 0

        stim = [Image.open(original_imgs[i]).convert('L'),
                Image.open(original_imgs[i+1]).convert('L'),
                Image.open(original_imgs[i+2]).convert('L')]
        stim_files = [original_imgs[i], original_imgs[i+1], original_imgs[i+2]]

        colors = [scalar_to_rgb(trial_angles[0]/360), scalar_to_rgb(trial_angles[1]/360), scalar_to_rgb(trial_angles[2]/360)]

        stim_1_color = ImageOps.colorize(stim[0], black = "black", mid = colors[0], white = "white")
        stim_2_color = ImageOps.colorize(stim[1], black = "black", mid = colors[1], white = "white")
        stim_3_color = ImageOps.colorize(stim[2], black = "black", mid = colors[2], white = "white")

        focus_item = randint(0,3)
      End Routine:
        j = 0
        parity_i = 0
        shuffle(parity_nums)
    ImageComponent stim1
      image [set every repeat] = $stim_1_color
      pos [set every repeat] = positions[0]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim2
      image [set every repeat] = $stim_2_color
      pos [set every repeat] = positions[1]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim3
      image [set every repeat] = $stim_3_color
      pos [set every repeat] = positions[2]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent circle_focus_item
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[focus_item]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(fix_time+stim_array_time)
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  Routine response_2
    MouseComponent mouse_resp_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        current_pos = mouse_resp_2.setPos(positions[1])
        mouse_resp_2.getPos()

        img_gray = Image.open(original_imgs[i]).convert('L')
      Each Frame:
        mouse_x = mouse_resp_2.getPos()[0]
        mouse_y = mouse_resp_2.getPos()[1]
        adj_x = positions[1][0]
        adj_y = positions[1][1]

        mouse_x = mouse_x-(adj_x*2)
        mouse_y = mouse_y-(adj_y*2)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(positions[1][0] + ((circle_size[0] / 2) * sin(theta))),
            (positions[1][1] + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = scalar_to_rgb(curr_angle/360)
        img_color_response2 = ImageOps.colorize(stim_2, black = "black", mid = color_rgb, white = "white")
      End Routine:
        thisExp.addData('disp_angle_2', angles[1])
        thisExp.addData('resp_angle_2', curr_angle)


        err_angle_2 = (angles[1] - curr_angle + 360) % 360
        if (err_angle_2 > 180):
            err_angle_2 = 360 - err_angle_2

        thisExp.addData('err_angle_2', err_angle_2)
    PolygonComponent circle_resp_2
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[1]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every frame] = $img_color_response2
      pos [set every repeat] = positions[1]
      size = image_size
      startVal [time (s)] = 0
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    ImageComponent img_gray
      image [set every frame] = $img_gray
      pos [set every repeat] = positions[1]
      size = image_size
      startVal [time (s)] = 0
      stopVal [condition] = all(mouse_resp_2.getPos()) != all(positions[1])
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    PolygonComponent dot_resp1_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [condition] = all(err_angle_2.getPos()) != all(positions[1])
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  Routine response_memory
    MouseComponent mouse_resp
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        score = [0,0,0]
        points_total = 0
      Begin Routine:
        mouse_resp.getPos()
        mouse_resp.setPos(positions[j])
        current_pos = mouse_resp.setPos(positions[j])

        img_gray = stim[j]
        stim_presented = stim_files[j].split('object_stim/')[1].split('.jpg')[0]


        item_n = j

        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp.getPos()[0]
        mouse_y = mouse_resp.getPos()[1]
        adj_x = positions[j][0]
        adj_y = positions[j][1]

        mouse_x = mouse_x-(adj_x)
        mouse_y = mouse_y-(adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(positions[j][0] + ((circle_size[0] / 2) * sin(theta))),
            (positions[j][1] + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = scalar_to_rgb(curr_angle/360)
        img_color_response = ImageOps.colorize(stim[j], black = "black", mid = color_rgb, white = "white")
      End Routine:
        thisExp.addData('disp_angle', trial_angles[j])
        thisExp.addData('resp_angle', curr_angle)
        thisExp.addData('block_n', block_n)
        thisExp.addData('trial_n', trial_n)
        thisExp.addData('item_n', item_n)
        thisExp.addData('focus_item', focus_item)
        thisExp.addData('stim_presented', stim_presented)
        thisExp.addData('stim_file', stim_files[j])


        err_angle = (trial_angles[j] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        thisExp.addData('err_angle', err_angle)

        if curr_angle == 0:
            memory_points = 0
        elif (err_angle <= 90):
            memory_points = 20-(round(err_angle/10))
        else:
            memory_points = 0

        if focus_item == j:
            memory_points = memory_points * 2
            central_item = 1
        else:
            central_item = 0

        points_total = points_total + memory_points
        score[j] = memory_points

        thisExp.addData('memory_points', memory_points)
        thisExp.addData('parity_points', parity_points)
        thisExp.addData('points_total', points_total)
        thisExp.addData('central_item', central_item)

        win.mouseVisible = False
        j = j+1
    PolygonComponent circle_resp
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[j]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image_1
      image [set every frame] = $img_color_response
      pos [set every repeat] = positions[j]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = 0
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    PolygonComponent dot_resp1
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [condition] = all(current_pos) != all([0.0,0.0])
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    ImageComponent img_gray_1
      image [set every repeat] = $img_gray
      pos [set every repeat] = positions[j]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = 0
      stopVal [condition] = all(current_pos) != all([0.0,0.0])
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  Routine delay1
    PolygonComponent fixation_delay1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_1
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  Routine delay2
    PolygonComponent fixation_delay2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_2
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  Routine feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        points_total = points_total + parity_points
        new_position_y = positions[focus_item][1] - .05
        new_position = [positions[focus_item][0], new_position_y]
      End Routine:
        i = i+3
        trial_n = trial_n+1
        parity_points = 0
    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $points_total
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, -.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Current score:
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    TextComponent text_16
      color = black
      letterHeight = 0.03
      pos [set every repeat] = positions[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 1:\n" + str(score[0])
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    TextComponent text_17
      color = black
      letterHeight = 0.03
      pos [set every repeat] = positions[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 2:\n" + str(score[1])
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    TextComponent text_113
      color = black
      letterHeight = 0.03
      pos = (0, .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Even/odd score: " + str(parity_points)
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    PolygonComponent circle_focus_item_2
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[focus_item]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0
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    TextComponent text_103
      color = red
      letterHeight = 0.03
      pos [set every repeat] = new_position
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Bonus!
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    TextComponent text_15
      color = black
      letterHeight = 0.03
      pos [set every repeat] = positions[2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 3:\n" + str(score[2])
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  Routine parity
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        parity_nums = [1,2,3,4,5,6,7,8]

        parity_points = 0
        parity_points_total = 0
      Begin Routine:
        num_presented = parity_nums[parity_i]

        if num_presented%2 == 0:
            corr_ans_parity = "a"
        else:
            corr_ans_parity = "s"
      End Routine:
        parity_i = parity_i+1
        thisExp.addData('parity_i', parity_i)
        thisExp.addData('num_presented', num_presented)
        thisExp.addData('trial_n', trial_n)

        if corr_ans_parity == parity_resp.keys:
            parity_points_trial = 1
        else:
            parity_points_trial = 0


        parity_points = parity_points + parity_points_trial
        parity_points_total = parity_points_total + parity_points
    TextComponent text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      text [set every repeat] = $num_presented
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    KeyboardComponent parity_resp
      allowedKeys = 'a','s'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      storeCorrect = True
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  Routine practice_memory_array1
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(angles)
        shuffle(positions)

        trial_angles = [angles[0], angles[1], angles[2]]
        err_total = 0


        stim = [Image.open(original_imgs[i]).convert('L'),
                Image.open(original_imgs[i+1]).convert('L'),
                Image.open(original_imgs[i+2]).convert('L')]
        stim_files = [original_imgs[i], original_imgs[i+1], original_imgs[i+2]]

        colors = [scalar_to_rgb(trial_angles[0]/360), scalar_to_rgb(trial_angles[1]/360), scalar_to_rgb(trial_angles[2]/360)]

        stim_1_color = ImageOps.colorize(stim[0], black = "black", mid = colors[0], white = "white")
        stim_2_color = ImageOps.colorize(stim[1], black = "black", mid = colors[1], white = "white")
        stim_3_color = ImageOps.colorize(stim[2], black = "black", mid = colors[2], white = "white")

        focus_item = randint(0,2)
      End Routine:
        j = 0
        parity_i = 0
        shuffle(parity_nums)
    ImageComponent stim1_2
      image [set every repeat] = $stim_1_color
      pos [set every repeat] = positions[0]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time_slow
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    ImageComponent stim2_2
      image [set every repeat] = $stim_2_color
      pos [set every repeat] = positions[1]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time_slow
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    ImageComponent stim3_2
      image [set every repeat] = $stim_3_color
      pos [set every repeat] = positions[2]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time_slow
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    PolygonComponent fixation_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(fix_time+stim_array_time_slow)
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  Routine practice_parity1
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        parity_nums = [1,2,3,4,5,6,7,8]
      Begin Routine:
        num_presented = parity_nums[parity_i]

        if num_presented%2 == 0:
            corr_ans_parity = "a"
        else:
            corr_ans_parity = "s"
      End Routine:
        parity_i = parity_i+1

        if corr_ans_parity == parity_resp_2.keys:
            msg = "Correct!"
        elif parity_resp_2.keys == []:
            msg = "No key pressed.\n\nRemember press 'A' if even and 'S' if odd."
        else:
            msg = "Incorrect\n\nRemember press 'A' if even and 'S' if odd."
    TextComponent text_5
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      text [set every repeat] = $num_presented
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    KeyboardComponent parity_resp_2
      allowedKeys = 'a','s'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      store = nothing
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  Routine practice_parity_feedback
    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_response_memory
    MouseComponent mouse_resp_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        mouse_resp_3.getPos()
        mouse_resp_3.setPos(positions[j])
        current_pos = mouse_resp_3.setPos(positions[j])

        img_gray = stim[j]
        stim_presented = stim_files[j].split('object_stim/')[1].split('.jpg')[0]

        item_n = j

        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp_3.getPos()[0]
        mouse_y = mouse_resp_3.getPos()[1]
        adj_x = positions[j][0]
        adj_y = positions[j][1]

        mouse_x = mouse_x-(adj_x)
        mouse_y = mouse_y-(adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(positions[j][0] + ((circle_size[0] / 2) * sin(theta))),
            (positions[j][1] + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = scalar_to_rgb(curr_angle/360)
        img_color_response = ImageOps.colorize(stim[j], black = "black", mid = color_rgb, white = "white")
      End Routine:
        err_angle = (trial_angles[j] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle



        win.mouseVisible = False
    PolygonComponent circle_resp_3
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[j]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every frame] = $img_color_response
      pos [set every repeat] = positions[j]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = 0
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    PolygonComponent dot_resp1_3
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [condition] = all(current_pos) != all([0.0,0.0])
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    ImageComponent img_gray_2
      image [set every repeat] = $img_gray
      pos [set every repeat] = positions[j]
      saveStartStop = False
      size = image_size
      startVal [time (s)] = 0
      stopVal [condition] = all(current_pos) != all([0.0,0.0])
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  Routine practice_feedback
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        presented_color = ImageOps.colorize(stim[j], black = "black", mid = colors[j], white = "white")

        if curr_angle == 0:
            response_color = stim[j]
        else:
            response_color = ImageOps.colorize(stim[j], black = "black", mid = color_rgb, white = "white")

        original_dot_pos = [(-.25 + ((circle_size[0] / 2) * sin(trial_angles[j]*(pi/180)))),
            (0 + ((circle_size[0] / 2) * cos(trial_angles[j]*(pi/180))))]

        response_dot_pos = [(.25 + ((circle_size[0] / 2) * sin(curr_angle*(pi/180)))),
            (0 + ((circle_size[0] / 2) * cos(curr_angle*(pi/180))))]
      End Routine:
        i = i+3
        j = j+1
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_4
      image [set every repeat] = $presented_color
      pos = (-.25, 0)
      saveStartStop = False
      size = image_size
      startVal [time (s)] = 0.0
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    PolygonComponent circle_resp_4
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    PolygonComponent dot_resp1_4
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every repeat] = original_dot_pos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = 0
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    ImageComponent image_3
      image [set every repeat] = $response_color
      pos = (.25, 0)
      saveStartStop = False
      size = image_size
      startVal [time (s)] = 0.0
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    PolygonComponent circle_resp_5
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = (.25, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    PolygonComponent dot_resp1_5
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every repeat] = response_dot_pos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = 0
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (-.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Original Color:
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your Response:
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  Routine instructions_1
    TextComponent text_11
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this experiment, you will complete several tasks. You will first practice the tasks separately then together.

        Please read all instructions carefully throughout the experiment.

        During the first task, you will a series of colored objects. Your job is to remember to color of these objects. A small cross will appear in the center of the screen. This is your warning that the objects are coming and that you should pay attention. If you direct your eyes to the center of the screen you will see the objects better as they flash on the screen very quickly.

        After you have seen the objects, you will be asked to report the color of each object you saw previously. A gray version of one object will appear in the center of a ring. When you move the mouse, a dot will appear on the ring and the color of the object will begin to change. Use the mouse to move the dot along the ring until the object is the same color as you remember. Please click the mouse to submit your response. You will repeat this procedure for all three objects.


        Press SPACE to begin the practice.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine instructions_2
    TextComponent text_12
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great, you have finished the first part of the practice!

        During the second task, you will see a number in the center of the screen. Your job is to decide if the number is even or odd.

        Press 'A' if the number is even and 'S' if the number is odd.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_3
    TextComponent text_13
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great, you have finished the second part of the practice!

        During the next part of the practice, you will do both tasks. First, you will see the colored objects. Then you will see the numbers and indicate if they are even or odd. Finally, you will report the color of each object using the mouse.

        Remember, press 'A' if the number is even and 'S' if the number is odd. Keep your fingers on these keys so you are ready when the numbers appear.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_end
    TextComponent text_14
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great, you have finished the practice trials!
    KeyboardComponent key_resp_7
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        points_total = 0
  Routine end_block
    CodeComponent code_13
      Code Type = Both
      Begin Experiment:
        msg='no message'
        block_message = 'no message'
      Begin JS Experiment:
        msg = "no message!";
        block_message = 'no message';
      Begin JS Routine:
        msg = "You got " + corr_count + " trials correct!";

        if ((block_n === 0)) {
            block_message = "You have reached the end of the practice.";
        } else {
            block_message = "You have reached the end of block " + block_n + " of " + block_total;
        }
      Begin Routine:
        block_message = "You have reached the end of block %i of %i." %(block_n, block_total)
      End JS Routine:
        block_n = (block_n + 1);
      End Routine:
        block_n = block_n + 1
    TextComponent text_block_end
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to begin again.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine remind
    TextComponent text_18
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, press 'A' if even, 'S' if odd.

        Keep your fingers on these keys so you are ready when the numbers appear.

        Press SPACE to begin.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demographics
    TextComponent age
      letterHeight = 0.03
      pos = (-0.5, 0.45)
      startVal [time (s)] = 0.0
      text = Enter your Age:
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    TextboxComponent ageResp
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.135, 0.11)
      size = (0.425, 0.04)
      startVal [time (s)] = 0
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    TextComponent gender
      letterHeight = 0.03
      pos = (-0.5, 0.3)
      startVal [time (s)] = 0.0
      text = What is your gender identity?
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    SliderComponent genderResp1
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("Man", "Woman", "Another gender identity (please specify)", "I prefer not to respond")
      letterHeight = 0.035
      pos = (-0.5, 0.15)
      size = (0.015, 0.15)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextboxComponent genderResp2
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.135, 0.11)
      size = (0.425, 0.04)
      startVal [time (s)] = 0
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    TextComponent race
      letterHeight = 0.03
      pos = (-0.55, 0)
      startVal [time (s)] = 0.0
      text = What is your race/ethnicity? (Select all that apply) 
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    SliderComponent raceResp
      forceEndRoutine = False
      granularity = 1
      labels = ("White", "Black or African American", "Hispanic, Latino, or Spanish Origin", "Asian", "Native American or Alaskan Native", "Hawaiian Native or Pacific Islander",  "More than one", "Other", "I prefer not to respond")
      letterHeight = 0.035
      pos = (0, -0.05)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextboxComponent raceResp2
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.135, 0.11)
      size = (0.425, 0.04)
      startVal [time (s)] = 0
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    TextComponent handedness
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
      text = Which hand do you use to brush your teeth?
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    SliderComponent handResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Left", "Right")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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    TextComponent color
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
      text = Are you color-blind?
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    SliderComponent colorResp
      forceEndRoutine = False
      granularity = 0
      labels = ("No", "Yes")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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    TextComponent english
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
      text = Did you learn to speak English before the age of 5?
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    SliderComponent englishResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Left", "Right")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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    ImageComponent nextButton
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [condition] = genderResp1.rating and colorResp.rating and englishResp.rating
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    MouseComponent mouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine bai
    TextComponent text_20
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $BAI_item
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    TextComponent text_21
      color = black
      letterHeight = 0.03
      pos = (-.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Not at all
    TextComponent text_22
      color = black
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent text_24
      color = black
      letterHeight = 0.03
      pos = (-.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Mildly, but it didn’t
        bother me much
    TextComponent text_26
      color = black
      letterHeight = 0.03
      pos = (-.15, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_25
      color = black
      letterHeight = 0.03
      pos = (.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Moderately, it wasn’t
        pleasant at times
    TextComponent text_27
      color = black
      letterHeight = 0.03
      pos = (.15, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_23
      color = black
      letterHeight = 0.03
      pos = (.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Severely - it
        bothered me a lot
    TextComponent text_28
      color = black
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    KeyboardComponent key_resp_bai
      allowedKeys = '0','1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Indicate how much you have been bothered by that symptom during the past month, including today, by pressing the corresponding number key.
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  Routine dass
    TextComponent text_30
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $DASS_item
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    TextComponent text_31
      color = black
      letterHeight = 0.03
      pos = (-.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Did not apply
        to me at all
    TextComponent text_32
      color = black
      letterHeight = 0.03
      pos = (-.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent text_33
      color = black
      letterHeight = 0.03
      pos = (-.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Applied to me in
        some degree, or
        some of the time
    TextComponent text_34
      color = black
      letterHeight = 0.03
      pos = (-.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_35
      color = black
      letterHeight = 0.03
      pos = (.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Applied to me a
        considerable degree
        or a good part of time
    TextComponent text_36
      color = black
      letterHeight = 0.03
      pos = (.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_37
      color = black
      letterHeight = 0.03
      pos = (.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Applied to me very much
        or most of the time
    TextComponent text_38
      color = black
      letterHeight = 0.03
      pos = (.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    KeyboardComponent key_resp_dass
      allowedKeys = '0','1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_39
      color = black
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please read each statement and press a number key 0, 1, 2, or 3 which indicates how much the statement applied to you over the past week. 
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  Routine pss
    TextComponent text_40
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $PSS_item
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    TextComponent text_41
      color = black
      letterHeight = 0.03
      pos = (-.5, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Never
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    TextComponent text_42
      color = black
      letterHeight = 0.03
      pos = (-.5, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent text_43
      color = black
      letterHeight = 0.03
      pos = (-.25, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Almost never
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    TextComponent text_44
      color = black
      letterHeight = 0.03
      pos = (-.25, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_45
      color = black
      letterHeight = 0.03
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sometimes
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    TextComponent text_46
      color = black
      letterHeight = 0.03
      pos = (0, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_47
      color = black
      letterHeight = 0.03
      pos = (.25, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Fairly often
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    TextComponent text_48
      color = black
      letterHeight = 0.03
      pos = (.25, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_50
      color = black
      letterHeight = 0.03
      pos = (.5, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Very often
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    TextComponent text_51
      color = black
      letterHeight = 0.03
      pos = (.5, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    KeyboardComponent key_resp_pss
      allowedKeys = '0','1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine stai
    TextComponent text_52
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $STAI_item
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    TextComponent text_53
      color = black
      letterHeight = 0.03
      pos = (-.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Not at all
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    TextComponent text_54
      color = black
      letterHeight = 0.03
      pos = (-.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_55
      color = black
      letterHeight = 0.03
      pos = (-.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A little
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    TextComponent text_56
      color = black
      letterHeight = 0.03
      pos = (-.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_57
      color = black
      letterHeight = 0.03
      pos = (.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Somewhat
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    TextComponent text_58
      color = black
      letterHeight = 0.03
      pos = (.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_59
      color = black
      letterHeight = 0.03
      pos = (.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Very much so
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    TextComponent text_60
      color = black
      letterHeight = 0.03
      pos = (.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    KeyboardComponent key_resp_stai
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine age_q
    TextComponent text_61
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Enter your age:
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    TextboxComponent age_resp
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent text_89
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine race_q
    TextComponent text_62
      color = black
      letterHeight = 0.05
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your race/ethnicity? (Select all that apply) 
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    TextComponent text_64
      color = black
      letterHeight = 0.03
      pos = (-.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = White
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    TextComponent text_74
      color = black
      letterHeight = 0.03
      pos = (-.6, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_65
      color = black
      letterHeight = 0.03
      pos = (-.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Black or African
        American
    TextComponent text_75
      color = black
      letterHeight = 0.03
      pos = (-.4, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_66
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hispanic, Latino,
        or Spanish Origin
    TextComponent text_76
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_67
      color = black
      letterHeight = 0.03
      pos = (.05, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Asian
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    TextComponent text_77
      color = black
      letterHeight = 0.03
      pos = (.05, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent text_68
      color = black
      letterHeight = 0.03
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Native American
        or Alaskan Native
    TextComponent text_78
      color = black
      letterHeight = 0.03
      pos = (.25, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent text_69
      color = black
      letterHeight = 0.03
      pos = (.55, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hawaiian Native
        or Pacific Islander
    TextComponent text_79
      color = black
      letterHeight = 0.03
      pos = (.55, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent text_70
      color = black
      letterHeight = 0.03
      pos = (-.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = More than one
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    TextComponent text_80
      color = black
      letterHeight = 0.03
      pos = (-.3, -.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent text_71
      color = black
      letterHeight = 0.03
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Other
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    TextComponent text_81
      color = black
      letterHeight = 0.03
      pos = (0, -.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent text_72
      color = black
      letterHeight = 0.03
      pos = (.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I prefer not to respond
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    TextComponent text_82
      color = black
      letterHeight = 0.03
      pos = (.3, -.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 9
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    KeyboardComponent key_resp_race
      allowedKeys = '1','2','3','4','6','7','8','9'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_73
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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  Routine gender_q
    TextComponent text_83
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your gender identity?
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    TextComponent text_84
      color = black
      letterHeight = 0.03
      pos = (-.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Man
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    TextComponent text_90
      color = black
      letterHeight = 0.03
      pos = (-.4, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_85
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Woman
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    TextComponent text_91
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_86
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Another gender
        identity
    TextComponent text_92
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_87
      color = black
      letterHeight = 0.03
      pos = (.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        I prefer not
        to respond
    TextComponent text_93
      color = black
      letterHeight = 0.03
      pos = (.4, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    KeyboardComponent gender_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine gender_q2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if gender_resp.keys != 3:
            routine_length = 0
        else:
            routine_length = 100
    TextboxComponent textbox_gender
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $routine_length
      text = Enter your gender identity:
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  Routine hand_q
    TextComponent text_94
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which hand do you use to brush your teeth?
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    TextComponent text_97
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Left
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    TextComponent text_98
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_99
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Right
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    TextComponent text_100
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent hand_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine color_q
    TextComponent text_95
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Are you color-blind?
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    TextComponent text_101
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Yes
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    TextComponent text_102
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_104
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = No
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    TextComponent text_105
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent color_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine english_q
    TextComponent text_96
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Did you learn to speak English by age 5?
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    TextComponent text_107
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Yes
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    TextComponent text_108
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_109
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = No
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    TextComponent text_110
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent english_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine bai_instruct
    TextComponent text_114
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On the next screen is a list of common symptoms of anxiety. Please carefully read each item in the list. Indicate how much you have been bothered by that symptom during the past month, including today, by pressing the corresponding number key.

        Press SPACE to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dass_instruct
    TextComponent text_115
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please read each statement and press a number key 0, 1, 2, or 3 which indicates how much the statement applied to you over the past week. There are no right or wrong answers. Do not spend too much time on any statement.

        Press SPACE to continue.
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pss_instruct
    TextComponent text_116
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The questions in this scale ask you about your feelings and thoughts during the last month. In each case, you will be asked to indicate by pressing the number key corresponding to how often you felt or thought a certain way.

        Press SPACE to continue.
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stai_instruct
    TextComponent text_117
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A number of statements which people have used to describe themselves are given below. Read each statement and then select the appropriate number key to indicate how you feel right now, that is, at this moment. There are no right or wrong answers. Do not spend too much time on any one statement but give the answer which seems to describe your present feelings best.

        Press SPACE to continue.
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_49
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Congratulations, you have reached the end of this part of the experiment! Please tell your experimenter.
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    KeyboardComponent key_resp_20
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_instruct
    TextComponent text_63
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we will begin the real trials. Everything will be the same as what you practiced earlier.

        Remember, both tasks are important. Please try to respond as quickly and accurately as possible.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_4
    TextComponent text_88
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you will practice a few trials that will be exactly like the real trials. Everything will be the same as what you practiced earlier, except these trials will be much faster and you will no longer receive feedback showing the original color compared to your response color.

        Additionally, you can now earn points! For each object color that you remember correctly, you will receive points. You will receive more points the closer your response is to the original color.  You will see a circle around one of the objects when they are first presented. If you remember this item correctly, you will receive bonus points!

        You will also receive points for the even/odd task. The more that you answer correctly, the more points you will receive.

        Remember, press 'A' if the number is even and 'S' if the number is odd. Keep your fingers on these keys so you are ready when the numbers appear.

        Both tasks are important. Please try to respond as quickly and accurately as possible.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_instruct
    TextComponent text_106
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Experimenter:

        First, please enter the heart rate and SbO2 measurements taken during the stress protocol.

        Then, enter the subject's response to the paper copy of the STAI.

        Press SPACE to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine hr1_entry
    TextComponent text_111
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Heart Rate Measurement 1:
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    TextComponent text_112
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextboxComponent hr_1
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine hr2_entry
    TextComponent text_118
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Heart Rate Measurement 2:
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    TextComponent text_119
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextboxComponent hr_2
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sb02_1_entry
    TextComponent text_120
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Blood Oxygen Measurement 1:
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    TextComponent text_121
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextboxComponent sb02_1
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sb02_2_entry
    TextComponent text_122
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Blood Oxygen Measurement 2:
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    TextComponent text_123
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextboxComponent sb02_2
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine experiment_end
    TextComponent text_124
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please enter any important notes from the session. Press RETURN when you are done and ready to end the experiment.
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    TextboxComponent textbox_notes
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_24
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine hr3_entry
    TextComponent text_125
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Heart Rate Measurement 3:
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    TextComponent text_126
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextboxComponent hr_3
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sb02_3_entry
    TextComponent text_127
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Blood Oxygen Measurement 3:
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    TextComponent text_128
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextboxComponent sb02_3
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine experimenter
    TextComponent text_129
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please enter experimenter initials. Press SPACE to submit.
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    TextboxComponent textbox_initials
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine age_q
  Routine gender_q
  Routine race_q
  Routine hand_q
  Routine color_q
  Routine english_q
  Routine stai_instruct
  LoopInitiator stai_trials_1 loopType="TrialHandler"
    conditionsFile = stai_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'STAI_item': 'I feel calm'},
      {'STAI_item': 'I feel tense'},
      {'STAI_item': 'I feel upset'},
      {'STAI_item': 'I am relaxed'},
      {'STAI_item': 'I feel content'},
      {'STAI_item': 'I am worried'}]
    Routine stai
  LoopTerminator stai_trials_1
  Routine instructions_1
  LoopInitiator practice_1 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine practice_memory_array1
    LoopInitiator practice_response_memory1 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_response_memory
      Routine practice_feedback
    LoopTerminator practice_response_memory1
  LoopTerminator practice_1
  Routine instructions_2
  LoopInitiator practice_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine practice_parity1
    Routine practice_parity_feedback
  LoopTerminator practice_2
  Routine instructions_3
  LoopInitiator practice_3 loopType="TrialHandler"
    conditionsFile = delay_conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delay_1': 0, 'delay_2': 1.2},
      {'delay_1': 0.4, 'delay_2': 0.8},
      {'delay_1': 0.8, 'delay_2': 0.4},
      {'delay_1': 1.2, 'delay_2': 0}]
    Routine practice_memory_array1
    Routine delay1
    LoopInitiator practice_parity_2 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_parity1
    LoopTerminator practice_parity_2
    Routine delay2
    LoopInitiator practice_response_memory2 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_response_memory
      Routine practice_feedback
    LoopTerminator practice_response_memory2
  LoopTerminator practice_3
  Routine instructions_4
  LoopInitiator practice_trials_full loopType="TrialHandler"
    conditionsFile = delay_conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delay_1': 0, 'delay_2': 1.2},
      {'delay_1': 0.4, 'delay_2': 0.8},
      {'delay_1': 0.8, 'delay_2': 0.4},
      {'delay_1': 1.2, 'delay_2': 0}]
    Routine memory_array
    Routine delay1
    LoopInitiator parity_trials_practice loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine parity
    LoopTerminator parity_trials_practice
    Routine delay2
    LoopInitiator practice_response_memory3 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine response_memory
    LoopTerminator practice_response_memory3
    Routine feedback
  LoopTerminator practice_trials_full
  Routine practice_end
  Routine trial_instruct
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = block_total
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    Routine remind
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = delay_conds.xlsx
      loopType = random
      nReps = trial_total
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      conditions:
        [{'delay_1': 0, 'delay_2': 1.2},
        {'delay_1': 0.4, 'delay_2': 0.8},
        {'delay_1': 0.8, 'delay_2': 0.4},
        {'delay_1': 1.2, 'delay_2': 0}]
      Routine memory_array
      Routine delay1
      LoopInitiator parity_trials loopType="TrialHandler"
        loopType = random
        nReps = 3
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        Routine parity
      LoopTerminator parity_trials
      Routine delay2
      LoopInitiator memory_trials loopType="TrialHandler"
        loopType = random
        nReps = 3
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        Routine response_memory
      LoopTerminator memory_trials
      Routine feedback
    LoopTerminator trials
    Routine end_block
  LoopTerminator block
  Routine end
  Routine stai_instruct
  LoopInitiator stai_trials_3 loopType="TrialHandler"
    conditionsFile = stai_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'STAI_item': 'I feel calm'},
      {'STAI_item': 'I feel tense'},
      {'STAI_item': 'I feel upset'},
      {'STAI_item': 'I am relaxed'},
      {'STAI_item': 'I feel content'},
      {'STAI_item': 'I am worried'}]
    Routine stai
  LoopTerminator stai_trials_3
  Routine bai_instruct
  LoopInitiator bai_trials loopType="TrialHandler"
    conditionsFile = bai_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'BAI_item': 'Numbness or tingling'},
      {'BAI_item': 'Feeling hot'},
      {'BAI_item': 'Wobbliness in legs'},
      {'BAI_item': 'Unable to relax'},
      {'BAI_item': 'Fear of worst happening'},
      {'BAI_item': 'Dizzy or lightheaded'},
      {'BAI_item': 'Heart pounding / racing'},
      {'BAI_item': 'Unsteady'},
      {'BAI_item': 'Terrified or afraid'},
      {'BAI_item': 'Nervous'},
      {'BAI_item': 'Feeling of choking'},
      {'BAI_item': 'Hands trembling'},
      {'BAI_item': 'Shaky / unsteady'},
      {'BAI_item': 'Fear of losing control'},
      {'BAI_item': 'Difficulty in breathing'},
      {'BAI_item': 'Fear of dying'},
      {'BAI_item': 'Scared'},
      {'BAI_item': 'Indigestion'},
      {'BAI_item': 'Faint / lightheaded'},
      {'BAI_item': 'Face flushed'},
      {'BAI_item': 'Hot / cold sweats'}]
    Routine bai
  LoopTerminator bai_trials
  Routine dass_instruct
  LoopInitiator dass_trials loopType="TrialHandler"
    conditionsFile = dass_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'DASS_item': 'I found it hard to wind down.', 'scale': 'scale'},
      {'DASS_item': 'I was aware of dryness in my mouth.', 'scale': 'a'},
      {'DASS_item': "I couldn't seem to experience any positive feeling at all.", 'scale': 'd'},
      {'DASS_item': 'I experienced breathing difficulty (e.g. excessively rapid breathing, breathlessness in the absence of physical exertion).', 'scale': 'a'},
      {'DASS_item': 'I found it difficult to work up the initiative to do things.', 'scale': 'd'},
      {'DASS_item': 'I tended to over-react to situations.', 'scale': 'scale'},
      {'DASS_item': 'I experienced trembling (e.g. in the hands).', 'scale': 'a'},
      {'DASS_item': 'I felt that I was using a lot of nervous energy.', 'scale': 'd'},
      {'DASS_item': 'I was worried about situations in which I might panic and make a fool of myself.', 'scale': 'a'},
      {'DASS_item': 'I felt that I had nothing to look forward to.', 'scale': 'd'},
      {'DASS_item': 'I found myself getting agitated.', 'scale': 'scale'},
      {'DASS_item': 'I found it difficult to relax.', 'scale': 'scale'},
      {'DASS_item': 'I felt down-hearted and blue.', 'scale': 'd'},
      {'DASS_item': 'I was intolerant of anything that kept me from getting on with what I was doing.', 'scale': 'scale'},
      {'DASS_item': 'I felt I was close to panic.', 'scale': 'a'},
      {'DASS_item': 'I was unable to become enthusiastic about anything.', 'scale': 'd'},
      {'DASS_item': "I felt I wasn't worth much as a person.", 'scale': 'd'},
      {'DASS_item': 'I felt that I was rather touchy.', 'scale': 'scale'}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
    Routine dass
  LoopTerminator dass_trials
  Routine pss_instruct
  LoopInitiator pss_trials loopType="TrialHandler"
    conditionsFile = pss_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'PSS_item': 'In the last month, how often have you been upset because of something that happened unexpectedly? ', 'scoring': '+'},
      {'PSS_item': 'In the last month, how often have you felt that you were unable to control the important things in your life? ', 'scoring': '+'},
      {'PSS_item': 'In the last month, how often have you felt nervous and "stressed"?', 'scoring': '+'},
      {'PSS_item': 'In the last month, how often have you felt confident about your ability to handle your personal problems? ', 'scoring': '-'},
      {'PSS_item': 'In the last month, how often have you felt that things were going your way? ', 'scoring': '-'},
      {'PSS_item': 'In the last month, how often have you found that you could not cope with all the things that you had to do? ', 'scoring': '+'},
      {'PSS_item': 'In the last month, how often have you been able to control irritations in your life? ', 'scoring': '-'},
      {'PSS_item': 'In the last month, how often have you felt that you were on top of things?', 'scoring': '-'},
      {'PSS_item': 'In the last month, how often have you been angered because of things that were outside of your control? ', 'scoring': '+'},
      {'PSS_item': 'In the last month, how often have you felt difficulties were piling up so high that you could not overcome them? ', 'scoring': '+'}]
    Routine pss
  LoopTerminator pss_trials
  Routine end
  Routine end_instruct
  Routine hr1_entry
  Routine hr2_entry
  Routine hr3_entry
  Routine sb02_1_entry
  Routine sb02_2_entry
  Routine sb02_3_entry
  LoopInitiator stai_trials_2 loopType="TrialHandler"
    conditionsFile = stai_qs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'STAI_item': 'I feel calm'},
      {'STAI_item': 'I feel tense'},
      {'STAI_item': 'I feel upset'},
      {'STAI_item': 'I am relaxed'},
      {'STAI_item': 'I feel content'},
      {'STAI_item': 'I am worried'}]
    Routine stai
  LoopTerminator stai_trials_2
  Routine experimenter
  Routine experiment_end
