PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = $'https://gccuny.az1.qualtrics.com/jfe/form/SV_801AxGYy81BpkLs?participant=' + expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['object_stim/obj251.png', 'object_stim/obj250.png', 'object_stim/obj249.png', 'object_stim/obj248.png', 'object_stim/obj247.png', 'object_stim/obj246.png', 'object_stim/obj245.png', 'object_stim/obj244.png', 'object_stim/obj243.png', 'object_stim/obj242.png', 'object_stim/obj241.png', 'object_stim/obj240.png', 'object_stim/obj239.png', 'object_stim/obj238.png', 'object_stim/obj237.png', 'object_stim/obj236.png', 'object_stim/obj235.png', 'object_stim/obj234.png', 'object_stim/obj233.png', 'object_stim/obj232.png', 'object_stim/obj231.png', 'object_stim/obj230.png', 'object_stim/obj229.png', 'object_stim/obj228.png', 'object_stim/obj227.png', 'object_stim/obj226.png', 'object_stim/obj225.png', 'object_stim/obj224.png', 'object_stim/obj223.png', 'object_stim/obj222.png', 'object_stim/obj221.png', 'object_stim/obj220.png', 'object_stim/obj219.png', 'object_stim/obj218.png', 'object_stim/obj217.png', 'object_stim/obj216.png', 'object_stim/obj215.png', 'object_stim/obj214.png', 'object_stim/obj213.png', 'object_stim/obj212.png', 'object_stim/obj211.png', 'object_stim/obj210.png', 'object_stim/obj209.png', 'object_stim/obj208.png', 'object_stim/obj207.png', 'object_stim/obj206.png', 'object_stim/obj205.png', 'object_stim/obj204.png', 'object_stim/obj203.png', 'object_stim/obj202.png', 'object_stim/obj201.png', 'object_stim/obj200.png', 'object_stim/obj199.png', 'object_stim/obj198.png', 'object_stim/obj197.png', 'object_stim/obj196.png', 'object_stim/obj195.png', 'object_stim/obj194.png', 'object_stim/obj193.png', 'object_stim/obj192.png', 'object_stim/obj191.png', 'object_stim/obj190.png', 'object_stim/obj189.png', 'object_stim/obj188.png', 'object_stim/obj187.png', 'object_stim/obj186.png', 'object_stim/obj185.png', 'object_stim/obj184.png', 'object_stim/obj183.png', 'object_stim/obj182.png', 'object_stim/obj181.png', 'object_stim/obj180.png', 'object_stim/obj179.png', 'object_stim/obj178.png', 'object_stim/obj177.png', 'object_stim/obj176.png', 'object_stim/obj175.png', 'object_stim/obj174.png', 'object_stim/obj173.png', 'object_stim/obj172.png', 'object_stim/obj171.png', 'object_stim/obj170.png', 'object_stim/obj169.png', 'object_stim/obj168.png', 'object_stim/obj167.png', 'object_stim/obj166.png', 'object_stim/obj165.png', 'object_stim/obj164.png', 'object_stim/obj163.png', 'object_stim/obj162.png', 'object_stim/obj161.png', 'object_stim/obj160.png', 'object_stim/obj159.png', 'object_stim/obj158.png', 'object_stim/obj157.png', 'object_stim/obj156.png', 'object_stim/obj155.png', 'object_stim/obj154.png', 'object_stim/obj153.png', 'object_stim/obj152.png', 'object_stim/obj151.png', 'object_stim/obj150.png', 'object_stim/obj149.png', 'object_stim/obj148.png', 'object_stim/obj147.png', 'object_stim/obj146.png', 'object_stim/obj145.png', 'object_stim/obj144.png', 'object_stim/obj143.png', 'object_stim/obj142.png', 'object_stim/obj141.png', 'object_stim/obj140.png', 'object_stim/obj139.png', 'object_stim/obj138.png', 'object_stim/obj137.png', 'object_stim/obj136.png', 'object_stim/obj135.png', 'object_stim/obj134.png', 'object_stim/obj133.png', 'object_stim/obj132.png', 'object_stim/obj131.png', 'object_stim/obj130.png', 'object_stim/obj129.png', 'object_stim/obj128.png', 'object_stim/obj127.png', 'object_stim/obj126.png', 'object_stim/obj125.png', 'object_stim/obj124.png', 'object_stim/obj123.png', 'object_stim/obj122.png', 'object_stim/obj121.png', 'object_stim/obj120.png', 'object_stim/obj119.png', 'object_stim/obj118.png', 'object_stim/obj117.png', 'object_stim/obj116.png', 'object_stim/obj115.png', 'object_stim/obj114.png', 'object_stim/obj113.png', 'object_stim/obj112.png', 'object_stim/obj111.png', 'object_stim/obj110.png', 'object_stim/obj109.png', 'object_stim/obj108.png', 'object_stim/obj107.png', 'object_stim/obj106.png', 'object_stim/obj105.png', 'object_stim/obj104.png', 'object_stim/obj103.png', 'object_stim/obj102.png', 'object_stim/obj101.png', 'object_stim/obj100.png', 'object_stim/obj99.png', 'object_stim/obj98.png', 'object_stim/obj97.png', 'object_stim/obj96.png', 'object_stim/obj95.png', 'object_stim/obj94.png', 'object_stim/obj93.png', 'object_stim/obj92.png', 'object_stim/obj91.png', 'object_stim/obj90.png', 'object_stim/obj89.png', 'object_stim/obj88.png', 'object_stim/obj87.png', 'object_stim/obj86.png', 'object_stim/obj85.png', 'object_stim/obj84.png', 'object_stim/obj83.png', 'object_stim/obj82.png', 'object_stim/obj81.png', 'object_stim/obj80.png', 'object_stim/obj79.png', 'object_stim/obj78.png', 'object_stim/obj77.png', 'object_stim/obj76.png', 'object_stim/obj75.png', 'object_stim/obj74.png', 'object_stim/obj73.png', 'object_stim/obj72.png', 'object_stim/obj71.png', 'object_stim/obj70.png', 'object_stim/obj69.png', 'object_stim/obj68.png', 'object_stim/obj67.png', 'object_stim/obj66.png', 'object_stim/obj65.png', 'object_stim/obj64.png', 'object_stim/obj63.png', 'object_stim/obj62.png', 'object_stim/obj61.png', 'object_stim/obj60.png', 'object_stim/obj59.png', 'object_stim/obj58.png', 'object_stim/obj57.png', 'object_stim/obj56.png', 'object_stim/obj55.png', 'object_stim/obj54.png', 'object_stim/obj53.png', 'object_stim/obj52.png', 'object_stim/obj51.png', 'object_stim/obj50.png', 'object_stim/obj49.png', 'object_stim/obj48.png', 'object_stim/obj47.png', 'object_stim/obj46.png', 'object_stim/obj45.png', 'object_stim/obj44.png', 'object_stim/obj43.png', 'object_stim/obj42.png', 'object_stim/obj41.png', 'object_stim/obj40.png', 'object_stim/obj39.png', 'object_stim/obj38.png', 'object_stim/obj37.png', 'object_stim/obj36.png', 'object_stim/obj35.png', 'object_stim/obj34.png', 'object_stim/obj33.png', 'object_stim/obj32.png', 'object_stim/obj31.png', 'object_stim/obj30.png', 'object_stim/obj29.png', 'object_stim/obj28.png', 'object_stim/obj27.png', 'object_stim/obj26.png', 'object_stim/obj25.png', 'object_stim/obj24.png', 'object_stim/obj23.png', 'object_stim/obj22.png', 'object_stim/obj21.png', 'object_stim/obj20.png', 'object_stim/obj19.png', 'object_stim/obj18.png', 'object_stim/obj17.png', 'object_stim/obj16.png', 'object_stim/obj15.png', 'object_stim/obj14.png', 'object_stim/obj13.png', 'object_stim/obj12.png', 'object_stim/obj11.png', 'object_stim/obj10.png', 'object_stim/obj9.png', 'object_stim/obj8.png', 'object_stim/obj7.png', 'object_stim/obj6.png', 'object_stim/obj5.png', 'object_stim/obj4.png', 'object_stim/obj3.png', 'object_stim/obj2.png', 'object_stim/obj1.png', 'object_stim/obj0.png', 'conditions_A.xlsx', 'conditions_B.xlsx', 'conditions_C.xlsx', 'conditions_D.xlsx', 'feedback_1.png', 'feedback_2.png', 'feedback_3.png', 'feedback_4.png', 'feedback_5.png', 'feedback_bar.png']
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = SM2-1
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = JS
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      Before JS Experiment:
        function HSVtoRGB(h) {
            var r, g, b, i, f, p, q, t;
            s = 1;
            v = 1;
            i = Math.floor(h * 6);
            f = h * 6 - i;
            p = v * (1 - s);
            q = v * (1 - f * s);
            t = v * (1 - (1 - f) * s);
            switch (i % 6) {
                case 0: r = v, g = t, b = p; break;
                case 1: r = q, g = v, b = p; break;
                case 2: r = p, g = v, b = t; break;
                case 3: r = p, g = q, b = v; break;
                case 4: r = t, g = p, b = v; break;
                case 5: r = v, g = p, b = q; break;
            }
            return [r, g, b]
           // return {
                //r: Math.round(r * 255),
                //g: Math.round(g * 255),
                //b: Math.round(b * 255)
               // };
        }
      Begin JS Experiment:
        function randomIntFromInterval(min, max) { // min and max included
          return Math.floor(Math.random() * (max - min + 1) + min)
        }

        const rndInt = randomIntFromInterval(1, 4)
        group = ""

        if ((rndInt === 1)) {
            group = "B";
            conditions_file = "conditions_B.xlsx"
        } else {
            if ((rndInt === 2)) {
                group = "B";
                conditions_file = "conditions_B.xlsx"
            } else {
                if ((rndInt === 3)) {
                    group = "B";
                    conditions_file = "conditions_B.xlsx"
                } else {
                    if ((rndInt === 4)) {
                        group = "B";
                        conditions_file = "conditions_B.xlsx"
                    }
                }
            }
        }
      Begin JS Routine:
                // add-on: list(s: string): string[]
                function list(s) {
                    // if s is a string, we return a list of its characters
                    if (typeof s === 'string')
                        return s.split('');
                    else
                        // otherwise we return s:
                        return s;
                }
        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        //import * as re from 're';
        //var angles, block_n, block_total, circle_size, dot_pos_resp, dot_size, fix_time, i, image_size, k, memory_items, original_imgs, parity_time, points_total, positions, stim_array_time, trial_n, trial_total;
        positions = [[(- 0.25), 0], [(- 0.25), 0.25], [0, 0.25], [0.25, 0.25], [0.25, 0], [0.25, (- 0.25)], [0, (- 0.25)], [(- 0.25), (- 0.25)]];
        circle_size = [0.2, 0.2];
        dot_size = [0.05, 0.05];
        angles = Array.from({length: 360}, (_, i) => i + 1)
        dot_pos_resp = [0, 0];
        //original_imgs = Array(540).fill("");
        original_imgs = Array(250).fill("");
        fix_time = 0.5;
        stim_array_time = 0.75;
        parity_time = 1.2;
        image_size = [0.05, 0.05];
        block_n = 1;
        trial_n = 1;
        trials_stress_nreps = 60;
        block_stress_nreps = 2;
        block_total = 1;
        wm_trial_total = 10;
        perception_trial_total = 10;
        memory_items = [];
        points_total = 0;
        i = 0;
        k = 0;
        for (var k, _pj_c = 0, _pj_a = range(251), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            k = _pj_a[_pj_c];
            original_imgs[k] = ('object_stim/obj' + k.toString() + '.png');
        }

        function scalar_to_rgb(scalar) {
            var color_list;
            color_list = colorsys.hsv_to_rgb(scalar, 1, 1);
            color_list = function () {
            var _pj_a = [], _pj_b = color_list;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var element = _pj_b[_pj_c];
                _pj_a.push((element * 255));
            }
            return _pj_a;
        }
        .call(this);
            return color_list;
        }
        util.shuffle(original_imgs)

        console.log(original_imgs)
        document.body.style.cursor='none';
      End JS Routine:
        psychoJS.experiment.addData("group", group);
  Routine memory_array
    CodeComponent code_3
      Code Type = JS
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      Begin JS Routine:
        util.shuffle(angles);
        util.shuffle(positions);
        trial_angles = [angles[0], angles[1], angles[2]];
        trial_positions = [positions[0], positions[1], positions[2]];
        err_total = 0;
        parity_points = 0;
        memory_points = 0;
        stim_files = [original_imgs[i], original_imgs[(i + 1)], original_imgs[(i + 2)]];
        //stim_files = ["object_stim/obj0.jpg", "object_stim/obj1.jpg", "object_stim/obj2.jpg"]

        block_type = "working_memory"

        stim_presented_wm_1 = stim_files[0]
        stim_presented_wm_2 = stim_files[1]
        stim_presented_wm_3 = stim_files[2]


        color_presented_wm_1 = HSVtoRGB(trial_angles[0] / 360);
        color_presented_wm_2 = HSVtoRGB(trial_angles[1] / 360);
        color_presented_wm_3 = HSVtoRGB(trial_angles[2] / 360);

        focus_item = util.randint(0, 3);
        psychoJS.window.mouseVisible = false;
      End JS Routine:
        j = 0;
        parity_i = 0;
        util.shuffle(parity_nums);
    PolygonComponent circle_focus_item
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = positions[focus_item]
      saveStartStop = False
      shape = regular polygon...
      size = (.2, .2)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim1
      image [set every repeat] = $stim_files[0]
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent wm_color_1
      fillColor [set every repeat] = $color_presented_wm_1
      lineColor [set every repeat] = $color_presented_wm_1
      opacity = .5
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim2
      image [set every repeat] = $stim_files[1]
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent wm_color_2
      fillColor [set every repeat] = $color_presented_wm_2
      lineColor [set every repeat] = $color_presented_wm_2
      opacity = .5
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    ImageComponent stim3
      image [set every repeat] = $stim_files[2]
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent wm_color_3
      fillColor [set every repeat] = $color_presented_wm_3
      lineColor [set every repeat] = $color_presented_wm_3
      opacity = .5
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = $stim_array_time
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    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(fix_time+stim_array_time)
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
  Routine response_memory
    MouseComponent mouse_resp
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = $(fix_time+.1)
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        score = [0,0,0]
        points_total = 0
      Begin JS Routine:
        stim_presented = stim_files[j]
        item_n = j;
        document.body.style.cursor='auto';
      Each JS Frame:
        mouse_x = mouse_resp.getPos()[0];
        mouse_y = mouse_resp.getPos()[1];
        adj_x = trial_positions[j][0];
        adj_y = trial_positions[j][1];
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(trial_positions[j][0] + ((circle_size[0] / 2) * Math.sin(theta))), (trial_positions[j][1] + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        psychoJS.experiment.addData("disp_angle", trial_angles[j]);
        psychoJS.experiment.addData("resp_angle", curr_angle);
        psychoJS.experiment.addData("block_n", block_n);
        psychoJS.experiment.addData("trial_n", trial_n);
        psychoJS.experiment.addData("item_n", item_n);
        psychoJS.experiment.addData("focus_item", focus_item);
        psychoJS.experiment.addData("stim_presented", stim_presented);
        psychoJS.experiment.addData("stim_file", stim_files[j]);
        psychoJS.experiment.addData("block_type", "working_memory");

        err_angle = (((trial_angles[j] - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }
        psychoJS.experiment.addData("err_angle", err_angle);
        if ((curr_angle === 0)) {
            memory_points = 0;
        } else {
            if ((err_angle <= 90)) {
                memory_points = (20 - Math.round((err_angle / 10)));
            } else {
                memory_points = 0;
            }
        }
        if ((focus_item === j)) {
            memory_points = (memory_points * 2);
            central_item = 1;
        } else {
            central_item = 0;
        }
        points_total = (points_total + memory_points);
        score[j] = memory_points;
        psychoJS.experiment.addData("points", points);
        psychoJS.experiment.addData("central_item", central_item);
        psychoJS.window.mouseVisible = false;
        memory_items.push([stim_files[j], trial_angles[j], central_item, delay_1, "working_memory"]);

        j = (j + 1);
    PolygonComponent circle_resp
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image_1
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      size = (.1,.1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity = .5
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.1)
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    PolygonComponent dot_resp1
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.1)
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  Routine delay1
    PolygonComponent fixation_delay1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_1
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  Routine delay2
    PolygonComponent fixation_delay2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_2
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  Routine feedback
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        points_total = (points_total + parity_points);
        new_position_y = (trial_positions[focus_item][1] - 0.05);
        new_position = [trial_positions[focus_item][0], new_position_y];
        document.body.style.cursor='none';
      Begin Routine:
        points_total = points_total + parity_points
        new_position_y = trial_positions[focus_item][1] - .05
        new_position = [trial_positions[focus_item][0], new_position_y]
        psychoJS.window.mouseVisible = false;
      End JS Routine:
        i = (i + 3);
        trial_n = (trial_n + 1);
        parity_points = 0;
      End Routine:
        i = i+3
        trial_n = trial_n+1
        parity_points = 0
    PolygonComponent circle_focus_item_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = trial_positions[focus_item]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $points_total
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, -.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Current score:
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    TextComponent text_16
      color = black
      letterHeight = 0.03
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 1:\n" + str(score[0])
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    TextComponent text_17
      color = black
      letterHeight = 0.03
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 2:\n" + str(score[1])
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    TextComponent text_113
      color = black
      letterHeight = 0.03
      pos = (0, .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Even/odd score: " + str(parity_points)
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    TextComponent text_103
      color = red
      letterHeight = 0.03
      pos [set every repeat] = new_position
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Bonus!
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    TextComponent text_15
      color = black
      letterHeight = 0.03
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Item 3:\n" + str(score[2])
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  Routine parity
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        parity_nums = [1,2,3,4,5,6,7,8]

        parity_points = 0
        parity_points_total = 0
      Begin Routine:
        num_presented = parity_nums[parity_i]

        if num_presented%2 == 0:
            corr_ans_parity = "a"
        else:
            corr_ans_parity = "s"
      End Routine:
        parity_i = parity_i+1
        thisExp.addData('parity_i', parity_i)
        thisExp.addData('num_presented', num_presented)
        thisExp.addData('trial_n', trial_n)
        thisExp.addData('block_n', block_n)
        thisExp.addData("block_type", block_type);


        if corr_ans_parity == parity_resp.keys:
            parity_points_trial = 1
        else:
            parity_points_trial = 0


        parity_points = parity_points + parity_points_trial
        parity_points_total = parity_points_total + parity_points
    TextComponent text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      text [set every repeat] = $num_presented
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    KeyboardComponent parity_resp
      allowedKeys = 'a','s'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      storeCorrect = True
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  Routine practice_parity1
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        parity_nums = [1,2,3,4,5,6,7,8]
      Begin Routine:
        num_presented = parity_nums[parity_i]

        if num_presented%2 == 0:
            corr_ans_parity = "a"
        else:
            corr_ans_parity = "s"
      End Routine:
        parity_i = parity_i+1

        if corr_ans_parity == parity_resp_2.keys:
            msg = "Correct!"
        elif parity_resp_2.keys == []:
            msg = "No key pressed.\n\nRemember press 'A' if even and 'S' if odd."
        else:
            msg = "Incorrect\n\nRemember press 'A' if even and 'S' if odd."
    TextComponent text_5
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      text [set every repeat] = $num_presented
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    KeyboardComponent parity_resp_2
      allowedKeys = 'a','s'
      correctAns = $corr_ans_parity
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $parity_time
      store = nothing
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  Routine practice_parity_feedback
    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_1
    TextComponent text_11
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's practice another task. For this task, you will see several colored objects. Your job is to remember to color of these objects.

        First, a small cross will appear in the center of the screen. This is your warning that the objects are coming and that you should pay attention. If you direct your eyes to the center of the screen you will see the objects better as they flash on the screen very quickly.

        After you have seen the objects, you will be asked to report the color of each object you saw previously. Like before, you will use the mouse to adjust the color of the object until it is the same color as you remember seeing earlier.

        Please only click the mouse when you are ready to submit your response. You will repeat this procedure for all three objects.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent code_12
      Code Type = JS
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      Begin JS Routine:
        document.body.style.cursor='none';
  Routine instructions_2
    TextComponent text_12
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great, let's do some more practice!

        During this task, you will see a number in the center of the screen. Your job is to decide if the number is even or odd.

        Press 'A' if the number is even and 'S' if the number is odd.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine instructions_3
    TextComponent text_13
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to combine tasks.

        During the next part of the practice, you will do both tasks that you just practiced. First, you will see the colored objects. Then you will see the numbers and indicate if they are even or odd. Finally, you will report the color of each object using the mouse.

        Remember, press 'A' if the number is even and 'S' if the number is odd.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine practice_end
    TextComponent text_14
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great, you have finished the practice trials!

        Press SPACE to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        points_total = 0
        memory_items = []
  Routine end_block
    CodeComponent code_13
      Code Type = Both
      Begin Experiment:
        msg='no message'
        block_message = 'no message'
      Begin JS Experiment:
        msg = "no message!";
        block_message = 'no message';
      Begin JS Routine:
        block_message = "You have reached the end of block " + block_n + " of " + 2;
      Begin Routine:
        block_message = "You have reached the end of block %i of 2." %(block_n)
      End JS Routine:
        block_n = (block_n + 1);
      End Routine:
        block_n = block_n + 1
    TextComponent text_block_end
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to begin again.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine remind
    TextComponent text_18
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, press 'A' if even, 'S' if odd.

        Press SPACE to begin.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.window.mouseVisible = false;
  Routine end_task
    TextComponent text_20
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished this part of the experiment.

        Press SPACE when you're ready to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_ltm
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(memory_items)

        i = 0

        ltm_trials_nreps = memory_items.length
    TextComponent text_21
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to do another memory test. During this part of the experiment, you will first be presented with a single object in the center of the screen. You previously saw this object during an earlier part of the experiment. Like before, your job is to use the mouse to adjust the color of the object until it matches what you saw earlier. You will do this for all of the earlier objects.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine response_perception
    MouseComponent mouse_resp_perc
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = $(fix_time+.1)
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    CodeComponent code_15
      Code Type = JS
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      Begin JS Routine:
        mouse_resp_perc.getPos();
        util.shuffle(angles);
        trial_angles = [angles[0]];
        err_total = 0;

        stim = original_imgs[i];

        stim_files = [original_imgs[i]];
        color_presented = HSVtoRGB(trial_angles[0] / 360);
        stim_presented_perception = stim_files[0]

        stim_presented = stim_files[0]
        block_type = "perception"
        //stim_presented = "object_stim/obj0.jpg"
        //trial_n = i;
        document.body.style.cursor='auto';
      Each JS Frame:
        mouse_x = mouse_resp_perc.getPos()[0];
        mouse_y = mouse_resp_perc.getPos()[1];
        adj_x = 0.25;
        adj_y = 0;
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        //r = sqrt(mouse_x**2 + mouse_y**2)
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(0.25 + ((circle_size[0] / 2) * Math.sin(theta))), (0 + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        psychoJS.experiment.addData("disp_angle", trial_angles[0]);
        psychoJS.experiment.addData("resp_angle", curr_angle);
        psychoJS.experiment.addData("block_n", block_n);
        psychoJS.experiment.addData("trial_n", trial_n);
        psychoJS.experiment.addData("stim_presented", stim_presented);
        psychoJS.experiment.addData("stim_file", stim_files[0]);
        psychoJS.experiment.addData("block_type", "perception");

        err_angle = (((trial_angles[0] - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }
        psychoJS.experiment.addData("err_angle", err_angle);
        if ((err_angle === 0)) {
            points = 15;
        } else {
            if ((err_angle <= 5)) {
                points = 10;
            } else {
                if ((err_angle <= 10)) {
                    points = 5;
                } else {
                    if ((err_angle <= 30)) {
                        points = 2;
                    } else {
                        points = 0;
                    }
                }
            }
        }
        points_total = (points_total + points);
        psychoJS.experiment.addData("points", points);
        memory_items.push([stim_files[0], trial_angles[0], 0, delay_1, "perception"]);
        i = (i + 1);
        trial_n = (trial_n + 1);
        parity_i = 0;
        util.shuffle(parity_nums);
    ImageComponent perception_stim_presented
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $stim_presented
      pos = [-0.25, 0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
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    PolygonComponent perception_color
      fillColor [set every repeat] = $color_presented
      lineColor [set every repeat] = $color_presented
      opacity = .5
      pos = [-0.25, 0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
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    PolygonComponent circle_resp_7
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos = [.25,0]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = $fix_time
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    ImageComponent perception_stim_response
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $stim_presented
      pos = [.25,0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
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    PolygonComponent perception_color_response
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity = .5
      pos = [0.25, 0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.1)
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    PolygonComponent dot_resp1_7
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.1)
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    PolygonComponent fixation_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine instructions_experiment
    TextComponent text_22
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will complete several different tasks. You will first practice the tasks before starting the experimental trials.

        Please read all instructions carefully throughout the experiment.

        Press SPACE to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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
  Routine practice_memory_array_1
    CodeComponent code_7
      Code Type = JS
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      Begin JS Routine:
        util.shuffle(angles);
        util.shuffle(positions);
        trial_angles = [angles[0], angles[1], angles[2]];
        trial_positions = [positions[0], positions[1], positions[2]];

        err_total = 0;

        stim_files = [original_imgs[i], original_imgs[(i + 1)], original_imgs[(i + 2)]];
        //stim_files = ["object_stim/obj0.jpg", "object_stim/obj1.jpg", "object_stim/obj2.jpg"]

        stim_presented_wm_1 = stim_files[0].split("object_stim/")[1].split(".png")[0];
        stim_presented_wm_2 = stim_files[1].split("object_stim/")[1].split(".png")[0];
        stim_presented_wm_3 = stim_files[2].split("object_stim/")[1].split(".png")[0];


        color_presented_wm = [HSVtoRGB(trial_angles[0] / 360), HSVtoRGB(trial_angles[1] / 360), HSVtoRGB(trial_angles[2] / 360)];
      End JS Routine:
        j = 0;
        parity_i = 0;
        util.shuffle(parity_nums);
    ImageComponent stim1_2
      image [set every repeat] = $stim_files[0]
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent wm_color_4
      fillColor [set every repeat] = $color_presented_wm[0]
      lineColor [set every repeat] = $color_presented_wm[0]
      opacity = .5
      pos [set every repeat] = trial_positions[0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    ImageComponent stim2_2
      image [set every repeat] = $stim_files[1]
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent wm_color_5
      fillColor [set every repeat] = $color_presented_wm[1]
      lineColor [set every repeat] = $color_presented_wm[1]
      opacity = .5
      pos [set every repeat] = trial_positions[1]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    ImageComponent stim3_2
      image [set every repeat] = $stim_files[2]
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent wm_color_6
      fillColor [set every repeat] = $color_presented_wm[2]
      lineColor [set every repeat] = $color_presented_wm[2]
      opacity = .5
      pos [set every repeat] = trial_positions[2]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
      stopVal [duration (s)] = 1.5
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    PolygonComponent fixation_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(fix_time+1.5)
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  Routine instructions_4
    TextComponent text_25
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you will practice a few trials that will be exactly like the real trials. Everything will be the same as what you just practiced, except these trials will be faster and you will no longer receive feedback showing the original color compared to your response color.

        Additionally, you can now earn points! For each object color that you remember correctly, you will receive points. You will receive more points the closer your response is to the original color.  You will see a gray circle around one of the objects when they are first presented. If you remember this item correctly, you will receive bonus points!

        You will also receive points for the even/odd task. The more that you answer correctly, the more points you will receive.

        Remember, press 'A' if the number is even and 'S' if the number is odd. Keep your fingers on these keys so you are ready when the numbers appear.

        Both tasks are important. Please try to respond as quickly and accurately as possible.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        points_total = 0
  Routine practice_response_memory
    MouseComponent mouse_resp_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = $(fix_time+.1)
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    CodeComponent code_20
      Code Type = JS
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      Begin JS Experiment:
        score = [0, 0, 0];
      Begin JS Routine:
        stim_presented = stim_files[j]
        item_n = j;
        document.body.style.cursor='auto';
      Each JS Frame:
        mouse_x = mouse_resp_4.getPos()[0];
        mouse_y = mouse_resp_4.getPos()[1];
        adj_x = trial_positions[j][0];
        adj_y = trial_positions[j][1];
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(trial_positions[j][0] + ((circle_size[0] / 2) * Math.sin(theta))), (trial_positions[j][1] + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        err_angle = (((trial_angles[j] - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }
        if ((err_angle === 0)) {
            points = 15;
        } else {
            if ((err_angle <= 5)) {
                points = 10;
            } else {
                if ((err_angle <= 10)) {
                    points = 5;
                } else {
                    if ((err_angle <= 30)) {
                        points = 2;
                    } else {
                        points = 0;
                    }
                }
            }
        }
        if ((focus_item === j)) {
            points = (points * 2);
            central_item = 1;
        } else {
            central_item = 0;
        }
        points_total = (points_total + points);
        score[j] = points;

        psychoJS.window.mouseVisible = false;
    PolygonComponent circle_resp_8
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      size = (.1,.1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color_10
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity = .5
      pos [set every repeat] = trial_positions[j]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.1)
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    PolygonComponent dot_resp1_8
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.1)
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  Routine practice_feedback
    CodeComponent code_8
      Code Type = JS
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      Begin JS Routine:
        original_dot_pos = [(-.25 + ((circle_size[0] / 2) * Math.sin(trial_angles[j]*(pi/180)))),
            (0 + ((circle_size[0] / 2) * Math.cos(trial_angles[j]*(pi/180))))]

        response_dot_pos = [(.25 + ((circle_size[0] / 2) * Math.sin(curr_angle*(pi/180)))),
            (0 + ((circle_size[0] / 2) * Math.cos(curr_angle*(pi/180))))]
        document.body.style.cursor='none';
      End JS Routine:
        i = i+3
        j = j+1
    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent circle_resp_9
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent stim1_4
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color_11
      fillColor [set every repeat] = $color_presented_wm[j]
      lineColor [set every repeat] = $color_presented_wm[j]
      opacity = .5
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = 0
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    PolygonComponent dot_resp1_9
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every repeat] = original_dot_pos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = 0
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    PolygonComponent circle_resp_10
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos [set every repeat] = (.25, 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0.0
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    ImageComponent stim1_5
      image [set every repeat] = $stim_files[j]
      pos [set every repeat] = (.25, 0)
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = 0
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    PolygonComponent wm_color_12
      fillColor [set every repeat] = $color_rgb
      lineColor [set every repeat] = $color_rgb
      opacity = .5
      pos [set every repeat] = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = 0
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    PolygonComponent dot_resp1_10
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every repeat] = response_dot_pos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = 0
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    TextComponent text_27
      color = black
      letterHeight = 0.05
      pos = (-.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Original Color:
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    TextComponent text_28
      color = black
      letterHeight = 0.05
      pos = (.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your Response:
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  Routine stress_task
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        current_level = 1

        m = 0

        current_feedback = "feedback_bar.png"
        current_stress_score = 0
        trial_counter = 1
        stress_i = 1
        stress_time = 5
      Begin Routine:
        shuffle(level_1_probs)
        shuffle(level_2_probs)
        shuffle(level_3_probs)
        shuffle(level_4_probs)
        shuffle(level_5_probs)

        if current_level == 1:
            display_equation = level_1_probs[m][0]
            correct_answer = level_1_probs[m][1]
        if current_level == 2:
            display_equation = level_2_probs[m][0]
            correct_answer = level_2_probs[m][1]
        if current_level == 3:
            display_equation = level_3_probs[m][0]
            correct_answer = level_3_probs[m][1]
        if current_level == 4:
            display_equation = level_4_probs[m][0]
            correct_answer = level_4_probs[m][1]
            stress_time = 5
        if current_level == 5:
            display_equation = level_5_probs[m][0]
            correct_answer = level_5_probs[m][1]

        if stress_i == 36:
            display_equation = "Please try a little harder!"
            stress_i = 0
      End Routine:
        current_stress_score += stress_key_resp.corr

        if trial_counter % 5 == 0:
            current_perf = current_stress_score/trial_counter
            if current_perf >= 1:
                current_level += 1
                current_feedback = "feedback_2.png"
            elif current_perf >= .8:
                current_level += 1
                current_feedback = "feedback_1.png"
            elif current_perf >= .6:
                current_level += 1
                current_feedback = "feedback_3.png"
            elif current_perf >= .4:
                current_level -= 1
                current_feedback = "feedback_4.png"
            elif current_perf >= .2:
                current_level -= 1
                current_feedback = "feedback_5.png"
            if current_level < 1:
                current_level = 1
            if current_level > 5:
                current_level = 5
                stress_time -= .5
            if stress_time < 1:
                stress_time = 1
            trial_counter = 1
            current_stress_score = 0
        if m >= 42:
            m = 0

        m += 1
        trial_counter += 1
        stress_i += 1
    TextComponent text_7
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stress_time
      text [set every repeat] = $display_equation
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    KeyboardComponent stress_key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      correctAns = $correct_answer
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stress_time
      storeCorrect = True
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    ImageComponent image_2
      image [set every repeat] = $current_feedback
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stress_time
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    TextComponent text_32
      color = black
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stress_time
      text = = ?
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  Routine formula_load
    CodeComponent load_formula_code
      Code Type = Auto->JS
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      Begin Experiment:
        level_1_probs = []
        level_2_probs = []
        level_3_probs = []
        level_4_probs = []
        level_5_probs = []
      Begin Routine:
        if cond == "first_level":
            print("first level okay")
            level_1_probs.append([formula, answer])
        elif cond == "second_level":
            level_2_probs.append([formula, answer])
        elif cond == "third_level":
            level_3_probs.append([formula, answer])
        elif cond == "fourth_level":
            level_4_probs.append([formula, answer])
        elif cond == "fifth_level":
            level_5_probs.append([formula, answer])
  Routine stress_instruct_1
    TextComponent text_8
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the next part of the experiment. During this part, you will be presented with math problems that you will need to solve. You will use the numbers at the top of your keyboard to indicate your response.

        For example, you might see problems like this:

        7 - 4

        The answer is 3, so you should press the 3 key.

        9 * 2 / 3 * 1

        The answer is 6, so you should press the 6 key.

        You will try to solve as many problems as possible before your time is up.

        You will earn a point for every problem you answer correctly. You will also lose a point for every problem you answer incorrectly, or if you don't submit an answer.

        Please solve the problems in your head as quickly and accurately as possible. Please do not use a calculator.

        Press SPACE to continue.
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine stress_instruct_2
    TextComponent text_29
      color = black
      letterHeight = 0.04
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Many other people have completed this experiment and we are studying how your performance compares to everyone else. While you're completing this task, you will see how your performance compares to the other people who have completed this task.

        During the task, you will see this bar at the top of the screen, showing your performance compared to everyone else. You should try to do as well as possible and remain in the green as much as possible.

        Press SPACE to continue.
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    ImageComponent feedback_bar_practice
      image = feedback_bar.png
      pos = (0, -.35)
      startVal [time (s)] = 0.0
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  Routine stress_break
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        stress_block = 1
      Begin Routine:
        if stress_block == 2:
            stress_break = "You have reached the end of this task. Press SPACE to continue."
        else:
            stress_break = "If you would like to take a break, please do so now. \nThe task will begin again in 30 seconds.\n\nIf you would like to skip the break, press SPACE to continue."
      End Routine:
        stress_block += 1
        m = 0
    TextComponent text_31
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $stress_break
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = nothing
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  Routine end
    TextComponent text_33
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment!

        Thank you so much for your participation.

        After this screen, you will exit the experiment and be told a little more about the experiment.

        First, during the math portion of the experiment, did you use a calculator at all? This will not affect your compensation, but we would like to know.

        Press Y if you did use a calculator and N if you did not use a calculator.
    KeyboardComponent key_resp_calc
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_perception_practice
    TextComponent text_23
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's do the first practice task.

        First, a small cross will appear in the center of the screen. This is your warning that the objects are coming and that you should pay attention.

        You will then see two objects on the screen. One object will be colored and one will be gray. The gray object will appear in the center of a ring. As you move the mouse, the color of the gray object will change. You will use the mouse to adjust the color of the object until it is the same color the colored object.

        Please only click the mouse when you are ready to submit your response. You will repeat this procedure several times.


        Press SPACE to begin the practice.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine response_perception_practice
    MouseComponent mouse_resp_perc_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = $(fix_time+.1)
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    CodeComponent code_17
      Code Type = JS
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      Begin JS Routine:
        util.shuffle(angles);
        trial_angles = angles[0];
        err_total = 0;

        stim = original_imgs[i];

        stim_files = [original_imgs[i]];
        color_presented = HSVtoRGB(trial_angles / 360);

        stim_presented = stim_files[0];
        document.body.style.cursor='auto';
      Each JS Frame:
        mouse_x = mouse_resp_perc_2.getPos()[0];
        mouse_y = mouse_resp_perc_2.getPos()[1];
        adj_x = 0.25;
        adj_y = 0;
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        //r = sqrt(mouse_x**2 + mouse_y**2)
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(0.25 + ((circle_size[0] / 2) * Math.sin(theta))), (0 + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        err_angle = (((trial_angles - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }


        i = (i + 1);
    ImageComponent perception_stim_presented_2
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $stim_presented
      pos = [-0.25, 0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
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    PolygonComponent perception_color_2
      fillColor [set every repeat] = $color_presented
      lineColor [set every repeat] = $color_presented
      opacity = .5
      pos = [-0.25, 0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $fix_time
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    PolygonComponent circle_resp_12
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos = [.25,0]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = $fix_time
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    ImageComponent perception_stim_response_2
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $stim_presented
      pos = [.25,0]
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
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    PolygonComponent perception_color_response_2
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity = .5
      pos = [0.25, 0]
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.1)
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    PolygonComponent dot_resp1_12
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.1)
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    PolygonComponent fixation_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine stai_instruct
    TextComponent text_117
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A number of statements which people have used to describe themselves are given below. Read each statement and then select the appropriate number key to indicate how you feel right now, that is, at this moment. There are no right or wrong answers. Do not spend too much time on any one statement but give the answer which seems to describe your present feelings best.

        Press SPACE to continue.
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine stai
    TextComponent text_52
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $STAI_item
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    TextComponent text_53
      color = black
      letterHeight = 0.03
      pos = (-.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Not at all
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    TextComponent text_54
      color = black
      letterHeight = 0.03
      pos = (-.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_55
      color = black
      letterHeight = 0.03
      pos = (-.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A little
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    TextComponent text_56
      color = black
      letterHeight = 0.03
      pos = (-.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_57
      color = black
      letterHeight = 0.03
      pos = (.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Somewhat
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    TextComponent text_58
      color = black
      letterHeight = 0.03
      pos = (.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_59
      color = black
      letterHeight = 0.03
      pos = (.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Very much so
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    TextComponent text_60
      color = black
      letterHeight = 0.03
      pos = (.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    KeyboardComponent key_resp_stai
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine dass_instruct
    TextComponent text_115
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please read each statement and press a number key 0, 1, 2, or 3 which indicates how much the statement applied to you over the past week. There are no right or wrong answers. Do not spend too much time on any statement.

        Press SPACE to continue.
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dass
    TextComponent text_30
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $DASS_item
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    TextComponent text_34
      color = black
      letterHeight = 0.03
      pos = (-.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Did not apply
        to me at all
    TextComponent text_35
      color = black
      letterHeight = 0.03
      pos = (-.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent text_36
      color = black
      letterHeight = 0.03
      pos = (-.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Applied to me in
        some degree, or
        some of the time
    TextComponent text_37
      color = black
      letterHeight = 0.03
      pos = (-.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_38
      color = black
      letterHeight = 0.03
      pos = (.15, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Applied to me a
        considerable degree
        or a good part of time
    TextComponent text_39
      color = black
      letterHeight = 0.03
      pos = (.15, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_40
      color = black
      letterHeight = 0.03
      pos = (.45, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Applied to me very much
        or most of the time
    TextComponent text_41
      color = black
      letterHeight = 0.03
      pos = (.45, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    KeyboardComponent key_resp_dass
      allowedKeys = '0','1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_42
      color = black
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please read each statement and press a number key 0, 1, 2, or 3 which indicates how much the statement applied to you over the past week. 
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  Routine age_q
    TextComponent text_61
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Enter your age:
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    TextboxComponent age_resp
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent text_89
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine gender_q
    TextComponent text_83
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your gender identity?
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    TextComponent text_84
      color = black
      letterHeight = 0.03
      pos = (-.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Man
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    TextComponent text_90
      color = black
      letterHeight = 0.03
      pos = (-.4, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_85
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Woman
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    TextComponent text_91
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_86
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Another gender
        identity
    TextComponent text_92
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_87
      color = black
      letterHeight = 0.03
      pos = (.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        I prefer not
        to respond
    TextComponent text_93
      color = black
      letterHeight = 0.03
      pos = (.4, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    KeyboardComponent gender_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine race_q
    TextComponent text_62
      color = black
      letterHeight = 0.05
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your race/ethnicity? (Select all that apply) 
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    TextComponent text_64
      color = black
      letterHeight = 0.03
      pos = (-.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = White
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    TextComponent text_74
      color = black
      letterHeight = 0.03
      pos = (-.6, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_65
      color = black
      letterHeight = 0.03
      pos = (-.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Black or African
        American
    TextComponent text_75
      color = black
      letterHeight = 0.03
      pos = (-.4, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_66
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hispanic, Latino,
        or Spanish Origin
    TextComponent text_76
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_67
      color = black
      letterHeight = 0.03
      pos = (.05, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Asian
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    TextComponent text_77
      color = black
      letterHeight = 0.03
      pos = (.05, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent text_68
      color = black
      letterHeight = 0.03
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Native American
        or Alaskan Native
    TextComponent text_78
      color = black
      letterHeight = 0.03
      pos = (.25, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent text_69
      color = black
      letterHeight = 0.03
      pos = (.55, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hawaiian Native
        or Pacific Islander
    TextComponent text_79
      color = black
      letterHeight = 0.03
      pos = (.55, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent text_70
      color = black
      letterHeight = 0.03
      pos = (-.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = More than one
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    TextComponent text_80
      color = black
      letterHeight = 0.03
      pos = (-.3, -.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent text_71
      color = black
      letterHeight = 0.03
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Other
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    TextComponent text_81
      color = black
      letterHeight = 0.03
      pos = (0, -.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent text_72
      color = black
      letterHeight = 0.03
      pos = (.3, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I prefer not to respond
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    TextComponent text_82
      color = black
      letterHeight = 0.03
      pos = (.3, -.125)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 9
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    KeyboardComponent key_resp_race
      allowedKeys = '1','2','3','4','6','7','8','9'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_73
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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  Routine hand_q
    TextComponent text_94
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which hand do you use to brush your teeth?
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    TextComponent text_97
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Left
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    TextComponent text_98
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_99
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Right
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    TextComponent text_100
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent hand_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine color_q
    TextComponent text_95
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Are you color-blind?
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    TextComponent text_101
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Yes
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    TextComponent text_102
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_104
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = No
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    TextComponent text_105
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent color_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine english_q
    TextComponent text_96
      color = black
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Did you learn to speak English by age 5?
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    TextComponent text_107
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Yes
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    TextComponent text_108
      color = black
      letterHeight = 0.03
      pos = (-.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_109
      color = black
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = No
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    TextComponent text_110
      color = black
      letterHeight = 0.03
      pos = (.15, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    KeyboardComponent english_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_perception
    TextComponent text_43
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you are going to do the task that you practiced earlier with the two objects, one colored object and one gray object.

        Your job is to use the mouse adjust the color of the gray object until it matches the color of the colored object.

        After you submit your response, you will do the even/odd task that you practiced earlier. Remember press A if the number is even and S if the number is odd.

        Both tasks are important. Please try to respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        block_n = 1
        trial_n = 1
  Routine wm_instruct
    TextComponent text_63
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you are going to do the task with several colored objects. Your job is to remember the color of these objects.

        Like before, you will do the even/odd task after seeing the objects. Remember, press A if the number is even and S if the number is odd.

        Both tasks are important. Please try to respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        block_n = 1
        trial_n = 1
  Routine question_instruct
    TextComponent text_24
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Next, we have a few questions about you.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine perception_practice_feedback
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg_perception = ''
      Begin Routine:
        feedback_msg_perception = 'Your response was ' + str(err_angle) + ' degrees different from the actual color.\nPress SPACE to continue.'
    TextComponent text_44
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg_perception
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    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ltm_response_memory
    MouseComponent mouse_resp_ltm
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = $(fix_time+.25)
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    CodeComponent code_18
      Code Type = Both
      Begin JS Routine:
        err_total = 0;
        document.body.style.cursor='auto';


        //stim_presented = "object_stim/obj0.jpg"
        trial_n = i;

        //stim_presented = memory_items[i][0].split('object_stim/')[1].split('.jpg')[0]
        stim_presented_ltm = memory_items[i][0]


        original_color = HSVtoRGB(memory_items[i][1]/360)
      Begin Routine:
        mouse_resp_ltm.getPos();
        err_total = 0
        trial_n = i

        #stim_presented = memory_items[i][0].split('object_stim/')[1].split('.jpg')[0]
        stim_presented_ltm = memory_items[i][0]


        original_color = HSVtoRGB(memory_items[i][1]/360)


        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp_ltm.getPos()[0]
        mouse_y = mouse_resp_ltm.getPos()[1]
        adj_x = 0
        adj_y = 0

        mouse_x = mouse_x-(adj_x*2)
        mouse_y = mouse_y-(adj_y*2)
        mouse_x = (mouse_x - adj_x)
        mouse_y = (mouse_y - adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(0 + ((circle_size[0] / 2) * sin(theta))),
            (0 + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = HSVtoRGB((curr_angle / 360))
      Each JS Frame:
        mouse_x = mouse_resp_ltm.getPos()[0];
        mouse_y = mouse_resp_ltm.getPos()[1];
        adj_x = 0;
        adj_y = 0;
        //mouse_x = (mouse_x - (adj_x * 2));
        //mouse_y = (mouse_y - (adj_y * 2));
        mouse_x = (mouse_x - adj_x);
        mouse_y = (mouse_y - adj_y);
        //r = sqrt(mouse_x**2 + mouse_y**2)
        r = math.norm([mouse_x,mouse_y])
        current_pos = [mouse_x, mouse_y];
        cterm = [0, (- 50)];
        if ((r === 0)) {
            theta = 0;
        } else {
            if ((r !== 0)) {
                theta = Math.acos((math.dot(current_pos, cterm) / (r * (- 50))));
            }
        }
        if ((mouse_x < 0)) {
            theta = ((2 * pi) - theta);
        }
        curr_angle = Math.round((theta * (180 / pi)));
        dot_pos_resp = [(0 + ((circle_size[0] / 2) * Math.sin(theta))), (0 + ((circle_size[0] / 2) * Math.cos(theta)))];
        color_rgb = HSVtoRGB((curr_angle / 360));
      End JS Routine:
        psychoJS.experiment.addData("disp_angle_ltm", memory_items[i][1]);
        psychoJS.experiment.addData("resp_angle_ltm", curr_angle);
        psychoJS.experiment.addData("trial_n", trial_n);
        psychoJS.experiment.addData("focus_item", memory_items[i][2]);
        psychoJS.experiment.addData("stim_presented_ltm", stim_presented_ltm);
        psychoJS.experiment.addData("stim_file", memory_items[i][0]);
        psychoJS.experiment.addData("delay_1", memory_items[i][3]);
        psychoJS.experiment.addData("presented_block_type", memory_items[i][4]);
        err_angle = (((memory_items[i][1] - curr_angle) + 360) % 360);
        if ((err_angle > 180)) {
            err_angle = (360 - err_angle);
        }
        psychoJS.experiment.addData("err_angle_ltm", err_angle);
        if ((err_angle === 0)) {
            points = 15;
        } else {
            if ((err_angle <= 5)) {
                points = 10;
            } else {
                if ((err_angle <= 10)) {
                    points = 5;
                } else {
                    if ((err_angle <= 30)) {
                        points = 2;
                    } else {
                        points = 0;
                    }
                }
            }
        }
        points_total = (points_total + points);
        psychoJS.experiment.addData("points", points);
        psychoJS.experiment.addData("central_item", memory_items[i][2]);
        psychoJS.window.mouseVisible = false;
        i = (i + 1);
      End Routine:
        thisExp.addData('disp_angle_ltm', memory_items[i][1])
        thisExp.addData('resp_angle_ltm', curr_angle)
        thisExp.addData('trial_n', trial_n)
        thisExp.addData('focus_item', memory_items[i][2])
        thisExp.addData('stim_presented_ltm', stim_presented_ltm)
        thisExp.addData('stim_file', memory_items[i][0])
        thisExp.addData('delay_1', memory_items[i][3])


        err_angle = (trial_angles[0] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        thisExp.addData('err_angle_ltm', err_angle)

        if (err_angle == 0):
            points = 15
        elif (err_angle <= 5):
            points = 10
        elif (err_angle <= 10):
            points = 5
        elif (err_angle <= 30):
            points = 2
        else:
            points = 0


        points_total = points_total + points

        thisExp.addData('points', points)
        thisExp.addData('central_item', memory_items[i][2])

        win.mouseVisible = False

        i = i+1
    PolygonComponent circle_resp_11
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = $fix_time
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    ImageComponent ltm_stim_response
      image [set every repeat] = $stim_presented_ltm
      saveStartStop = False
      size = (.1, .1)
      startVal [time (s)] = $fix_time
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    PolygonComponent ltm_color_response
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      opacity [set every frame] = .5
      saveStartStop = False
      shape = circle
      size = (.15, .15)
      startVal [time (s)] = $(fix_time+.25)
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    PolygonComponent dot_resp1_11
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [time (s)] = $(fix_time+.25)
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    PolygonComponent fixation_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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Flow
  Routine setup
  LoopInitiator formula_setup_loop loopType="TrialHandler"
    conditionsFile = selected_formulas.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cond', 'fifth_level'), ('formula', '1 * 5 - 4 / 2'), ('answer', 3)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '2 * 6 - 8 / 2'), ('answer', 8)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '3 * 2 - 2 - 3'), ('answer', 1)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '4 + 3 - 5 * 1'), ('answer', 2)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '2 + 3 * 3 - 8'), ('answer', 3)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '2 / 8 * 2 * 2'), ('answer', 1)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '2 + 3 + 3 * 1'), ('answer', 8)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '2 / 2 * 7 + 1'), ('answer', 8)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '8 - 2 / 3 * 6'), ('answer', 4)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '3 + 4 / 1 - 2'), ('answer', 5)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '8 - 2 + 1 * 2'), ('answer', 8)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '4 / 1 * 1 + 1'), ('answer', 5)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '8 / 8 + 9 - 9'), ('answer', 1)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '2 + 6 * 3 / 9'), ('answer', 4)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '1 / 1 - 2 + 2'), ('answer', 1)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '3 + 1 + 2 / 2'), ('answer', 5)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '7 + 1 - 8 / 8'), ('answer', 7)]),
      OrderedDict([('cond', 'fifth_level'), ('formula', '2 * 6 / 2 / 1'), ('answer', 6)])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
    Routine formula_load
  LoopTerminator formula_setup_loop
  Routine instructions_experiment
  Routine instructions_perception_practice
  LoopInitiator trials_perception_practice loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine response_perception_practice
    Routine perception_practice_feedback
  LoopTerminator trials_perception_practice
  Routine instructions_1
  LoopInitiator practice_1 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine practice_memory_array_1
    LoopInitiator practice_response_memory1 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_response_memory
      Routine practice_feedback
    LoopTerminator practice_response_memory1
  LoopTerminator practice_1
  Routine instructions_2
  LoopInitiator practice_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine practice_parity1
    Routine practice_parity_feedback
  LoopTerminator practice_2
  Routine instructions_3
  LoopInitiator practice_3 loopType="TrialHandler"
    conditionsFile = delay_conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delay_1': 0, 'delay_2': 1.2},
      {'delay_1': 0.4, 'delay_2': 0.8},
      {'delay_1': 0.8, 'delay_2': 0.4},
      {'delay_1': 1.2, 'delay_2': 0}]
    Routine practice_memory_array_1
    Routine delay1
    LoopInitiator practice_parity_2 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_parity1
    LoopTerminator practice_parity_2
    Routine delay2
    LoopInitiator practice_response_memory2 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine practice_response_memory
      Routine practice_feedback
    LoopTerminator practice_response_memory2
  LoopTerminator practice_3
  Routine instructions_4
  LoopInitiator practice_4 loopType="TrialHandler"
    conditionsFile = delay_conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delay_1': 0, 'delay_2': 1.2},
      {'delay_1': 0.4, 'delay_2': 0.8},
      {'delay_1': 0.8, 'delay_2': 0.4},
      {'delay_1': 1.2, 'delay_2': 0}]
    Routine memory_array
    Routine delay1
    LoopInitiator practice_parity_3 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine parity
    LoopTerminator practice_parity_3
    Routine delay2
    LoopInitiator practice_response_memory_3 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine response_memory
    LoopTerminator practice_response_memory_3
    Routine feedback
  LoopTerminator practice_4
  Routine practice_end
  LoopInitiator trials_outer_loop loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_5 loopType="TrialHandler"
      loopType = random
      nReps = stress_1_n
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      Routine stai_instruct
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = stai_qs.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'STAI_item': 'I feel calm'},
          {'STAI_item': 'I feel tense'},
          {'STAI_item': 'I feel upset'},
          {'STAI_item': 'I am relaxed'},
          {'STAI_item': 'I feel content'},
          {'STAI_item': 'I am worried'}]
        Routine stai
      LoopTerminator trials_2
      Routine stress_instruct_1
      Routine stress_instruct_2
      LoopInitiator stress_block loopType="TrialHandler"
        loopType = random
        nReps = 2
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        LoopInitiator stress_trials loopType="TrialHandler"
          loopType = random
          nReps = 30
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          Routine stress_task
        LoopTerminator stress_trials
        Routine stress_break
      LoopTerminator stress_block
      Routine stai_instruct
      LoopInitiator stai_2 loopType="TrialHandler"
        conditionsFile = stai_qs.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'STAI_item': 'I feel calm'},
          {'STAI_item': 'I feel tense'},
          {'STAI_item': 'I feel upset'},
          {'STAI_item': 'I am relaxed'},
          {'STAI_item': 'I feel content'},
          {'STAI_item': 'I am worried'}]
        Routine stai
      LoopTerminator stai_2
      Routine end_task
    LoopTerminator trials_5
    LoopInitiator trials_6 loopType="TrialHandler"
      loopType = random
      nReps = perception_n
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      Routine instructions_perception
      LoopInitiator perception_block loopType="TrialHandler"
        loopType = random
        nReps = 2
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        Routine remind
        LoopInitiator perception_trials loopType="TrialHandler"
          conditionsFile = delay_conds.xlsx
          loopType = random
          nReps = perception_trial_total
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          conditions:
            [{'delay_1': 0, 'delay_2': 1.2},
            {'delay_1': 0.4, 'delay_2': 0.8},
            {'delay_1': 0.8, 'delay_2': 0.4},
            {'delay_1': 1.2, 'delay_2': 0}]
          Routine response_perception
          Routine delay1
          LoopInitiator parity_perception_trials loopType="TrialHandler"
            loopType = random
            nReps = 3
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            Routine parity
          LoopTerminator parity_perception_trials
          Routine delay2
        LoopTerminator perception_trials
        Routine end_block
      LoopTerminator perception_block
      Routine end_task
    LoopTerminator trials_6
    LoopInitiator trials_7 loopType="TrialHandler"
      loopType = random
      nReps = wm_n
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      Routine wm_instruct
      LoopInitiator wm_block loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 2
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        Routine remind
        LoopInitiator wm_trials loopType="TrialHandler"
          conditionsFile = delay_conds.xlsx
          loopType = random
          nReps = wm_trial_total
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          conditions:
            [{'delay_1': 0, 'delay_2': 1.2},
            {'delay_1': 0.4, 'delay_2': 0.8},
            {'delay_1': 0.8, 'delay_2': 0.4},
            {'delay_1': 1.2, 'delay_2': 0}]
          Routine memory_array
          Routine delay1
          LoopInitiator parity_trials loopType="TrialHandler"
            loopType = random
            nReps = 3
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            Routine parity
          LoopTerminator parity_trials
          Routine delay2
          LoopInitiator memory_trials loopType="TrialHandler"
            loopType = random
            nReps = 3
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            Routine response_memory
          LoopTerminator memory_trials
          Routine feedback
        LoopTerminator wm_trials
        Routine end_block
      LoopTerminator wm_block
      Routine end_task
    LoopTerminator trials_7
    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = random
      nReps = stress_2_n
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      Routine stai_instruct
      LoopInitiator trials_4 loopType="TrialHandler"
        conditionsFile = stai_qs.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'STAI_item': 'I feel calm'},
          {'STAI_item': 'I feel tense'},
          {'STAI_item': 'I feel upset'},
          {'STAI_item': 'I am relaxed'},
          {'STAI_item': 'I feel content'},
          {'STAI_item': 'I am worried'}]
        Routine stai
      LoopTerminator trials_4
      Routine stress_instruct_1
      Routine stress_instruct_2
      LoopInitiator trials_9 loopType="TrialHandler"
        loopType = random
        nReps = 2
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        LoopInitiator trials loopType="TrialHandler"
          loopType = random
          nReps = 30
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          Routine stress_task
        LoopTerminator trials
        Routine stress_break
      LoopTerminator trials_9
      Routine stai_instruct
      LoopInitiator trials_3 loopType="TrialHandler"
        conditionsFile = stai_qs.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'STAI_item': 'I feel calm'},
          {'STAI_item': 'I feel tense'},
          {'STAI_item': 'I feel upset'},
          {'STAI_item': 'I am relaxed'},
          {'STAI_item': 'I feel content'},
          {'STAI_item': 'I am worried'}]
        Routine stai
      LoopTerminator trials_3
      Routine end_task
    LoopTerminator trials_8
  LoopTerminator trials_outer_loop
  Routine question_instruct
  Routine age_q
  Routine gender_q
  Routine race_q
  Routine hand_q
  Routine color_q
  Routine english_q
  Routine dass_instruct
  LoopInitiator trials_dass loopType="TrialHandler"
    conditionsFile = dass_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'DASS_item': 'I found it hard to wind down.', 'scale': 's'},
      {'DASS_item': 'I was aware of dryness in my mouth.', 'scale': 'a'},
      {'DASS_item': "I couldn't seem to experience any positive feeling at all.", 'scale': 'd'},
      {'DASS_item': 'I experienced breathing difficulty (e.g. excessively rapid breathing, breathlessness in the absence of physical exertion).', 'scale': 'a'},
      {'DASS_item': 'I found it difficult to work up the initiative to do things.', 'scale': 'd'},
      {'DASS_item': 'I tended to over-react to situations.', 'scale': 's'},
      {'DASS_item': 'I experienced trembling (e.g. in the hands).', 'scale': 'a'},
      {'DASS_item': 'I felt that I was using a lot of nervous energy.', 'scale': 'd'},
      {'DASS_item': 'I was worried about situations in which I might panic and make a fool of myself.', 'scale': 'a'},
      {'DASS_item': 'I felt that I had nothing to look forward to.', 'scale': 'd'},
      {'DASS_item': 'I found myself getting agitated.', 'scale': 's'},
      {'DASS_item': 'I found it difficult to relax.', 'scale': 's'},
      {'DASS_item': 'I felt down-hearted and blue.', 'scale': 'd'},
      {'DASS_item': 'I was intolerant of anything that kept me from getting on with what I was doing.', 'scale': 's'},
      {'DASS_item': 'I felt I was close to panic.', 'scale': 'a'},
      {'DASS_item': 'I was unable to become enthusiastic about anything.', 'scale': 'd'},
      {'DASS_item': "I felt I wasn't worth much as a person.", 'scale': 'd'},
      {'DASS_item': 'I felt that I was rather touchy.', 'scale': 's'}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
    Routine dass
  LoopTerminator trials_dass
  Routine instructions_ltm
  LoopInitiator trials_ltm loopType="TrialHandler"
    loopType = random
    nReps = ltm_trials_nreps
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    Routine ltm_response_memory
  LoopTerminator trials_ltm
  Routine end_task
  Routine stai_instruct
  LoopInitiator stai_4 loopType="TrialHandler"
    conditionsFile = stai_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'STAI_item': 'I feel calm'},
      {'STAI_item': 'I feel tense'},
      {'STAI_item': 'I feel upset'},
      {'STAI_item': 'I am relaxed'},
      {'STAI_item': 'I feel content'},
      {'STAI_item': 'I am worried'}]
    Routine stai
  LoopTerminator stai_4
  Routine end
