PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = WMB1
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Routines
  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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  Routine test_color
    ImageComponent color_test1
      image [set every repeat] = $colors[0]
      pos [set every repeat] = $test_positions[0]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.8
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    ImageComponent color_test2
      image [set every repeat] = $colors[1]
      pos [set every repeat] = $test_positions[1]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.8
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    ImageComponent color_test3
      image [set every repeat] = $colors[2]
      pos [set every repeat] = $test_positions[2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.8
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    ImageComponent color_test4
      image [set every repeat] = $colors[3]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $test_positions[3]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.8
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    ImageComponent color_test5
      image [set every repeat] = $colors[4]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $test_positions[4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.8
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    ImageComponent color_test6
      image [set every repeat] = $colors[5]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $test_positions[5]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.8
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    KeyboardComponent color_key_resp
      allowedKeys = 's','d'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 1.8
      storeCorrect = True
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  Routine trial
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if ((block === "shape")) {
            stimuli = shapes;
            shuffle(stimuli);
        } else if ((block == "color")){
            stimuli = colors;
            shuffle(stimuli);
        } else {
                shuffle(possible_colors);
                shuffle(possible_shapes);
                stimuli = [get_filename_from_shape_and_color(possible_shapes[0],possible_colors[0]),
                get_filename_from_shape_and_color(possible_shapes[1],possible_colors[1]),
                get_filename_from_shape_and_color(possible_shapes[2],possible_colors[2]),
                get_filename_from_shape_and_color(possible_shapes[3],possible_colors[3]),
                get_filename_from_shape_and_color(possible_shapes[4],possible_colors[4]),
                get_filename_from_shape_and_color(possible_shapes[5],possible_colors[5])]
            }

        shuffle(positions);
        if ((setsize === 4)) {
            visibility = 1;
        } else {
            visibility = 0;
        }
      Begin Routine:
        if block == "shape":
            stimuli = shapes
        #elif block == "color":
        else:
            stimuli = colors
        #elif block == "shape_or_color":
        #    stimuli =
        #else:
        #    stimuli =

        shuffle(stimuli)
        shuffle(positions)
        if setsize == 6:
            visibility = 1
        else:
            visibility = 0
      End JS Routine:
        shape_1 = 0
        color_1 = 0
        shape_2 = 0
        color_2 = 0

        if ((setsize === 2)) {
            pos = [stim1.pos, stim2.pos];
            test_positions = get_test_positions(pos);
            test_positions.push(stim3.pos, stim4.pos);
        } else {
            pos = [stim1.pos, stim2.pos, stim3.pos, stim4.pos];
            test_positions = get_test_positions(pos);
        }

        if ((condition === "same")) {
            stimuli_1 = stimuli[0];
            stimuli_2 = stimuli[1];
            correct_answer = "s";
        } else {
            if ((block === "shape_and_color")) {
                change = "both";
                shape_1 = get_shape_from_filename(stimuli[0]);
                color_1 = get_color_from_filename(stimuli[0]);
                shape_2 = get_shape_from_filename(stimuli[1]);
                color_2 = get_color_from_filename(stimuli[1]);
                stimuli_1 = get_filename_from_shape_and_color(shape_1, color_2)
                stimuli_2 = get_filename_from_shape_and_color(shape_2, color_1)
            } else if ((block === "shape_or_color")) {
                if (condition_change_order[trial_counter] === "shape") {
                    change = "shape";
                    color_1 = get_color_from_filename(stimuli[0]);
                    color_2 = get_color_from_filename(stimuli[1]);
                    stimuli_1 = get_filename_from_shape_and_color(possible_shapes[6], color_1)
                    stimuli_2 = get_filename_from_shape_and_color(possible_shapes[7], color_2)
                    }
                else {
                    change = "color";
                    shape_1 = get_shape_from_filename(stimuli[0]);
                    shape_2 = get_shape_from_filename(stimuli[1]);
                    stimuli_1 = get_filename_from_shape_and_color(shape_1, possible_colors[6])
                    stimuli_2 = get_filename_from_shape_and_color(shape_2, possible_colors[7])
                    }
                } else {
                stimuli_1 = stimuli[6];
                stimuli_2 = stimuli[7];
            }
            correct_answer = "d";
        }
      End Routine:
        if setsize ==3:
            pos = [stim1.pos, stim2.pos, stim3.pos]
            test_positions = get_test_positions(pos)
            test_positions.extend([stim4.pos, stim5.pos, stim6.pos])
        else:
            pos = [stim1.pos, stim2.pos, stim3.pos, stim4.pos, stim5.pos, stim6.pos]
            test_positions = get_test_positions(pos)

        if condition == "same":
            stimuli_1 = stimuli[0]
            stimuli_2 = stimuli[1]
            correct_answer = 's'
        else:
            stimuli_1 = stimuli[6]
            stimuli_2 = stimuli[7]
            correct_answer = 'd'
    PolygonComponent fix
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    ImageComponent stim1
      image [set every repeat] = $stimuli[0]
      pos [set every repeat] = $positions[0]
      size = (0.1, 0.1)
      startVal [time (s)] = .75
      stopVal [duration (s)] = .75
      texture resolution = 512
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    ImageComponent stim2
      image [set every repeat] = $stimuli[1]
      pos [set every repeat] = $positions[1]
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = .75
      stopVal [duration (s)] = .75
      texture resolution = 512
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    ImageComponent stim3
      image [set every repeat] = $stimuli[2]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $positions[2]
      size = (0.1, 0.1)
      startVal [time (s)] = .75
      stopVal [duration (s)] = .75
      texture resolution = 512
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    ImageComponent stim4
      image [set every repeat] = $stimuli[3]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $positions[3]
      size = (0.1, 0.1)
      startVal [time (s)] = .75
      stopVal [duration (s)] = .75
      texture resolution = 512
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  Routine test
    ImageComponent test1
      image [set every repeat] = $stimuli_1
      pos [set every repeat] = $test_positions[0]
      size = (0.1, 0.1)
      startVal [time (s)] = .9
      texture resolution = 512
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    ImageComponent test2
      image [set every repeat] = $stimuli_2
      pos [set every repeat] = $test_positions[1]
      size = (0.1, 0.1)
      startVal [time (s)] = .9
      texture resolution = 512
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    ImageComponent test3
      image [set every repeat] = $stimuli[2]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $test_positions[2]
      size = (0.1, 0.1)
      startVal [time (s)] = .9
      texture resolution = 512
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    ImageComponent test4
      image [set every repeat] = $stimuli[3]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $test_positions[3]
      size = (0.1, 0.1)
      startVal [time (s)] = .9
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 's','d'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = .9
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        trial_counter += 1;
  Routine instructions
    CodeComponent code_block
      Code Type = Auto->JS
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      Begin Routine:
        trial_counter = 0

        if (practice_or_trial == "practice"):
            instruct_text = instruct_text_practice
        else:
            instruct_text = instruct_text_trials
    TextComponent instructions_trial
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $instruct_text
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    KeyboardComponent instruct_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        if ((correct_answer === "s")) {
            answer_text = "Same";
        } else {
            answer_text = "Different";
        }
        trial_positions = [[(positions[0][0] - 0.5), positions[0][1]], [(positions[1][0] - 0.5), positions[1][1]], [(positions[2][0] - 0.5), positions[2][1]], [(positions[3][0] - 0.5), positions[3][1]]];
        feedback_test_positions = [[(test_positions[0][0] + 0.4), test_positions[0][1]], [(test_positions[1][0] + 0.4), test_positions[1][1]], [(test_positions[2][0] + 0.4), test_positions[2][1]], [(test_positions[3][0] + 0.4), test_positions[3][1]]];
      Begin Routine:
        if (correct_answer == "s"):
            answer_text = "Same"
        else:
            answer_text = "Different"

        trial_positions = [
        [positions[0][0]-.5, positions[0][1]],
        [positions[1][0]-.5, positions[1][1]],
        [positions[2][0]-.5, positions[2][1]],
        [positions[3][0]-.5, positions[3][1]],
        [positions[4][0]-.5, positions[4][1]],
        [positions[5][0]-.5, positions[5][1]]]

        feedback_test_positions = [
        [test_positions[0][0]+.4, test_positions[0][1]],
        [test_positions[1][0]+.4, test_positions[1][1]],
        [test_positions[2][0]+.4, test_positions[2][1]],
        [test_positions[3][0]+.4, test_positions[3][1]],
        [test_positions[4][0]+.4, test_positions[4][1]],
        [test_positions[5][0]+.4, test_positions[5][1]]]
    TextComponent text_feedback
      letterHeight = 0.03
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Correct answer:
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    TextComponent text_feedback_answer
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $answer_text
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    TextComponent text_trial
      letterHeight = 0.03
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text = Original
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    TextComponent text_test
      letterHeight = 0.03
      pos = (.5, .25)
      startVal [time (s)] = 0.0
      text = Test
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    TextComponent text
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent feedback_trial_1
      image [set every repeat] = $stimuli[0]
      pos [set every repeat] = $trial_positions[0]
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent feedback_trial_2
      image [set every repeat] = $stimuli[1]
      pos [set every repeat] = $trial_positions[1]
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent feedback_trial_3
      image [set every repeat] = $stimuli[2]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $trial_positions[2]
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent feedback_trial_4
      image [set every repeat] = $stimuli[3]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $trial_positions[3]
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent feedback_test_1
      image [set every repeat] = $stimuli_1
      pos [set every repeat] = $feedback_test_positions[0]
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent feedback_test_2
      image [set every repeat] = $stimuli_2
      pos [set every repeat] = $feedback_test_positions[1]
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent feedback_test_3
      image [set every repeat] = $stimuli[2]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $feedback_test_positions[2]
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent feedback_test_4
      image [set every repeat] = $stimuli[3]
      opacity [set every repeat] = visibility
      pos [set every repeat] = $feedback_test_positions[3]
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      texture resolution = 512
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  Routine end_practice
    TextComponent text_end_practice_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the practice.

        Press space to continue.
    KeyboardComponent key_resp_end_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_trials
      Code Type = Auto->JS
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  Routine end_experiment
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment.

        Thank you for your participation!

        Press space to continue.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_block
    TextComponent text_end_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of this block.
        Please take a short break.

        Press space to continue.
    KeyboardComponent key_resp_end_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start_practice
    TextComponent text_practice_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to start the practice.
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    KeyboardComponent key_resp_practice_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_practice
      Code Type = Auto->JS
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Flow
  Routine setup
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'shape'), ('instruct_text', 'In this part of the test, we will look at your memory for shapes.  You will first see some black figures flash briefly – try to remember the shapes. Then you will be provided with a second set of black figures, and you will have to decide whether the new black figures are the same (press “S”) or different (press “D”) as the ones you saw before. All the figures will be in black, and only the shapes of the figures will change.\n\nNote that the locations of these black figures on the screen are not important as they will change location constan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,
      OrderedDict([('block', 'color'), ('instruct_text', 'In this part of the test, we will look at your memory for colors. You will first see some colored figures flash briefly – try to remember the colors. Then you will be provided with a second set of colored figures, and you will have to decide whether the new colored figures are the same (press “S”) or different (press “D”) as the ones you saw before. The shapes of the figures will be the same, and only the colors of the figures will change.\n\nNote that the locations of these colored figures on the screen are not important as they will change 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,
      OrderedDict([('block', 'shape_or_color'), ('instruct_text', 'In this part of the test, we will look at your memory for either shapes or colors. You will first see some colored figures flash briefly – try to remember them. Then you will be provided with a second set of colored figures, and you will have to decide whether the new colored figures are the same (press “S”) or different (press “D”) as the ones you saw before. Either the shapes or the colors of the figures (but not both) will change.\n\nNote that the locations of these colored figures on the screen are not important as they will chan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,
      OrderedDict([('block', 'shape_and_color'), ('instruct_text', 'In this part of the test, we will look at your memory for combinations of shapes and colors. You will first see some colored figures flash briefly – try to remember them. Then you will be provided with a second set of colored figures, and you will have to decide whether the new colored figures are the same (press “S”) or different (press “D”) as the ones you saw before. All the available colors and shapes will be the same, but the combinations of colors and shapes may change. For example, if you are shown a red square and a green ci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
    Routine start_practice
    Routine instructions
    LoopInitiator practice_trials loopType="TrialHandler"
      conditionsFile = condition.xlsx
      loopType = random
      nReps = 4
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      conditions:
        [OrderedDict([('condition', 'same'), ('setsize', 3)]),
        OrderedDict([('condition', 'different'), ('setsize', 3)]),
        OrderedDict([('condition', 'same'), ('setsize', 6)]),
        OrderedDict([('condition', 'different'), ('setsize', 6)])]
      Routine trial
      Routine test
      Routine feedback
    LoopTerminator practice_trials
    Routine end_practice
    Routine instructions
    LoopInitiator experiment_trials loopType="TrialHandler"
      conditionsFile = condition.xlsx
      loopType = random
      nReps = 27
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      conditions:
        [OrderedDict([('condition', 'same'), ('setsize', 3)]),
        OrderedDict([('condition', 'different'), ('setsize', 3)]),
        OrderedDict([('condition', 'same'), ('setsize', 6)]),
        OrderedDict([('condition', 'different'), ('setsize', 6)])]
      Routine trial
      Routine test
    LoopTerminator experiment_trials
    Routine end_block
  LoopTerminator blocks
  Routine end_experiment
